WorkflowBuilder(Version=2.8.0)
GroupWorkflow Init
    Disable BehaviorSubject<System.String> RewardOutcome
    Disable BehaviorSubject<System.Object> RewardDeliveryLeft
    Disable BehaviorSubject<System.Object> RewardDeliveryRight
    Disable BehaviorSubject<System.Object> TrialEnd
    Disable BehaviorSubject<System.Boolean> DelayStart
    Disable BehaviorSubject<System.Boolean> GoCue
    Disable BehaviorSubject<System.Boolean> Pass

    Disable Bonsai.Shaders.CreateWindow
      Width=640
      Height=480
      VSync=On
      SwapSync=false
      ClearColor=Black
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Hidden
      WindowState=Minimized
      DisplayDevice=Primary
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false

GroupWorkflow CreateOscClient
    SubscribeSubject ComPorts
    -> Index(Operand=StringProperty(Value=BonsaiOsc1))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Int32.Parse(it)
    -> PropertyMapping(Port)
    -> Bonsai.Osc.CreateTcpServer(Name=BonsaiOSC, Port=4002, NoDelay=false, AllowNatTraversal=true)

    SubscribeSubject ComPorts
    -> Index(Operand=StringProperty(Value=BonsaiOsc2))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Int32.Parse(it)
    -> PropertyMapping(Port)
    -> Bonsai.Osc.CreateTcpServer(Name=BonsaiOSC2, Port=4003, NoDelay=false, AllowNatTraversal=true)

    SubscribeSubject ComPorts
    -> Index(Operand=StringProperty(Value=BonsaiOsc3))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Int32.Parse(it)
    -> PropertyMapping(Port)
    -> Bonsai.Osc.CreateTcpServer(Name=BonsaiOSC3, Port=4004, NoDelay=false, AllowNatTraversal=true)

    SubscribeSubject ComPorts
    -> Index(Operand=StringProperty(Value=BonsaiOsc4))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Int32.Parse(it)
    -> PropertyMapping(Port)
    -> Bonsai.Osc.CreateTcpServer(Name=BonsaiOSC4, Port=4005, NoDelay=false, AllowNatTraversal=true)

    Bonsai.Osc.ReceiveMessage(Address="", TypeTag="", Connection=BonsaiOSC)
    -> PublishSubject FromBonsaiOSC

    Bonsai.Osc.ReceiveMessage(Address="", TypeTag="", Connection=BonsaiOSC2)
    -> PublishSubject FromBonsaiOSC2

    Bonsai.Osc.ReceiveMessage(Address="", TypeTag="", Connection=BonsaiOSC4)
    -> PublishSubject FromBonsaiOSC4

    Bonsai.Osc.ReceiveMessage(Address="", TypeTag="", Connection=BonsaiOSC3)
    -> PublishSubject FromBonsaiOSC3

    BehaviorSubject<Bonsai.Osc.Message> ToBonsaiOSC
    -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC, Address="")

    BehaviorSubject<Bonsai.Osc.Message> ToBonsaiOSC2
    -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC2, Address="")

    BehaviorSubject<Bonsai.Osc.Message> ToBonsaiOSC3
    -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC3, Address="")

    BehaviorSubject<Bonsai.Osc.Message> ToBonsaiOSC4
    -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC4, Address="")

Disable GroupWorkflow TrialLogic
    SubscribeSubject Start
    -> Take(Count=1) => #1
    SubscribeSubject DelayTime
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTimeDelay) => #4
    SubscribeSubject ITI
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTimeITI) => #7
    #1, #4, #7 -> SelectMany ITIAndDelay
        ExternalizedMapping(DueTimeITI) => #0
        WorkflowInput Source1 => #1
        #0, #1 -> SelectMany
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> Condition => #2
                WorkflowInput Source1
                -> WorkflowOutput
            ExternalizedMapping(DueTime(DisplayName=DueTimeITI)) => #3
            #2, #3 -> Bonsai.Shaders.Delay(DueTime=PT4.505S)
            -> WorkflowOutput
        -> MulticastSubject DelayStart => #3
        ExternalizedMapping(DueTime(DisplayName=DueTimeDelay)) => #4
        #3, #4 -> Bonsai.Shaders.Delay(DueTime=PT0.928S)
        -> BooleanProperty(Value=true) => #6
        SubscribeSubject Licks
        -> IntProperty(Value=1) => #8
        SubscribeSubject GoCue2
        -> IntProperty(Value=0) => #10
        SubscribeSubject DelayStart2
        -> IntProperty(Value=1) => #12
        SubscribeSubject Pass2
        -> IntProperty(Value=0) => #14
        #10, #12, #14 -> Merge
        -> PropertyMapping(Value) => #16
        #8, #16 -> SelectMany Pass
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=IntProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput
        -> MulticastSubject Pass
        -> BooleanProperty(Value=false) => #19
        SubscribeSubject Licks2
        -> IntProperty(Value=1) => #21
        SubscribeSubject GoCue2
        -> IntProperty(Value=0) => #23
        SubscribeSubject DelayStart2
        -> IntProperty(Value=1) => #25
        SubscribeSubject Pass2
        -> IntProperty(Value=0) => #27
        #23, #25, #27 -> Merge
        -> PropertyMapping(Value) => #29
        #21, #29 -> SelectMany Pass
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=IntProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #31
        #6, #19, #31 -> Merge
        -> Take(Count=1)
        -> Condition "No Licks"
            WorkflowInput Source1
            -> WorkflowOutput
        -> Repeat
        -> Take(Count=1)
        -> WorkflowOutput
    -> MulticastSubject GoCue => #9
    SubscribeSubject ResponseTime
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #12
    #9, #12 -> SelectMany ResponseInterval
        ExternalizedMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT1S, Period=PT0S)
        -> StringProperty(Value=NoResponse) => #2
        SubscribeSubject Licks => #3
        SubscribeSubject Licks2 => #4
        #2, #3, #4 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Reward(Description=Reward)
        WorkflowInput Source1 => #0
        -> Condition LickLeft
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Left))
            -> WorkflowOutput
        -> SelectMany DetermineOutcome => #2
            SubscribeSubject IsLeftRewarded => #0
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> MulticastSubject RewardDeliveryLeft
            -> StringProperty(Value=RewardLeft) => #3
            #0 -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=ErrorLeft) => #6
            #3, #6 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition LickRight
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Right))
            -> WorkflowOutput
        -> SelectMany DetermineOutcome => #4
            SubscribeSubject IsRightRewarded => #0
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> MulticastSubject RewardDeliveryRight
            -> StringProperty(Value=RewardRight) => #3
            #0 -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=ErrorRight) => #6
            #3, #6 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition Miss
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=NoResponse))
            -> WorkflowOutput
        -> StringProperty(Value=NoResponse) => #6
        Source2=#2, Source3=#4, Source5=#6 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> MulticastSubject RewardOutcome => #15
    SubscribeSubject RewardConsumeTime
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.fromSeconds(it)
    -> PropertyMapping(DueTime) => #18
    #15, #18 -> SelectMany RewardConsumeTime
        WorkflowInput Source1 => #0
        ExternalizedMapping(DueTime) => #1
        #0, #1 -> Bonsai.Shaders.Delay(DueTime=PT3S)
        -> WorkflowOutput
    -> MulticastSubject TrialEnd
    -> Take(Count=1)
    -> Repeat
    -> WorkflowOutput

    SubscribeSubject Start
    -> Take(Count=1)
    -> Equal(Operand=IntProperty(Value=3))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany
        SubscribeSubject ITIEndTime
        -> BooleanProperty(Value=true)
        -> WorkflowOutput
    -> MulticastSubject GoCue => #29
    SubscribeSubject ResponseTime
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #32
    #29, #32 -> SelectMany ResponseInterval
        ExternalizedMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT1S, Period=PT0S)
        -> StringProperty(Value=NoResponse) => #2
        SubscribeSubject Licks => #3
        SubscribeSubject Licks2 => #4
        #2, #3, #4 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Reward(Description=Reward)
        WorkflowInput Source1 => #0
        -> Condition LickLeft
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Left))
            -> WorkflowOutput
        -> SelectMany DetermineOutcome => #2
            SubscribeSubject IsLeftRewarded => #0
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> MulticastSubject RewardDeliveryLeft
            -> StringProperty(Value=RewardLeft) => #3
            #0 -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=ErrorLeft) => #6
            #3, #6 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition LickRight
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Right))
            -> WorkflowOutput
        -> SelectMany DetermineOutcome => #4
            SubscribeSubject IsRightRewarded => #0
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> MulticastSubject RewardDeliveryRight
            -> StringProperty(Value=RewardRight) => #3
            #0 -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=ErrorRight) => #6
            #3, #6 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition Miss
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=NoResponse))
            -> WorkflowOutput
        -> StringProperty(Value=NoResponse) => #6
        Source2=#2, Source3=#4, Source5=#6 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> MulticastSubject RewardOutcome => #35
    SubscribeSubject RewardConsumeTime
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.fromSeconds(it)
    -> PropertyMapping(DueTime) => #38
    #35, #38 -> SelectMany RewardConsumeTime
        WorkflowInput Source1 => #0
        ExternalizedMapping(DueTime) => #1
        #0, #1 -> Bonsai.Shaders.Delay(DueTime=PT3S)
        -> WorkflowOutput
    -> MulticastSubject TrialEnd
    -> Take(Count=1)
    -> Repeat

Disable GroupWorkflow "Hardware Outputs"
    GroupWorkflow Audio
        Bonsai.Audio.AudioReader(FileName=bell.wav, BufferLength=0, SampleRate=0)
        -> BehaviorSubject AudioWaveform

        SubscribeSubject GoCue
        -> SelectMany "Play sound"
            SubscribeSubject AudioWaveform
            -> Bonsai.Audio.AudioPlayback(SampleRate=44100, State=Playing)
            -> Last
            -> Take(Count=1)
            -> WorkflowOutput

            Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort0))
            -> MulticastSubject BehaviorCommands

        BehaviorSubject<Bonsai.Harp.HarpMessage> SoundCardCommands => #4
        SubscribeSubject ComPorts
        -> Index(Operand=StringProperty(Value=Soundcard))
        -> PropertyMapping(PortName) => #7
        #4, #7 -> Harp.SoundCard.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM7)
        -> BehaviorSubject SoundCardEvents

        SubscribeSubject GoCue
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=4))
        -> MulticastSubject SoundCardCommands

    GroupWorkflow RewardControl
        SubscribeSubject LeftValueSize => #0
        SubscribeSubject LeftValueSize1 => #1
        #0, #1 -> Merge
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort0)
        -> MulticastSubject BehaviorCommands

        SubscribeSubject RightValueSize => #5
        SubscribeSubject RightValueSize1 => #6
        #5, #6 -> Merge
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort1)
        -> MulticastSubject BehaviorCommands

        SubscribeSubject ManualWater_Left => #10
        SubscribeSubject RewardDeliveryLeft => #11
        SubscribeSubject RewardDelay
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #14
        #11, #14 -> SelectMany DelayReward
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime) => #1
            #0, #1 -> Bonsai.Shaders.Delay(DueTime=PT0S)
            -> WorkflowOutput
        -> IntProperty(Value=0) => #16
        #10, #16 -> Merge
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=SupplyPort0))
        -> MulticastSubject BehaviorCommands

        SubscribeSubject ManualWater_Right => #20
        SubscribeSubject RewardDeliveryRight => #21
        SubscribeSubject RewardDelay
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #24
        #21, #24 -> SelectMany DelayReward
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime) => #1
            #0, #1 -> Bonsai.Shaders.Delay(DueTime=PT0S)
            -> WorkflowOutput
        -> IntProperty(Value=0) => #26
        #20, #26 -> Merge
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=SupplyPort1))
        -> MulticastSubject BehaviorCommands

    Harp.Behavior.CreateMessage
      MessageType=Write
      Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable="DOPort2 SupplyPort0 SupplyPort1 SupplyPort2 DO0 DO1 DO2 DO3")
    -> MulticastSubject BehaviorCommands

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedOutputToggle) => #5
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=DO2))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> Condition => #9
        WorkflowInput Source1
        -> WorkflowOutput
    #9, #5 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/BehaviorEvent)
    -> MulticastSubject ToBonsaiOSC

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedOutputToggle) => #16
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=SupplyPort0))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> Condition => #20
        WorkflowInput Source1
        -> WorkflowOutput
    #20, #16 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/LeftRewardDeliveryTimeHarp)
    -> MulticastSubject ToBonsaiOSC2

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedOutputToggle) => #27
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=SupplyPort1))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> Condition => #31
        WorkflowInput Source1
        -> WorkflowOutput
    #31, #27 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/RightRewardDeliveryTimeHarp)
    -> MulticastSubject ToBonsaiOSC2

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #38
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort2))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> DistinctUntilChanged
    -> Condition => #43
        WorkflowInput Source1
        -> WorkflowOutput
    #43, #38 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/PhotometryRising)
    -> MulticastSubject ToBonsaiOSC2

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #50
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort2))
    -> Equal(Operand=WorkflowProperty<System.Byte>(Value=0))
    -> DistinctUntilChanged
    -> Condition => #55
        WorkflowInput Source1
        -> WorkflowOutput
    #55, #50 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/PhotometryFalling)
    -> MulticastSubject ToBonsaiOSC2

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #62
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DI3))
    -> Equal(Operand=WorkflowProperty<System.Byte>(Value=0))
    -> DistinctUntilChanged
    -> Condition => #67
        WorkflowInput Source1
        -> WorkflowOutput
    #67, #62 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> PublishSubject ITIEndTime

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedOutputToggle) => #72
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=DO3))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> Condition => #76
        WorkflowInput Source1
        -> WorkflowOutput
    #76, #72 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/OptogeneticsTimeHarp)
    -> MulticastSubject ToBonsaiOSC2

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedOutputToggle) => #83
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=DO0))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> Condition => #87
        WorkflowInput Source1
        -> WorkflowOutput
    #87, #83 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/ITIStartTimeHarp)
    -> MulticastSubject ToBonsaiOSC

    SubscribeSubject SoundCardEvents
    -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
    -> Harp.SoundCard.Parse(Register=Harp.SoundCard.TimestampedPlaySoundOrFrequency)
    -> Bonsai.Osc.Format(Address=/GoCueTimeSoundCard)
    -> MulticastSubject ToBonsaiOSC

    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDOPort2Payload(PulseDOPort2=50))
    -> MulticastSubject BehaviorCommands

    Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=110, PayloadType=U8, Value=4))
    -> MulticastSubject BehaviorCommands

    Harp.SoundCard.CreateMessage(MessageType=Event, Payload=Harp.SoundCard.CreateConfigureDO0Payload(ConfigureDO0=Pulse100MsWhenStart))
    -> MulticastSubject SoundCardCommands

    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO2Payload(PulseDO2=10))
    -> MulticastSubject BehaviorCommands

    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO3Payload(PulseDO3=10))
    -> MulticastSubject BehaviorCommands

    SubscribeSubject Start
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DO0))
    -> MulticastSubject BehaviorCommands

    SubscribeSubject DelayStart
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DO2))
    -> MulticastSubject BehaviorCommands

    SubscribeSubject GoCue
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DO2))
    -> MulticastSubject BehaviorCommands

    SubscribeSubject DelayStart
    -> PublishSubject DelayStart2

    SubscribeSubject GoCue
    -> PublishSubject GoCue2

    SubscribeSubject Pass
    -> PublishSubject Pass2

    SubscribeSubject TrialEnd
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DO2))
    -> MulticastSubject BehaviorCommands

    SubscribeSubject ITI
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it*1000
    -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseDO0)
    -> MulticastSubject BehaviorCommands

    SubscribeSubject GoCue
    -> IntProperty(Value=1) => #131
    SubscribeSubject PassGoCue
    -> PropertyMapping(Value) => #133
    #131, #133 -> SelectMany Pass
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=0))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DO3))
    -> MulticastSubject BehaviorCommands

    Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO0Payload(PulseDO0=10))
    -> Disable MulticastSubject BehaviorCommands

    Disable SubscribeSubject BehaviorEvents
    -> Disable Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedOutputToggle) => #140
    -> Disable MemberSelector(Selector=Value)
    -> Disable BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=DOPort2))
    -> Disable GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> Disable Condition => #144
        WorkflowInput Source1
        -> WorkflowOutput
    #144, #140 -> Disable WithLatestFrom
    -> Disable MemberSelector(Selector=Item2.Seconds)
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Disable Bonsai.Osc.Format(Address=/DOPort2Output)
    -> Disable MulticastSubject ToBonsaiOSC

    Disable SubscribeSubject SoundCardEvents
    -> Disable Harp.SoundCard.FilterRegister(FilterType=Include, Register=Harp.SoundCard.ConfigureDI0) => #151
    -> Disable MemberSelector(Selector=Value)
    -> Disable BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=DO0))
    -> Disable GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> Disable Condition => #155
        WorkflowInput Source1
        -> WorkflowOutput
    #155, #151 -> Disable WithLatestFrom
    -> Disable MemberSelector(Selector=Item2.Seconds)
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Disable Bonsai.Osc.Format(Address=/DOPort2Output)
    -> Disable MulticastSubject ToBonsaiOSC

    Disable SubscribeSubject SoundCardEvents
    -> Disable Harp.SoundCard.Parse(Register=Harp.SoundCard.TimestampedPlaySoundOrFrequency) => #162
    -> Disable MemberSelector(Selector=Seconds)
    #162 -> Disable MemberSelector(Selector=Value)

    SubscribeSubject RewardOutcome
    -> IntProperty(Value=1) => #166
    SubscribeSubject PassRewardOutcome
    -> PropertyMapping(Value) => #168
    #166, #168 -> SelectMany Pass
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=0))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DO3))
    -> MulticastSubject BehaviorCommands

GroupWorkflow HardwareInputs
    BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands => #0
    SubscribeSubject ComPorts
    -> Index(Operand=StringProperty(Value=Behavior))
    -> PropertyMapping(PortName) => #3
    #0, #3 -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM9)
    -> PublishSubject BehaviorEvents

    Disable SubscribeSubject BehaviorEvents
    -> Disable Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
    -> Disable MemberSelector(Selector=Seconds)
    -> Disable BehaviorSubject Timestamps

    Disable GroupWorkflow JaneliaLickDetector => #10
        Disable Bonsai.Windows.Input.KeyDown(Filter=L, SuppressRepetitions=false)
        -> Disable PublishSubject LeftKeyPress
        -> Disable StringProperty(Value=Left) => #2
        Disable Bonsai.Windows.Input.KeyDown(Filter=R, SuppressRepetitions=false)
        -> Disable PublishSubject RightKeyPress
        -> Disable StringProperty(Value=Right) => #5
        SubscribeSubject BehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #7
        -> MemberSelector(Selector=Value)
        -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0))
        -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
        -> DistinctUntilChanged
        -> Condition => #12
            WorkflowInput Source1
            -> WorkflowOutput
        #12, #7 -> WithLatestFrom
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject LeftLickTime
        -> StringProperty(Value=Left) => #16
        SubscribeSubject BehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #18
        -> MemberSelector(Selector=Value)
        -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort1))
        -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
        -> DistinctUntilChanged
        -> Condition => #23
            WorkflowInput Source1
            -> WorkflowOutput
        #23, #18 -> WithLatestFrom
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject RightLickTime
        -> StringProperty(Value=Right) => #27
        #2, #5, #16, #27 -> Merge
        -> PublishSubject Licks
        -> WorkflowOutput
    Disable SubscribeSubject ComPorts
    -> Disable Index(Operand=StringProperty(Value=AINDLickDetector))
    -> Disable NotEqual(Operand=StringProperty(Value=1))
    -> Disable Condition => #14
        WorkflowInput Source1
        -> WorkflowOutput
    #10, #14 -> Disable SubscribeWhen

    Disable GroupWorkflow NewLickDetector => #16
        BehaviorSubject<Bonsai.Harp.HarpMessage> LickometerLeftCommands => #0
        SubscribeSubject ComPorts
        -> Index(Operand=StringProperty(Value=LeftLickDetector))
        -> PropertyMapping(PortName) => #3
        #0, #3 -> AllenNeuralDynamics.LicketySplitLickDetector.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM11)
        -> PublishSubject LickometerEventsLeft

        BehaviorSubject<Bonsai.Harp.HarpMessage> LickometerRightCommands => #6
        SubscribeSubject ComPorts
        -> Index(Operand=StringProperty(Value=RightLickDetector))
        -> PropertyMapping(PortName) => #9
        #6, #9 -> AllenNeuralDynamics.LicketySplitLickDetector.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM6)
        -> PublishSubject LickometerEventsRight

        SubscribeSubject LickometerEventsLeft
        -> AllenNeuralDynamics.LicketySplitLickDetector.Parse(Register=AllenNeuralDynamics.LicketySplitLickDetector.TimestampedLickState) => #13
        -> MemberSelector(Selector=Value)
        -> BitwiseAnd(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplitLickDetector.LickChannels>(Value=Channel0))
        -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> DistinctUntilChanged
        -> Condition => #18
            WorkflowInput Source1
            -> WorkflowOutput
        #18, #13 -> WithLatestFrom
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject LeftLickTime2
        -> StringProperty(Value=Left) => #22
        SubscribeSubject LickometerEventsRight
        -> AllenNeuralDynamics.LicketySplitLickDetector.Parse(Register=AllenNeuralDynamics.LicketySplitLickDetector.TimestampedLickState) => #24
        -> MemberSelector(Selector=Value)
        -> BitwiseAnd(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplitLickDetector.LickChannels>(Value=Channel0))
        -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> DistinctUntilChanged
        -> Condition => #29
            WorkflowInput Source1
            -> WorkflowOutput
        #29, #24 -> WithLatestFrom
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject RightLickTime2
        -> StringProperty(Value=Right) => #33
        #22, #33 -> Merge
        -> PublishSubject Licks2
        -> WorkflowOutput
    Disable SubscribeSubject ComPorts
    -> Disable Index(Operand=StringProperty(Value=AINDLickDetector))
    -> Disable NotEqual(Operand=StringProperty(Value=0))
    -> Disable Condition => #20
        WorkflowInput Source1
        -> WorkflowOutput
    #16, #20 -> Disable SubscribeWhen

    SubscribeSubject ComPorts
    -> Index(Operand=StringProperty(Value=SniffDetector))
    -> NotEqual(Operand=StringProperty(Value=0))
    -> Condition => #25
        WorkflowInput Source1
        -> WorkflowOutput
    GroupWorkflow SniffDetector => #26
        BehaviorSubject<Bonsai.Harp.HarpMessage> SniffCommands => #0
        SubscribeSubject ComPorts
        -> Index(Operand=StringProperty(Value=SniffDetector))
        -> PropertyMapping(PortName) => #3
        #0, #3 -> AllenNeuralDynamics.SniffDetector.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM5)
        -> PublishSubject SniffDetectorEvents

        SubscribeSubject SniffDetectorEvents
        -> AllenNeuralDynamics.SniffDetector.Parse(Register=AllenNeuralDynamics.SniffDetector.TimestampedRawVoltage)
        -> MemberSelector(Selector=Value)

        Timer(DueTime=PT0S, Period=PT0S)
        -> AllenNeuralDynamics.SniffDetector.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.SniffDetector.CreateRawVoltageDispatchRatePayload(RawVoltageDispatchRate=400))
        -> MulticastSubject SniffCommands
    #25, #26 -> SubscribeWhen

GroupWorkflow Parameters
    GroupWorkflow ReadFromOsc
        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/LeftValueSize, TypeTag=f)
        -> BehaviorSubject LeftValueSize

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/RightValueSize, TypeTag=f)
        -> BehaviorSubject RightValueSize

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/RewardConsumeTime, TypeTag=f)
        -> BehaviorSubject RewardConsumeTime

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Left_Bait, TypeTag=i)
        -> Equal(Operand=IntProperty(Value=1))
        -> BehaviorSubject IsLeftRewarded

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Right_Bait, TypeTag=i)
        -> Equal(Operand=IntProperty(Value=1))
        -> BehaviorSubject IsRightRewarded

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/start, TypeTag=i)
        -> PublishSubject Start

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/ITI, TypeTag=f)
        -> BehaviorSubject ITI

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/DelayTime, TypeTag=f)
        -> BehaviorSubject DelayTime

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/ResponseTime, TypeTag=f)
        -> BehaviorSubject ResponseTime

        Disable SubscribeSubject FromBonsaiOSC
        -> Disable Bonsai.Osc.Parse(Address=/TriggerITIStart_Wave1, TypeTag=i)
        -> Disable PublishSubject TriggerITIStart_Wave1

        Disable SubscribeSubject FromBonsaiOSC
        -> Disable Bonsai.Osc.Parse(Address=/TriggerITIStart_Wave2, TypeTag=i)
        -> Disable PublishSubject TriggerITIStart_Wave2

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Trigger_Location1, TypeTag=i)
        -> PublishSubject Trigger_Location1

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Trigger_Location2, TypeTag=i)
        -> PublishSubject Trigger_Location2

        Disable SubscribeSubject FromBonsaiOSC
        -> Disable Bonsai.Osc.Parse(Address=/TriggerGoCue_Wave1, TypeTag=i)
        -> Disable PublishSubject TriggerGoCue_Wave1

        Disable SubscribeSubject FromBonsaiOSC
        -> Disable Bonsai.Osc.Parse(Address=/TriggerGoCue_Wave2, TypeTag=i)
        -> Disable PublishSubject TriggerGoCue_Wave2

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Location1Size, TypeTag=i)
        -> PublishSubject Location1Size

        Disable SubscribeSubject FromBonsaiOSC
        -> Disable Bonsai.Osc.Parse(Address=/Location2Size, TypeTag=i)
        -> Disable PublishSubject Location2Size

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/TriggerSource, TypeTag=s)
        -> PublishSubject TriggerSource

        SubscribeSubject FromBonsaiOSC4
        -> Bonsai.Osc.Parse(Address=/WaveForm1_1, TypeTag=s)
        -> Parse(Pattern=%f, Separator=",")
        -> Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=F32, Channels=1)
        -> Bonsai.Dsp.Reshape(Channels=1, Rows=1)
        -> BehaviorSubject WaveForm1_1

        Disable SubscribeSubject FromBonsaiOSC4
        -> Disable Bonsai.Osc.Parse(Address=/WaveForm2_1, TypeTag=s)
        -> Disable Parse(Pattern=%f, Separator=",")
        -> Disable Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=F32, Channels=1)
        -> Disable Bonsai.Dsp.Reshape(Channels=0, Rows=1)
        -> Disable BehaviorSubject WaveForm2_1

        SubscribeSubject FromBonsaiOSC4
        -> Bonsai.Osc.Parse(Address=/WaveForm1_2, TypeTag=s)
        -> Parse(Pattern=%f, Separator=",")
        -> Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=F32, Channels=1)
        -> Bonsai.Dsp.Reshape(Channels=0, Rows=1)
        -> BehaviorSubject WaveForm1_2

        Disable SubscribeSubject FromBonsaiOSC4
        -> Disable Bonsai.Osc.Parse(Address=/WaveForm2_2, TypeTag=s)
        -> Disable Parse(Pattern=%f, Separator=",")
        -> Disable Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=F32, Channels=1)
        -> Disable Bonsai.Dsp.Reshape(Channels=0, Rows=1)
        -> Disable BehaviorSubject WaveForm2_2

        SubscribeSubject FromBonsaiOSC3
        -> Bonsai.Osc.Parse(Address=/ManualWater_Left, TypeTag=i)
        -> PublishSubject ManualWater_Left

        SubscribeSubject FromBonsaiOSC3
        -> Bonsai.Osc.Parse(Address=/ManualWater_Right, TypeTag=i)
        -> PublishSubject ManualWater_Right

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/OptogeneticsCalibration, TypeTag=i)
        -> PublishSubject OptogeneticsCalibration

        SubscribeSubject FromBonsaiOSC3
        -> Bonsai.Osc.Parse(Address=/LeftValueSize1, TypeTag=f)
        -> BehaviorSubject LeftValueSize1

        SubscribeSubject ToBonsaiOSC3
        -> Bonsai.Osc.Parse(Address=/RightValueSize1, TypeTag=f)
        -> BehaviorSubject RightValueSize1

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/cameracontrol, TypeTag=i)
        -> PublishSubject Cameracontrol

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/camerafrequency, TypeTag=i)
        -> PublishSubject Camerafrequency

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/sidecamerafile, TypeTag=s)
        -> PublishSubject Sidecamerafile

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/bottomcamerafile, TypeTag=s)
        -> PublishSubject Bottomcamerafile

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/sidecameracsv, TypeTag=s)
        -> PublishSubject Sidecameracsv

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/bottomcameracsv, TypeTag=s)
        -> PublishSubject Bottomcameracsv

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/DO0, TypeTag=i)
        -> PublishSubject DO0

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/DO1, TypeTag=i)
        -> PublishSubject DO1

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/DO2, TypeTag=i)
        -> PublishSubject DO2

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/DO3, TypeTag=i)
        -> PublishSubject DO3

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Port2, TypeTag=i)
        -> PublishSubject Port2

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/RewardDelay, TypeTag=f)
        -> BehaviorSubject RewardDelay

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/PassITI, TypeTag=i)
        -> PublishSubject PassITI

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/PassGoCue, TypeTag=i)
        -> PublishSubject PassGoCue

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/PassRewardOutcome, TypeTag=i)
        -> PublishSubject PassRewardOutcome

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/camerafrequency, TypeTag=i)
        -> PublishSubject CameraFrequency

    GroupWorkflow WriteToOsc
        Disable SubscribeSubject RightLickTime
        -> Disable Bonsai.Osc.Format(Address=/RightLickTime)
        -> Disable MulticastSubject ToBonsaiOSC2

        Disable SubscribeSubject LeftLickTime
        -> Disable Bonsai.Osc.Format(Address=/LeftLickTime)
        -> Disable MulticastSubject ToBonsaiOSC2

        Disable SubscribeSubject RightLickTime2
        -> Disable Bonsai.Osc.Format(Address=/RightLickTime)
        -> Disable MulticastSubject ToBonsaiOSC2

        Disable SubscribeSubject LeftLickTime2
        -> Disable Bonsai.Osc.Format(Address=/LeftLickTime)
        -> Disable MulticastSubject ToBonsaiOSC2

        Disable SubscribeSubject Start => #12
        Disable SubscribeSubject Timestamps => #13
        #12, #13 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Disable Bonsai.Osc.Format(Address=/TrialStartTime)
        -> Disable MulticastSubject ToBonsaiOSC

        Disable SubscribeSubject DelayStart => #19
        Disable SubscribeSubject Timestamps => #20
        #19, #20 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Disable Bonsai.Osc.Format(Address=/DelayStartTime)
        -> Disable MulticastSubject ToBonsaiOSC

        Disable SubscribeSubject GoCue => #26
        Disable SubscribeSubject Timestamps => #27
        #26, #27 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Disable Bonsai.Osc.Format(Address=/GoCueTime)
        -> Disable MulticastSubject ToBonsaiOSC

        Disable SubscribeSubject RewardOutcome => #33
        Disable SubscribeSubject Timestamps => #34
        #33, #34 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Disable Bonsai.Osc.Format(Address=/RewardOutcomeTime)
        -> Disable MulticastSubject ToBonsaiOSC

        Disable SubscribeSubject TrialEnd => #40
        Disable SubscribeSubject Timestamps => #41
        #40, #41 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Disable Bonsai.Osc.Format(Address=/TrialEndTime)
        -> Disable MulticastSubject ToBonsaiOSC

        Disable SubscribeSubject RewardDeliveryRight => #47
        Disable SubscribeSubject Timestamps => #48
        #47, #48 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Disable Bonsai.Osc.Format(Address=/RightRewardDeliveryTime)
        -> Disable MulticastSubject ToBonsaiOSC2

        Disable SubscribeSubject RewardDeliveryLeft => #54
        Disable SubscribeSubject Timestamps => #55
        #54, #55 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Disable Bonsai.Osc.Format(Address=/LeftRewardDeliveryTime)
        -> Disable MulticastSubject ToBonsaiOSC2

        Disable SubscribeSubject RewardOutcome
        -> Disable Bonsai.Osc.Format(Address=/RewardOutcome)
        -> Disable MulticastSubject ToBonsaiOSC

        Disable SubscribeSubject RightKeyPress => #64
        Disable SubscribeSubject Timestamps => #65
        #64, #65 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Disable Bonsai.Osc.Format(Address=/RightLickTime)
        -> Disable MulticastSubject ToBonsaiOSC2

        Disable SubscribeSubject LeftKeyPress => #71
        Disable SubscribeSubject Timestamps => #72
        #71, #72 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Disable Bonsai.Osc.Format(Address=/LeftLickTime)
        -> Disable MulticastSubject ToBonsaiOSC2

Disable GroupWorkflow Optogenetics2
    Disable SubscribeSubject WaveForm1_1 => #0
    Disable SubscribeSubject WaveForm1_2 => #1
    #0, #1 -> Disable Zip
    -> Disable Bonsai.Dsp.Concat(Axis=0) => #3
    Disable SubscribeSubject Location1Size
    -> Disable PropertyMapping(BufferSize) => #5
    Disable SubscribeSubject TriggerSource
    -> Disable PropertyMapping(TriggerSource) => #7
    #3, #5, #7 -> Disable SelectMany
        WorkflowInput Source1 => #0
        ExternalizedMapping(BufferSize, TriggerSource) => #1
        Source2=#0, Source2=#1 -> Bonsai.DAQmx.TriggeredAnalogOutput
          SignalSource=""
          TriggerSource=/Dev1/PFI0
          SampleRate=5000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=50002
          Channels
            AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao0, VoltageUnits=Volts)
            AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao1, VoltageUnits=Volts)
        -> IntProperty(Value=1)
        -> Bonsai.Osc.Format(Address=/FinishOfWave1_1)
        -> MulticastSubject ToBonsaiOSC4
        -> WorkflowOutput

    SubscribeSubject OptogeneticsCalibration
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO0Payload(PulseDO0=1))
    -> MulticastSubject BehaviorCommands
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DO0))
    -> MulticastSubject BehaviorCommands

    SubscribeSubject DO0
    -> Take(Count=1)
    -> Equal(Operand=IntProperty(Value=1))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO0Payload(PulseDO0=10))
    -> Delay(DueTime=PT1S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DO0))
    -> MulticastSubject BehaviorCommands
    -> Repeat

    SubscribeSubject DO1
    -> Take(Count=1)
    -> Equal(Operand=IntProperty(Value=1))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO1Payload(PulseDO1=10))
    -> Delay(DueTime=PT1S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DO1))
    -> MulticastSubject BehaviorCommands
    -> Repeat

    SubscribeSubject DO2
    -> Take(Count=1)
    -> Equal(Operand=IntProperty(Value=1))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO2Payload(PulseDO2=10))
    -> Delay(DueTime=PT1S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DO2))
    -> MulticastSubject BehaviorCommands
    -> Repeat

    SubscribeSubject DO3
    -> Take(Count=1)
    -> Equal(Operand=IntProperty(Value=1))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO3Payload(PulseDO3=1))
    -> Delay(DueTime=PT1S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DO3))
    -> MulticastSubject BehaviorCommands
    -> Repeat

    SubscribeSubject Port2
    -> Take(Count=1)
    -> Equal(Operand=IntProperty(Value=1))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDOPort2Payload(PulseDOPort2=1))
    -> Delay(DueTime=PT1S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DOPort2))
    -> MulticastSubject BehaviorCommands
    -> Repeat

SubscribeSubject FromBonsaiOSC
-> Bonsai.Osc.Parse(Address=/startlogging, TypeTag=s)
-> Take(Count=1)
-> CreateObservable RestartLoggers
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject RootPath

    SubscribeSubject RootPath
    -> Bonsai.Osc.Format(Address=/loggerstarted)
    -> MulticastSubject ToBonsaiOSC

    Disable SubscribeSubject FromBonsaiOSC
    -> Disable Bonsai.Osc.Parse(Address=/stoplogging, TypeTag="")
    -> Disable Take(Count=1)
    -> Disable WorkflowOutput

    Disable SubscribeSubject ToBonsaiOSC
    -> Disable GroupBy(KeySelector=Address)
    -> Disable IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=ToBonsaiOSC)

    Disable SubscribeSubject ToBonsaiOSC2
    -> Disable GroupBy(KeySelector=Address)
    -> Disable IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=ToBonsaiOSC2)

    Disable SubscribeSubject ToBonsaiOSC3
    -> Disable GroupBy(KeySelector=Address)
    -> Disable IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=ToBonsaiOSC3)

    Disable SubscribeSubject ToBonsaiOSC4
    -> Disable GroupBy(KeySelector=Address)
    -> Disable IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=ToBonsaiOSC4)

    Disable SubscribeSubject FromBonsaiOSC
    -> Disable GroupBy(KeySelector=Address)
    -> Disable IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=FromBonsaiOSC)

    Disable SubscribeSubject FromBonsaiOSC2
    -> Disable GroupBy(KeySelector=Address)
    -> Disable IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=FromBonsaiOSC2)

    Disable SubscribeSubject FromBonsaiOSC3
    -> Disable GroupBy(KeySelector=Address)
    -> Disable IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=FromBonsaiOSC3)

    Disable SubscribeSubject FromBonsaiOSC4
    -> Disable GroupBy(KeySelector=Address)
    -> Disable IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=FromBonsaiOSC4)

    Disable SubscribeSubject BehaviorEvents
    -> Disable IncludeWorkflow(Path=Extensions\LogHarpDemux.bonsai, LogName=BehaviorEvents)

    Disable SubscribeSubject SoundCardEvents
    -> Disable IncludeWorkflow(Path=Extensions\LogHarpDemux.bonsai, LogName=SoundCardEvents)

    Disable GroupWorkflow Photometry(Description=Photometry)
        GroupWorkflow BehaviorCam
            Bonsai.Video.VideoCaptureDevice(Index=0, Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=24), CaptureProperties="") => #0
            -> Disable Bonsai.Vision.Flip(Mode=Both) => #1
            SubscribeSubject RootPath
            -> Format(Format={0}/VideoFolder/FaceBottomCamera_.avi, Selector="")
            -> PropertyMapping(FileName) => #4
            #1, #4 -> Bonsai.Vision.VideoWriter
              FileName=E:\DynamicForagingGUI\BehaviorData\Tower_EphysRig3\XY_05\XY_05_2023-11-07_11-36-46\HarpFolder/VideoFolder/FaceBottomCamera_.avi
              Suffix=Timestamp
              Buffered=true
              Overwrite=false
              FourCC=FMP4
              FrameRate=30
              FrameSize(Width=0, Height=0)
              ResizeInterpolation=NearestNeighbor
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #7
            SubscribeSubject RootPath
            -> Format(Format={0}/VideoFolder/FaceBottomCamera_.csv, Selector="")
            -> PropertyMapping(FileName) => #10
            #7, #10 -> Bonsai.IO.CsvWriter
              FileName=E:\DynamicForagingGUI\BehaviorData\Tower_EphysRig3\XY_05\XY_05_2023-11-07_11-36-46\HarpFolder/VideoFolder/FaceBottomCamera_.csv
              Append=false
              Overwrite=false
              Suffix=Timestamp
              IncludeHeader=false
            Bonsai.Video.VideoCaptureDevice(Index=1, Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=24), CaptureProperties="") => #12
            -> Disable Bonsai.Dsp.Transpose => #13
            SubscribeSubject RootPath
            -> Format(Format={0}/VideoFolder/FaceSideCamera_.avi, Selector="")
            -> PropertyMapping(FileName) => #16
            #13, #16 -> Bonsai.Vision.VideoWriter
              FileName=E:\DynamicForagingGUI\BehaviorData\Tower_EphysRig3\XY_05\XY_05_2023-11-07_11-36-46\HarpFolder/VideoFolder/FaceSideCamera_.avi
              Suffix=Timestamp
              Buffered=true
              Overwrite=false
              FourCC=FMP4
              FrameRate=30
              FrameSize(Width=0, Height=0)
              ResizeInterpolation=NearestNeighbor
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #19
            SubscribeSubject RootPath
            -> Format(Format={0}/VideoFolder/FaceSideCamera_.csv, Selector="")
            -> PropertyMapping(FileName) => #22
            #19, #22 -> Bonsai.IO.CsvWriter
              FileName=E:\DynamicForagingGUI\BehaviorData\Tower_EphysRig3\XY_05\XY_05_2023-11-07_11-36-46\HarpFolder/VideoFolder/FaceSideCamera_.csv
              Append=false
              Overwrite=false
              Suffix=Timestamp
              IncludeHeader=false
            #0 -> VisualizerMapping => #24
            #12 -> VisualizerMapping => #25
            #24, #25 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")

        GroupWorkflow FIP_Visualizer
            SubscribeSubject Green
            -> VisualizerMapping => #1
            SubscribeSubject Iso
            -> VisualizerMapping => #3
            SubscribeSubject Red
            -> VisualizerMapping => #5
            #1, #3, #5 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=1, RowCount=3, ColumnStyles="", RowStyles="", CellSpans="")

            SubscribeSubject Green0
            -> VisualizerMapping => #8
            SubscribeSubject Green1
            -> VisualizerMapping => #10
            SubscribeSubject Iso0
            -> VisualizerMapping => #12
            SubscribeSubject Iso1
            -> VisualizerMapping => #14
            SubscribeSubject Red0
            -> VisualizerMapping => #16
            SubscribeSubject Red1
            -> VisualizerMapping => #18
            #8, #10, #12, #14, #16, #18 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=1, RowCount=6, ColumnStyles="", RowStyles="", CellSpans="")

        GroupWorkflow GreenIsoCh
            Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23391007, ColorProcessing=Default) => #0
            -> Skip(Count=0)
            -> BufferCount(Count=1, Skip=2)
            -> Index(Operand=IntProperty(Value=0))
            -> MemberSelector(Selector=Image)
            -> PublishSubject Green => #5
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #7
            #5 -> Bonsai.Vision.RoiActivity => #8
              Regions
                ArrayOfPoint
                  Point(X=70, Y=88)
                  Point(X=70, Y=91)
                  Point(X=69, Y=94)
                  Point(X=68, Y=97)
                  Point(X=66, Y=99)
                  Point(X=64, Y=102)
                  Point(X=62, Y=104)
                  Point(X=59, Y=105)
                  Point(X=57, Y=106)
                  Point(X=54, Y=106)
                  Point(X=51, Y=106)
                  Point(X=49, Y=105)
                  Point(X=46, Y=104)
                  Point(X=44, Y=102)
                  Point(X=42, Y=99)
                  Point(X=40, Y=97)
                  Point(X=39, Y=94)
                  Point(X=38, Y=91)
                  Point(X=38, Y=88)
                  Point(X=38, Y=84)
                  Point(X=39, Y=81)
                  Point(X=40, Y=78)
                  Point(X=42, Y=76)
                  Point(X=44, Y=73)
                  Point(X=46, Y=71)
                  Point(X=49, Y=70)
                  Point(X=51, Y=69)
                  Point(X=54, Y=69)
                  Point(X=57, Y=69)
                  Point(X=59, Y=70)
                  Point(X=62, Y=71)
                  Point(X=64, Y=73)
                  Point(X=66, Y=76)
                  Point(X=68, Y=78)
                  Point(X=69, Y=81)
                  Point(X=70, Y=84)
                ArrayOfPoint
                  Point(X=127, Y=73)
                  Point(X=127, Y=76)
                  Point(X=126, Y=79)
                  Point(X=125, Y=81)
                  Point(X=123, Y=84)
                  Point(X=121, Y=86)
                  Point(X=119, Y=88)
                  Point(X=116, Y=89)
                  Point(X=113, Y=90)
                  Point(X=111, Y=90)
                  Point(X=108, Y=90)
                  Point(X=105, Y=89)
                  Point(X=102, Y=88)
                  Point(X=100, Y=86)
                  Point(X=98, Y=84)
                  Point(X=96, Y=81)
                  Point(X=95, Y=79)
                  Point(X=94, Y=76)
                  Point(X=94, Y=73)
                  Point(X=94, Y=70)
                  Point(X=95, Y=67)
                  Point(X=96, Y=65)
                  Point(X=98, Y=62)
                  Point(X=100, Y=60)
                  Point(X=102, Y=58)
                  Point(X=105, Y=57)
                  Point(X=108, Y=56)
                  Point(X=111, Y=56)
                  Point(X=113, Y=56)
                  Point(X=116, Y=57)
                  Point(X=119, Y=58)
                  Point(X=121, Y=60)
                  Point(X=123, Y=62)
                  Point(X=125, Y=65)
                  Point(X=126, Y=67)
                  Point(X=127, Y=70)
                ArrayOfPoint
                  Point(X=151, Y=125)
                  Point(X=151, Y=128)
                  Point(X=150, Y=130)
                  Point(X=149, Y=133)
                  Point(X=147, Y=135)
                  Point(X=146, Y=137)
                  Point(X=143, Y=139)
                  Point(X=141, Y=140)
                  Point(X=139, Y=141)
                  Point(X=136, Y=141)
                  Point(X=133, Y=141)
                  Point(X=131, Y=140)
                  Point(X=129, Y=139)
                  Point(X=126, Y=137)
                  Point(X=125, Y=135)
                  Point(X=123, Y=133)
                  Point(X=122, Y=130)
                  Point(X=121, Y=128)
                  Point(X=121, Y=125)
                  Point(X=121, Y=122)
                  Point(X=122, Y=120)
                  Point(X=123, Y=117)
                  Point(X=125, Y=115)
                  Point(X=126, Y=113)
                  Point(X=128, Y=111)
                  Point(X=131, Y=110)
                  Point(X=133, Y=109)
                  Point(X=136, Y=109)
                  Point(X=139, Y=109)
                  Point(X=141, Y=110)
                  Point(X=143, Y=111)
                  Point(X=146, Y=113)
                  Point(X=147, Y=115)
                  Point(X=149, Y=117)
                  Point(X=150, Y=120)
                  Point(X=151, Y=122)
                ArrayOfPoint
                  Point(X=96, Y=139)
                  Point(X=96, Y=142)
                  Point(X=95, Y=145)
                  Point(X=94, Y=148)
                  Point(X=92, Y=150)
                  Point(X=90, Y=152)
                  Point(X=88, Y=154)
                  Point(X=86, Y=155)
                  Point(X=83, Y=156)
                  Point(X=80, Y=156)
                  Point(X=78, Y=156)
                  Point(X=75, Y=155)
                  Point(X=73, Y=154)
                  Point(X=71, Y=152)
                  Point(X=69, Y=150)
                  Point(X=67, Y=148)
                  Point(X=66, Y=145)
                  Point(X=65, Y=142)
                  Point(X=65, Y=139)
                  Point(X=65, Y=136)
                  Point(X=66, Y=133)
                  Point(X=67, Y=130)
                  Point(X=69, Y=128)
                  Point(X=71, Y=126)
                  Point(X=73, Y=124)
                  Point(X=75, Y=123)
                  Point(X=78, Y=122)
                  Point(X=80, Y=122)
                  Point(X=83, Y=122)
                  Point(X=86, Y=123)
                  Point(X=88, Y=124)
                  Point(X=90, Y=126)
                  Point(X=92, Y=128)
                  Point(X=94, Y=130)
                  Point(X=95, Y=133)
                  Point(X=96, Y=136)
                ArrayOfPoint(Point(X=0, Y=0), Point(X=28, Y=0), Point(X=28, Y=68), Point(X=0, Y=68))
              Operation=Avg
            -> Index(Operand=IntProperty(Value=0))
            -> MemberSelector(Selector=Activity.Val0)
            -> PublishSubject Green0 => #11
            #8 -> Index(Operand=IntProperty(Value=1))
            -> MemberSelector(Selector=Activity.Val0)
            -> PublishSubject Green1 => #14
            #8 -> Index(Operand=IntProperty(Value=2))
            -> MemberSelector(Selector=Activity.Val0) => #16
            #8 -> Index(Operand=IntProperty(Value=3))
            -> MemberSelector(Selector=Activity.Val0) => #18
            #8 -> Index(Operand=IntProperty(Value=4))
            -> MemberSelector(Selector=Activity.Val0) => #20
            #7, #11, #14, #16, #18, #20 -> Zip => #21
            SubscribeSubject RootPath
            -> Format(Format={0}/PhotometryFolder/FIP_DataG_.csv, Selector="")
            -> PropertyMapping(FileName) => #24
            #21, #24 -> Bonsai.IO.CsvWriter
              FileName=E:\DynamicForagingGUI\BehaviorData\Tower_EphysRig3\XY_05\XY_05_2023-11-07_11-36-46\HarpFolder/PhotometryFolder/FIP_DataG_.csv
              Append=false
              Overwrite=false
              Suffix=Timestamp
              IncludeHeader=false
            SubscribeSubject RootPath
            -> Format(Format={0}/PhotometryFolder/FIP_RawG_, Selector="")
            -> PropertyMapping(Path) => #28
            #5, #28 -> Bonsai.Dsp.MatrixWriter
              Path=E:\DynamicForagingGUI\BehaviorData\Tower_EphysRig3\XY_05\XY_05_2023-11-07_11-36-46\HarpFolder/PhotometryFolder/FIP_RawG_
              Suffix=Timestamp
              Overwrite=false
              Layout=ColumnMajor
            #0 -> Skip(Count=1)
            -> BufferCount(Count=1, Skip=2)
            -> Index(Operand=IntProperty(Value=0))
            -> MemberSelector(Selector=Image)
            -> PublishSubject Iso => #34
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #36
            #34 -> Bonsai.Vision.RoiActivity => #37
              Regions
                ArrayOfPoint
                  Point(X=74, Y=87)
                  Point(X=74, Y=91)
                  Point(X=73, Y=95)
                  Point(X=72, Y=98)
                  Point(X=70, Y=101)
                  Point(X=67, Y=103)
                  Point(X=65, Y=105)
                  Point(X=62, Y=107)
                  Point(X=59, Y=108)
                  Point(X=56, Y=108)
                  Point(X=52, Y=108)
                  Point(X=49, Y=107)
                  Point(X=46, Y=105)
                  Point(X=44, Y=103)
                  Point(X=41, Y=101)
                  Point(X=39, Y=98)
                  Point(X=38, Y=95)
                  Point(X=37, Y=91)
                  Point(X=37, Y=87)
                  Point(X=37, Y=84)
                  Point(X=38, Y=80)
                  Point(X=39, Y=77)
                  Point(X=41, Y=74)
                  Point(X=44, Y=72)
                  Point(X=46, Y=70)
                  Point(X=49, Y=68)
                  Point(X=52, Y=67)
                  Point(X=56, Y=67)
                  Point(X=59, Y=67)
                  Point(X=62, Y=68)
                  Point(X=65, Y=70)
                  Point(X=67, Y=72)
                  Point(X=70, Y=74)
                  Point(X=72, Y=77)
                  Point(X=73, Y=80)
                  Point(X=74, Y=84)
                ArrayOfPoint
                  Point(X=126, Y=72)
                  Point(X=126, Y=75)
                  Point(X=125, Y=79)
                  Point(X=124, Y=82)
                  Point(X=122, Y=85)
                  Point(X=120, Y=87)
                  Point(X=118, Y=89)
                  Point(X=115, Y=91)
                  Point(X=112, Y=92)
                  Point(X=109, Y=92)
                  Point(X=107, Y=92)
                  Point(X=104, Y=91)
                  Point(X=101, Y=89)
                  Point(X=99, Y=87)
                  Point(X=97, Y=85)
                  Point(X=95, Y=82)
                  Point(X=94, Y=79)
                  Point(X=93, Y=75)
                  Point(X=93, Y=72)
                  Point(X=93, Y=69)
                  Point(X=94, Y=65)
                  Point(X=95, Y=62)
                  Point(X=97, Y=59)
                  Point(X=99, Y=57)
                  Point(X=101, Y=55)
                  Point(X=104, Y=53)
                  Point(X=107, Y=52)
                  Point(X=109, Y=52)
                  Point(X=112, Y=52)
                  Point(X=115, Y=53)
                  Point(X=118, Y=55)
                  Point(X=120, Y=57)
                  Point(X=122, Y=59)
                  Point(X=124, Y=62)
                  Point(X=125, Y=65)
                  Point(X=126, Y=69)
                ArrayOfPoint
                  Point(X=154, Y=124)
                  Point(X=154, Y=128)
                  Point(X=153, Y=131)
                  Point(X=152, Y=134)
                  Point(X=150, Y=137)
                  Point(X=148, Y=140)
                  Point(X=145, Y=142)
                  Point(X=142, Y=144)
                  Point(X=139, Y=145)
                  Point(X=136, Y=145)
                  Point(X=133, Y=145)
                  Point(X=130, Y=144)
                  Point(X=127, Y=142)
                  Point(X=124, Y=140)
                  Point(X=122, Y=137)
                  Point(X=120, Y=134)
                  Point(X=119, Y=131)
                  Point(X=118, Y=128)
                  Point(X=118, Y=124)
                  Point(X=118, Y=120)
                  Point(X=119, Y=117)
                  Point(X=120, Y=114)
                  Point(X=122, Y=111)
                  Point(X=124, Y=108)
                  Point(X=127, Y=106)
                  Point(X=130, Y=104)
                  Point(X=133, Y=103)
                  Point(X=136, Y=103)
                  Point(X=139, Y=103)
                  Point(X=142, Y=104)
                  Point(X=145, Y=106)
                  Point(X=148, Y=108)
                  Point(X=150, Y=111)
                  Point(X=152, Y=114)
                  Point(X=153, Y=117)
                  Point(X=154, Y=120)
                ArrayOfPoint
                  Point(X=98, Y=139)
                  Point(X=98, Y=143)
                  Point(X=97, Y=147)
                  Point(X=95, Y=150)
                  Point(X=94, Y=153)
                  Point(X=91, Y=156)
                  Point(X=88, Y=158)
                  Point(X=85, Y=160)
                  Point(X=82, Y=161)
                  Point(X=79, Y=161)
                  Point(X=76, Y=161)
                  Point(X=73, Y=160)
                  Point(X=70, Y=158)
                  Point(X=67, Y=156)
                  Point(X=64, Y=153)
                  Point(X=63, Y=150)
                  Point(X=61, Y=147)
                  Point(X=60, Y=143)
                  Point(X=60, Y=139)
                  Point(X=60, Y=135)
                  Point(X=61, Y=131)
                  Point(X=63, Y=128)
                  Point(X=64, Y=125)
                  Point(X=67, Y=122)
                  Point(X=70, Y=120)
                  Point(X=73, Y=118)
                  Point(X=76, Y=117)
                  Point(X=79, Y=117)
                  Point(X=82, Y=117)
                  Point(X=85, Y=118)
                  Point(X=88, Y=120)
                  Point(X=91, Y=122)
                  Point(X=94, Y=125)
                  Point(X=95, Y=128)
                  Point(X=97, Y=131)
                  Point(X=98, Y=135)
                ArrayOfPoint(Point(X=0, Y=0), Point(X=26, Y=0), Point(X=26, Y=78), Point(X=0, Y=78))
              Operation=Avg
            -> Index(Operand=IntProperty(Value=0))
            -> MemberSelector(Selector=Activity.Val0)
            -> PublishSubject Iso0 => #40
            #37 -> Index(Operand=IntProperty(Value=1))
            -> MemberSelector(Selector=Activity.Val0)
            -> PublishSubject Iso1 => #43
            #37 -> Index(Operand=IntProperty(Value=2))
            -> MemberSelector(Selector=Activity) => #45
            #37 -> Index(Operand=IntProperty(Value=3))
            -> MemberSelector(Selector=Activity.Val0) => #47
            #37 -> Index(Operand=IntProperty(Value=4))
            -> MemberSelector(Selector=Activity.Val0) => #49
            #36, #40, #43, #45, #47, #49 -> Zip => #50
            SubscribeSubject RootPath
            -> Format(Format={0}/PhotometryFolder/FIP_DataIso_.csv, Selector="")
            -> PropertyMapping(FileName) => #53
            #50, #53 -> Bonsai.IO.CsvWriter
              FileName=E:\DynamicForagingGUI\BehaviorData\Tower_EphysRig3\XY_05\XY_05_2023-11-07_11-36-46\HarpFolder/PhotometryFolder/FIP_DataIso_.csv
              Append=false
              Overwrite=false
              Suffix=Timestamp
              IncludeHeader=false
            SubscribeSubject RootPath
            -> Format(Format={0}/PhotometryFolder/FIP_RawIso_, Selector="")
            -> PropertyMapping(Path) => #57
            #34, #57 -> Bonsai.Dsp.MatrixWriter
              Path=E:\DynamicForagingGUI\BehaviorData\Tower_EphysRig3\XY_05\XY_05_2023-11-07_11-36-46\HarpFolder/PhotometryFolder/FIP_RawIso_
              Suffix=Timestamp
              Overwrite=false
              Layout=ColumnMajor

        GroupWorkflow RedCh
            Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23391006, ColorProcessing=Default)
            -> MemberSelector(Selector=Image) => #1
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #3
            #1 -> Bonsai.Vision.Flip(Mode=Horizontal)
            -> PublishSubject Red => #5
            -> Bonsai.Vision.RoiActivity => #6
              Regions
                ArrayOfPoint
                  Point(X=71, Y=98)
                  Point(X=71, Y=102)
                  Point(X=70, Y=105)
                  Point(X=69, Y=109)
                  Point(X=67, Y=111)
                  Point(X=65, Y=114)
                  Point(X=63, Y=116)
                  Point(X=60, Y=118)
                  Point(X=57, Y=119)
                  Point(X=54, Y=119)
                  Point(X=52, Y=119)
                  Point(X=49, Y=118)
                  Point(X=46, Y=116)
                  Point(X=44, Y=114)
                  Point(X=42, Y=111)
                  Point(X=40, Y=109)
                  Point(X=39, Y=105)
                  Point(X=38, Y=102)
                  Point(X=38, Y=98)
                  Point(X=38, Y=94)
                  Point(X=39, Y=91)
                  Point(X=40, Y=87)
                  Point(X=42, Y=85)
                  Point(X=44, Y=82)
                  Point(X=46, Y=80)
                  Point(X=49, Y=78)
                  Point(X=52, Y=77)
                  Point(X=54, Y=77)
                  Point(X=57, Y=77)
                  Point(X=60, Y=78)
                  Point(X=63, Y=80)
                  Point(X=65, Y=82)
                  Point(X=67, Y=85)
                  Point(X=69, Y=87)
                  Point(X=70, Y=91)
                  Point(X=71, Y=94)
                ArrayOfPoint
                  Point(X=123, Y=79)
                  Point(X=123, Y=83)
                  Point(X=122, Y=86)
                  Point(X=121, Y=89)
                  Point(X=119, Y=92)
                  Point(X=117, Y=95)
                  Point(X=114, Y=97)
                  Point(X=111, Y=99)
                  Point(X=109, Y=100)
                  Point(X=105, Y=100)
                  Point(X=102, Y=100)
                  Point(X=100, Y=99)
                  Point(X=97, Y=97)
                  Point(X=94, Y=95)
                  Point(X=92, Y=92)
                  Point(X=90, Y=89)
                  Point(X=89, Y=86)
                  Point(X=88, Y=83)
                  Point(X=88, Y=79)
                  Point(X=88, Y=75)
                  Point(X=89, Y=72)
                  Point(X=90, Y=69)
                  Point(X=92, Y=66)
                  Point(X=94, Y=63)
                  Point(X=97, Y=61)
                  Point(X=100, Y=59)
                  Point(X=102, Y=58)
                  Point(X=105, Y=58)
                  Point(X=109, Y=58)
                  Point(X=111, Y=59)
                  Point(X=114, Y=61)
                  Point(X=117, Y=63)
                  Point(X=119, Y=66)
                  Point(X=121, Y=69)
                  Point(X=122, Y=72)
                  Point(X=123, Y=75)
                ArrayOfPoint
                  Point(X=151, Y=129)
                  Point(X=151, Y=132)
                  Point(X=150, Y=136)
                  Point(X=149, Y=139)
                  Point(X=147, Y=142)
                  Point(X=145, Y=144)
                  Point(X=143, Y=146)
                  Point(X=140, Y=148)
                  Point(X=137, Y=149)
                  Point(X=134, Y=149)
                  Point(X=131, Y=149)
                  Point(X=128, Y=148)
                  Point(X=125, Y=146)
                  Point(X=123, Y=144)
                  Point(X=121, Y=142)
                  Point(X=119, Y=139)
                  Point(X=118, Y=136)
                  Point(X=117, Y=132)
                  Point(X=117, Y=129)
                  Point(X=117, Y=126)
                  Point(X=118, Y=122)
                  Point(X=119, Y=119)
                  Point(X=121, Y=116)
                  Point(X=123, Y=114)
                  Point(X=125, Y=112)
                  Point(X=128, Y=110)
                  Point(X=131, Y=109)
                  Point(X=134, Y=109)
                  Point(X=137, Y=109)
                  Point(X=140, Y=110)
                  Point(X=143, Y=112)
                  Point(X=145, Y=114)
                  Point(X=147, Y=116)
                  Point(X=149, Y=119)
                  Point(X=150, Y=122)
                  Point(X=151, Y=126)
                ArrayOfPoint
                  Point(X=100, Y=147)
                  Point(X=100, Y=150)
                  Point(X=99, Y=154)
                  Point(X=98, Y=157)
                  Point(X=96, Y=160)
                  Point(X=93, Y=162)
                  Point(X=91, Y=164)
                  Point(X=88, Y=166)
                  Point(X=85, Y=167)
                  Point(X=81, Y=167)
                  Point(X=78, Y=167)
                  Point(X=75, Y=166)
                  Point(X=72, Y=164)
                  Point(X=70, Y=162)
                  Point(X=67, Y=160)
                  Point(X=65, Y=157)
                  Point(X=64, Y=154)
                  Point(X=63, Y=150)
                  Point(X=63, Y=147)
                  Point(X=63, Y=144)
                  Point(X=64, Y=140)
                  Point(X=65, Y=137)
                  Point(X=67, Y=134)
                  Point(X=70, Y=132)
                  Point(X=72, Y=130)
                  Point(X=75, Y=128)
                  Point(X=78, Y=127)
                  Point(X=81, Y=127)
                  Point(X=85, Y=127)
                  Point(X=88, Y=128)
                  Point(X=91, Y=130)
                  Point(X=93, Y=132)
                  Point(X=96, Y=134)
                  Point(X=98, Y=137)
                  Point(X=99, Y=140)
                  Point(X=100, Y=144)
                ArrayOfPoint(Point(X=1, Y=1), Point(X=31, Y=1), Point(X=31, Y=66), Point(X=1, Y=66))
              Operation=Avg
            -> Index(Operand=IntProperty(Value=0))
            -> MemberSelector(Selector=Activity.Val0)
            -> PublishSubject Red0 => #9
            #6 -> Index(Operand=IntProperty(Value=1))
            -> MemberSelector(Selector=Activity.Val0)
            -> PublishSubject Red1 => #12
            #6 -> Index(Operand=IntProperty(Value=2))
            -> MemberSelector(Selector=Activity.Val0) => #14
            #6 -> Index(Operand=IntProperty(Value=3))
            -> MemberSelector(Selector=Activity.Val0) => #16
            #6 -> Index(Operand=IntProperty(Value=4))
            -> MemberSelector(Selector=Activity.Val0) => #18
            #3, #9, #12, #14, #16, #18 -> Zip => #19
            SubscribeSubject RootPath
            -> Format(Format={0}/PhotometryFolder/FIP_DataR_.csv, Selector="")
            -> PropertyMapping(FileName) => #22
            #19, #22 -> Bonsai.IO.CsvWriter
              FileName=E:\DynamicForagingGUI\BehaviorData\Tower_EphysRig3\XY_05\XY_05_2023-11-07_11-36-46\HarpFolder/PhotometryFolder/FIP_DataR_.csv
              Append=false
              Overwrite=false
              Suffix=Timestamp
              IncludeHeader=false
            SubscribeSubject RootPath
            -> Format(Format={0}/PhotometryFolder/FIP_RawR_, Selector="")
            -> PropertyMapping(Path) => #26
            #5, #26 -> Bonsai.Dsp.MatrixWriter
              Path=E:\DynamicForagingGUI\BehaviorData\Tower_EphysRig3\XY_05\XY_05_2023-11-07_11-36-46\HarpFolder/PhotometryFolder/FIP_RawR_
              Suffix=Timestamp
              Overwrite=false
              Layout=ColumnMajor

    Disable SubscribeSubject LickometerEventsLeft
    -> Disable IncludeWorkflow(Path=Extensions\LogHarpDemux.bonsai, LogName=LickometerEventsLeft)

    Disable SubscribeSubject LickometerEventsRight
    -> Disable IncludeWorkflow(Path=Extensions\LogHarpDemux.bonsai, LogName=LickometerEventsRight)

    Disable SubscribeSubject SniffDetectorEvents
    -> Disable IncludeWorkflow(Path=Extensions\LogHarpDemux.bonsai, LogName=SniffDetectorEvents)

    GroupWorkflow HighSpeedCamera => #45
        SubscribeSubject BottomCameraFrames
        -> MemberSelector(Selector=Item1.ChunkData.FrameID)
        -> Bonsai.Dsp.Difference(Order=1)
        -> Subtract(Operand=DoubleProperty(Value=1))
        -> Accumulate

        SubscribeSubject Camerafrequency
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.Camera1Frequency)
        -> MulticastSubject BehaviorCommands

        SubscribeSubject Cameracontrol => #8
        -> Equal(Operand=IntProperty(Value=1))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Delay(DueTime=PT5S)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput1))
        -> MulticastSubject BehaviorCommands
        #8 -> Equal(Operand=IntProperty(Value=2))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras=CameraOutput1))
        -> MulticastSubject BehaviorCommands

        GroupWorkflow SideCameraLeft => #18
            SubscribeSubject ComPorts
            -> Index(Operand=StringProperty(Value=SideCameraLeft))
            -> PropertyMapping(SerialNumber)
            -> Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23022719, ColorProcessing=Default) => #3
            SubscribeSubject BehaviorEvents
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera1Frame)
            -> MemberSelector(Selector=Seconds) => #6
            #3, #6 -> Zip
            -> PublishSubject SideCameraLeftFrames

            SubscribeSubject SideCameraLeftFrames
            -> Bonsai.Harp.CreateTimestamped => #10
            SubscribeSubject RootPath
            -> Format(Format={0}/../../behavior-videos/side_camera_left.csv, Selector="")
            -> PropertyMapping(FileName) => #13
            #10, #13 -> Bonsai.IO.CsvWriter
              FileName=D:\behavior_data\0\behavior_0_2024-06-05_18-03-47\behavior\raw.harp/../../behavior-videos/side_camera_left.csv
              Append=false
              Overwrite=true
              Suffix=None
              IncludeHeader=false
              Selector="Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp,Value.ChunkData.Gain,Value.ChunkData.ExposureTime"
            -> MemberSelector(Selector=Value.Image) => #15
            SubscribeSubject RootPath
            -> Format(Format={0}/../../behavior-videos/side_camera_left.avi, Selector="")
            -> PropertyMapping(FileName) => #18
            SubscribeSubject CameraFrequency
            -> PropertyMapping(FrameRate) => #20
            SubscribeSubject ComPorts
            -> Index(Operand=StringProperty(Value=codec))
            -> PropertyMapping(OutputArguments) => #23
            #15, #18, #20, #23 -> Bonsai.FFmpeg.VideoWriter
              FileName=D:\behavior_data\0\behavior_0_2024-06-05_18-03-47\behavior\raw.harp/../../behavior-videos/side_camera_left.avi
              Suffix=None
              Overwrite=true
              FrameRate=500
              OutputArguments="-vcodec h264_nvenc -crf 23 -preset fast -b:v 50M"
        SubscribeSubject ComPorts
        -> Index(Operand=StringProperty(Value=HasSideCameraLeft))
        -> NotEqual(Operand=StringProperty(Value=0))
        -> Condition => #22
            WorkflowInput Source1
            -> WorkflowOutput
        #18, #22 -> SubscribeWhen

        GroupWorkflow BottomCamera => #24
            SubscribeSubject ComPorts
            -> Index(Operand=StringProperty(Value=BottomCamera))
            -> PropertyMapping(SerialNumber)
            -> Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23022721, ColorProcessing=Default) => #3
            SubscribeSubject BehaviorEvents
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera1Frame)
            -> MemberSelector(Selector=Seconds) => #6
            #3, #6 -> Zip
            -> PublishSubject BottomCameraFrames

            SubscribeSubject BottomCameraFrames
            -> Bonsai.Harp.CreateTimestamped => #10
            SubscribeSubject RootPath
            -> Format(Format={0}/../../behavior-videos/bottom_camera.csv, Selector="")
            -> PropertyMapping(FileName) => #13
            #10, #13 -> Bonsai.IO.CsvWriter
              FileName=D:\behavior_data\0\behavior_0_2024-06-05_18-03-47\behavior\raw.harp/../../behavior-videos/bottom_camera.csv
              Append=false
              Overwrite=true
              Suffix=None
              IncludeHeader=false
              Selector="Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp,Value.ChunkData.Gain,Value.ChunkData.ExposureTime"
            -> MemberSelector(Selector=Value.Image) => #15
            SubscribeSubject RootPath
            -> Format(Format={0}/../../behavior-videos/bottom_camera.avi, Selector="")
            -> PropertyMapping(FileName) => #18
            SubscribeSubject CameraFrequency
            -> PropertyMapping(FrameRate) => #20
            SubscribeSubject ComPorts
            -> Index(Operand=StringProperty(Value=codec))
            -> PropertyMapping(OutputArguments) => #23
            #15, #18, #20, #23 -> Bonsai.FFmpeg.VideoWriter
              FileName=D:\behavior_data\0\behavior_0_2024-06-05_18-03-47\behavior\raw.harp/../../behavior-videos/bottom_camera.avi
              Suffix=None
              Overwrite=true
              FrameRate=500
              OutputArguments="-vcodec h264_nvenc -crf 23 -preset fast -b:v 50M"
        SubscribeSubject ComPorts
        -> Index(Operand=StringProperty(Value=HasBottomCamera))
        -> NotEqual(Operand=StringProperty(Value=0))
        -> Condition => #28
            WorkflowInput Source1
            -> WorkflowOutput
        #24, #28 -> SubscribeWhen

        GroupWorkflow SideCameraRight => #30
            SubscribeSubject ComPorts
            -> Index(Operand=StringProperty(Value=SideCameraRight))
            -> PropertyMapping(SerialNumber)
            -> Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=24067702, ColorProcessing=Default) => #3
            SubscribeSubject BehaviorEvents
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera1Frame)
            -> MemberSelector(Selector=Seconds) => #6
            #3, #6 -> Zip
            -> PublishSubject SideCameraRightFrames

            SubscribeSubject SideCameraRightFrames
            -> Bonsai.Harp.CreateTimestamped => #10
            SubscribeSubject RootPath
            -> Format(Format={0}/../../behavior-videos/side_camera_right.csv, Selector="")
            -> PropertyMapping(FileName) => #13
            #10, #13 -> Bonsai.IO.CsvWriter
              FileName=D:\behavior_data\0\behavior_0_2024-06-05_18-03-47\behavior\raw.harp/../../behavior-videos/side_camera_right.csv
              Append=false
              Overwrite=true
              Suffix=None
              IncludeHeader=false
              Selector="Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp,Value.ChunkData.Gain,Value.ChunkData.ExposureTime"
            -> MemberSelector(Selector=Value.Image) => #15
            SubscribeSubject RootPath
            -> Format(Format={0}/../../behavior-videos/side_camera_right.avi, Selector="")
            -> PropertyMapping(FileName) => #18
            SubscribeSubject CameraFrequency
            -> PropertyMapping(FrameRate) => #20
            SubscribeSubject ComPorts
            -> Index(Operand=StringProperty(Value=codec))
            -> PropertyMapping(OutputArguments) => #23
            #15, #18, #20, #23 -> Bonsai.FFmpeg.VideoWriter
              FileName=D:\behavior_data\0\behavior_0_2024-06-05_18-03-47\behavior\raw.harp/../../behavior-videos/side_camera_right.avi
              Suffix=None
              Overwrite=true
              FrameRate=500
              OutputArguments="-vcodec h264_nvenc -crf 23 -preset fast -b:v 50M"
        SubscribeSubject ComPorts
        -> Index(Operand=StringProperty(Value=HasSideCameraRight))
        -> NotEqual(Operand=StringProperty(Value=0))
        -> Condition => #34
            WorkflowInput Source1
            -> WorkflowOutput
        #30, #34 -> SubscribeWhen

        GroupWorkflow BodyCamera => #36
            SubscribeSubject ComPorts
            -> Index(Operand=StringProperty(Value=BodyCamera))
            -> PropertyMapping(SerialNumber)
            -> Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=22511912, ColorProcessing=Default) => #3
            SubscribeSubject BehaviorEvents
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera1Frame)
            -> MemberSelector(Selector=Seconds) => #6
            #3, #6 -> Zip
            -> PublishSubject BodyCameraFrames

            SubscribeSubject BodyCameraFrames
            -> Bonsai.Harp.CreateTimestamped => #10
            SubscribeSubject RootPath
            -> Format(Format={0}/../../behavior-videos/body_camera.csv, Selector="")
            -> PropertyMapping(FileName) => #13
            #10, #13 -> Bonsai.IO.CsvWriter
              FileName=D:\BehaviorData\323_EPHYS3\0\behavior_0_2024-04-05_10-37-19\behavior\raw.harp/../../behavior-videos/body_camera.csv
              Append=false
              Overwrite=true
              Suffix=None
              IncludeHeader=false
              Selector="Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp,Value.ChunkData.Gain,Value.ChunkData.ExposureTime"
            -> MemberSelector(Selector=Value.Image) => #15
            SubscribeSubject RootPath
            -> Format(Format={0}/../../behavior-videos/body_camera.avi, Selector="")
            -> PropertyMapping(FileName) => #18
            SubscribeSubject CameraFrequency
            -> PropertyMapping(FrameRate) => #20
            SubscribeSubject ComPorts
            -> Index(Operand=StringProperty(Value=codec))
            -> PropertyMapping(OutputArguments) => #23
            #15, #18, #20, #23 -> Bonsai.FFmpeg.VideoWriter
              FileName=D:\BehaviorData\323_EPHYS3\0\behavior_0_2024-04-05_10-37-19\behavior\raw.harp/../../behavior-videos/body_camera.avi
              Suffix=None
              Overwrite=true
              FrameRate=500
              OutputArguments="-vcodec h264_nvenc -crf 23 -preset fast -b:v 50M"
        SubscribeSubject ComPorts
        -> Index(Operand=StringProperty(Value=HasBodyCamera))
        -> NotEqual(Operand=StringProperty(Value=0))
        -> Condition => #40
            WorkflowInput Source1
            -> WorkflowOutput
        #36, #40 -> SubscribeWhen

        GroupWorkflow EyeCamera => #42
            SubscribeSubject ComPorts
            -> Index(Operand=StringProperty(Value=EyeCamera))
            -> PropertyMapping(SerialNumber)
            -> Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23022730, ColorProcessing=Default) => #3
            SubscribeSubject BehaviorEvents
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera1Frame)
            -> MemberSelector(Selector=Seconds) => #6
            #3, #6 -> Zip
            -> PublishSubject EyeCameraFrames

            SubscribeSubject EyeCameraFrames
            -> Bonsai.Harp.CreateTimestamped => #10
            SubscribeSubject RootPath
            -> Format(Format={0}/../../behavior-videos/eye_camera.csv, Selector="")
            -> PropertyMapping(FileName) => #13
            #10, #13 -> Bonsai.IO.CsvWriter
              FileName=D:\behavior_data\0\behavior_0_2024-06-05_18-03-47\behavior\raw.harp/../../behavior-videos/eye_camera.csv
              Append=false
              Overwrite=true
              Suffix=None
              IncludeHeader=false
              Selector="Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp,Value.ChunkData.Gain,Value.ChunkData.ExposureTime"
            -> MemberSelector(Selector=Value.Image) => #15
            SubscribeSubject RootPath
            -> Format(Format={0}/../../behavior-videos/eye_camera.avi, Selector="")
            -> PropertyMapping(FileName) => #18
            SubscribeSubject CameraFrequency
            -> PropertyMapping(FrameRate) => #20
            SubscribeSubject ComPorts
            -> Index(Operand=StringProperty(Value=codec))
            -> PropertyMapping(OutputArguments) => #23
            #15, #18, #20, #23 -> Bonsai.FFmpeg.VideoWriter
              FileName=D:\behavior_data\0\behavior_0_2024-06-05_18-03-47\behavior\raw.harp/../../behavior-videos/eye_camera.avi
              Suffix=None
              Overwrite=true
              FrameRate=500
              OutputArguments="-vcodec h264_nvenc -crf 23 -preset fast -b:v 50M"
        SubscribeSubject ComPorts
        -> Index(Operand=StringProperty(Value=HasEyeCamera))
        -> NotEqual(Operand=StringProperty(Value=0))
        -> Condition => #46
            WorkflowInput Source1
            -> WorkflowOutput
        #42, #46 -> SubscribeWhen
    SubscribeSubject ComPorts
    -> Index(Operand=StringProperty(Value=HighSpeedCamera))
    -> NotEqual(Operand=StringProperty(Value=0))
    -> Condition => #49
        WorkflowInput Source1
        -> WorkflowOutput
    #45, #49 -> SubscribeWhen

    Disable Defer HarpDeviceDump
        Bonsai.Harp.CreateMessage
          MessageType=Write
          Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=On, OperationLed=On, Heartbeat=Enabled)
        -> MulticastSubject BehaviorCommands
        -> MulticastSubject SoundCardCommands
        -> MulticastSubject LickometerLeftCommands
        -> MulticastSubject LickometerRightCommands
    -> Disable DelaySubscription(DueTime=PT2S)
-> Concat
-> Repeat

ExternalizedMapping(FileName(DisplayName=SettingsPath))
-> Bonsai.IO.CsvReader(FileName=C:\Users\svc_aind_ephys\Documents\ForagingSettings\Settings_box1.csv, ScanPattern="%s,%s", SkipRows=0)
-> ToDictionary(KeySelector=Item1, ElementSelector=Item2)
-> Take(Count=1)
-> AsyncSubject ComPorts
