WorkflowBuilder(Version=2.8.5)
GroupWorkflow Init
    BehaviorSubject<System.String> RewardOutcome
    BehaviorSubject<System.Object> RewardDeliveryLeft
    BehaviorSubject<System.Object> RewardDeliveryRight
    BehaviorSubject<System.Object> TrialEnd
    BehaviorSubject<System.Boolean> DelayStart
    BehaviorSubject<System.Boolean> GoCue
    BehaviorSubject<System.Boolean> EarnedLeftRewardStartTime
    BehaviorSubject<System.Boolean> EarnedRightRewardStartTime
    BehaviorSubject<System.Boolean> Pass

    Bonsai.Shaders.CreateWindow
      Width=640
      Height=480
      VSync=On
      SwapSync=false
      ClearColor=Black
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Hidden
      WindowState=Minimized
      DisplayDevice=Primary
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false

GroupWorkflow CreateOscClient
    SubscribeSubject ComPorts
    -> Index(Operand=StringProperty(Value=BonsaiOsc1))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Int32.Parse(it)
    -> PropertyMapping(Port)
    -> Bonsai.Osc.CreateTcpServer(Name=BonsaiOSC, Port=4002, NoDelay=false, AllowNatTraversal=true)

    SubscribeSubject ComPorts
    -> Index(Operand=StringProperty(Value=BonsaiOsc2))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Int32.Parse(it)
    -> PropertyMapping(Port)
    -> Bonsai.Osc.CreateTcpServer(Name=BonsaiOSC2, Port=4003, NoDelay=false, AllowNatTraversal=true)

    SubscribeSubject ComPorts
    -> Index(Operand=StringProperty(Value=BonsaiOsc3))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Int32.Parse(it)
    -> PropertyMapping(Port)
    -> Bonsai.Osc.CreateTcpServer(Name=BonsaiOSC3, Port=4004, NoDelay=false, AllowNatTraversal=true)

    SubscribeSubject ComPorts
    -> Index(Operand=StringProperty(Value=BonsaiOsc4))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Int32.Parse(it)
    -> PropertyMapping(Port)
    -> Bonsai.Osc.CreateTcpServer(Name=BonsaiOSC4, Port=4005, NoDelay=false, AllowNatTraversal=true)

    Bonsai.Osc.ReceiveMessage(Address="", TypeTag="", Connection=BonsaiOSC)
    -> PublishSubject FromBonsaiOSC

    Bonsai.Osc.ReceiveMessage(Address="", TypeTag="", Connection=BonsaiOSC2)
    -> PublishSubject FromBonsaiOSC2

    Bonsai.Osc.ReceiveMessage(Address="", TypeTag="", Connection=BonsaiOSC4)
    -> PublishSubject FromBonsaiOSC4

    Bonsai.Osc.ReceiveMessage(Address="", TypeTag="", Connection=BonsaiOSC3)
    -> PublishSubject FromBonsaiOSC3

    BehaviorSubject<Bonsai.Osc.Message> ToBonsaiOSC
    -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC, Address="")

    BehaviorSubject<Bonsai.Osc.Message> ToBonsaiOSC2
    -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC2, Address="")

    BehaviorSubject<Bonsai.Osc.Message> ToBonsaiOSC3
    -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC3, Address="")

    BehaviorSubject<Bonsai.Osc.Message> ToBonsaiOSC4
    -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC4, Address="")

GroupWorkflow TrialLogic
    SubscribeSubject Start
    -> Take(Count=1)
    -> Equal(Operand=IntProperty(Value=3))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany
        SubscribeSubject ITIEndTime
        -> BooleanProperty(Value=true)
        -> WorkflowOutput
    -> MulticastSubject GoCue => #5
    SubscribeSubject ResponseTime
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #8
    #5, #8 -> SelectMany ResponseInterval
        ExternalizedMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT1S, Period=PT0S)
        -> StringProperty(Value=NoResponse) => #2
        SubscribeSubject Licks => #3
        SubscribeSubject Licks2 => #4
        #2, #3, #4 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Reward(Description=Reward)
        WorkflowInput Source1 => #0
        -> Condition LickLeft
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Left))
            -> WorkflowOutput
        -> SelectMany DetermineOutcome => #2
            SubscribeSubject IsLeftRewarded => #0
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> MulticastSubject RewardDeliveryLeft
            -> StringProperty(Value=RewardLeft) => #3
            #0 -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=ErrorLeft) => #6
            #3, #6 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition LickRight
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Right))
            -> WorkflowOutput
        -> SelectMany DetermineOutcome => #4
            SubscribeSubject IsRightRewarded => #0
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> MulticastSubject RewardDeliveryRight
            -> StringProperty(Value=RewardRight) => #3
            #0 -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=ErrorRight) => #6
            #3, #6 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition Miss
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=NoResponse))
            -> WorkflowOutput
        -> StringProperty(Value=NoResponse) => #6
        Source2=#2, Source3=#4, Source5=#6 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> MulticastSubject RewardOutcome => #11
    SubscribeSubject RewardConsumeTime
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.fromSeconds(it)
    -> PropertyMapping(DueTime) => #14
    #11, #14 -> SelectMany RewardConsumeTime => #15
        WorkflowInput Source1 => #0
        ExternalizedMapping(DueTime) => #1
        #0, #1 -> Bonsai.Shaders.Delay(DueTime=PT3S)
        -> WorkflowOutput
    SubscribeSubject Start
    -> Take(Count=1) => #17
    SubscribeSubject DelayTime
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTimeDelay) => #20
    SubscribeSubject ITI
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTimeITI) => #23
    #17, #20, #23 -> SelectMany ITIAndDelay
        ExternalizedMapping(DueTimeITI) => #0
        WorkflowInput Source1 => #1
        #0, #1 -> SelectMany
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> Condition => #2
                WorkflowInput Source1
                -> WorkflowOutput
            ExternalizedMapping(DueTime(DisplayName=DueTimeITI)) => #3
            #2, #3 -> Bonsai.Shaders.Delay(DueTime=PT3.458S)
            -> WorkflowOutput
        -> MulticastSubject DelayStart => #3
        ExternalizedMapping(DueTime(DisplayName=DueTimeDelay)) => #4
        #3, #4 -> Bonsai.Shaders.Delay(DueTime=PT0.102S)
        -> BooleanProperty(Value=true) => #6
        SubscribeSubject Licks
        -> IntProperty(Value=1) => #8
        SubscribeSubject GoCue2
        -> IntProperty(Value=0) => #10
        SubscribeSubject DelayStart2
        -> IntProperty(Value=1) => #12
        SubscribeSubject Pass2
        -> IntProperty(Value=0) => #14
        #10, #12, #14 -> Merge
        -> PropertyMapping(Value) => #16
        #8, #16 -> SelectMany Pass
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=IntProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput
        -> MulticastSubject Pass
        -> BooleanProperty(Value=false) => #19
        SubscribeSubject Licks2
        -> IntProperty(Value=1) => #21
        SubscribeSubject GoCue2
        -> IntProperty(Value=0) => #23
        SubscribeSubject DelayStart2
        -> IntProperty(Value=1) => #25
        SubscribeSubject Pass2
        -> IntProperty(Value=0) => #27
        #23, #25, #27 -> Merge
        -> PropertyMapping(Value) => #29
        #21, #29 -> SelectMany Pass
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=IntProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #31
        #6, #19, #31 -> Merge
        -> Take(Count=1)
        -> Condition "No Licks"
            WorkflowInput Source1
            -> WorkflowOutput
        -> Repeat
        -> Take(Count=1)
        -> WorkflowOutput
    -> MulticastSubject GoCue => #25
    SubscribeSubject ResponseTime
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #28
    #25, #28 -> SelectMany ResponseInterval
        ExternalizedMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT1S, Period=PT0S)
        -> StringProperty(Value=NoResponse) => #2
        SubscribeSubject Licks => #3
        SubscribeSubject Licks2 => #4
        #2, #3, #4 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Reward(Description=Reward)
        WorkflowInput Source1 => #0
        -> Condition LickLeft
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Left))
            -> WorkflowOutput
        -> SelectMany DetermineOutcome => #2
            SubscribeSubject IsLeftRewarded => #0
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> MulticastSubject RewardDeliveryLeft
            -> StringProperty(Value=RewardLeft) => #3
            #0 -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=ErrorLeft) => #6
            #3, #6 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition LickRight
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Right))
            -> WorkflowOutput
        -> SelectMany DetermineOutcome => #4
            SubscribeSubject IsRightRewarded => #0
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> MulticastSubject RewardDeliveryRight
            -> StringProperty(Value=RewardRight) => #3
            #0 -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=ErrorRight) => #6
            #3, #6 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition Miss
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=NoResponse))
            -> WorkflowOutput
        -> StringProperty(Value=NoResponse) => #6
        Source2=#2, Source3=#4, Source5=#6 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> MulticastSubject RewardOutcome => #31
    SubscribeSubject RewardConsumeTime
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.fromSeconds(it)
    -> PropertyMapping(DueTime) => #34
    #31, #34 -> SelectMany RewardConsumeTime => #35
        WorkflowInput Source1 => #0
        ExternalizedMapping(DueTime) => #1
        #0, #1 -> Bonsai.Shaders.Delay(DueTime=PT3S)
        -> WorkflowOutput
    #15, #35 -> Merge
    -> MulticastSubject TrialEnd
    -> Take(Count=1)
    -> Repeat
    -> WorkflowOutput

GroupWorkflow "Hardware Outputs"
    GroupWorkflow Audio
        Disable Bonsai.Audio.AudioReader(FileName=bell.wav, BufferLength=0, SampleRate=0)
        -> Disable BehaviorSubject AudioWaveform

        Disable SubscribeSubject GoCue
        -> Disable SelectMany "Play sound"
            SubscribeSubject AudioWaveform
            -> Bonsai.Audio.AudioPlayback(SampleRate=44100, State=Playing)
            -> Last
            -> Take(Count=1)
            -> WorkflowOutput

            Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort0))
            -> MulticastSubject BehaviorCommands

        BehaviorSubject<Bonsai.Harp.HarpMessage> SoundCardCommands => #4
        SubscribeSubject ComPorts
        -> Index(Operand=StringProperty(Value=Soundcard))
        -> PropertyMapping(PortName) => #7
        #4, #7 -> Harp.SoundCard.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM6)
        -> BehaviorSubject SoundCardEvents

        SubscribeSubject ComPorts
        -> Index(Operand=StringProperty(Value=AttenuationLeft))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #12
          Expression: Convert.ToInt32(it)
        SubscribeSubject AttenuationLeft => #13
        #12, #13 -> Merge
        -> Harp.SoundCard.Format(MessageType=Write, Register=Harp.SoundCard.AttenuationLeft)
        -> MulticastSubject SoundCardCommands => #16
        SubscribeSubject SoundCardEvents
        -> Delay(DueTime=PT2.1S) => #18
        #16, #18 -> SubscribeWhen

        SubscribeSubject ComPorts
        -> Index(Operand=StringProperty(Value=AttenuationRight))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #22
          Expression: Convert.ToInt32(it)
        SubscribeSubject AttenuationRight => #23
        #22, #23 -> Merge
        -> Harp.SoundCard.Format(MessageType=Write, Register=Harp.SoundCard.AttenuationRight)
        -> MulticastSubject SoundCardCommands => #26
        SubscribeSubject SoundCardEvents
        -> Delay(DueTime=PT2S) => #28
        #26, #28 -> SubscribeWhen

        SubscribeSubject GoCue
        -> IntProperty(Value=1) => #31
        SubscribeSubject TriggerGoCue => #32
        #31, #32 -> Merge
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=4))
        -> MulticastSubject SoundCardCommands

    GroupWorkflow RewardControl
        SubscribeSubject LeftValueSize => #0
        SubscribeSubject LeftValueSize1 => #1
        #0, #1 -> Merge
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort0)
        -> MulticastSubject BehaviorCommands

        SubscribeSubject RightValueSize => #5
        SubscribeSubject RightValueSize1 => #6
        #5, #6 -> Merge
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort1)
        -> MulticastSubject BehaviorCommands

        SubscribeSubject ManualWater_Left => #10
        SubscribeSubject RewardDeliveryLeft => #11
        SubscribeSubject RewardDelay
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #14
        #11, #14 -> SelectMany DelayReward
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime) => #1
            #0, #1 -> Bonsai.Shaders.Delay(DueTime=PT0S)
            -> WorkflowOutput
        -> MulticastSubject EarnedLeftRewardStartTime
        -> IntProperty(Value=0) => #17
        SubscribeSubject AutoWater_Left => #18
        SubscribeSubject RandomWater_Left => #19
        #10, #17, #18, #19 -> Merge
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=SupplyPort0))
        -> MulticastSubject BehaviorCommands

        SubscribeSubject ManualWater_Right => #23
        SubscribeSubject RewardDeliveryRight => #24
        SubscribeSubject RewardDelay
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #27
        #24, #27 -> SelectMany DelayReward
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime) => #1
            #0, #1 -> Bonsai.Shaders.Delay(DueTime=PT0S)
            -> WorkflowOutput
        -> MulticastSubject EarnedRightRewardStartTime
        -> IntProperty(Value=0) => #30
        SubscribeSubject AutoWater_Right => #31
        SubscribeSubject RandomWater_Right => #32
        #23, #30, #31, #32 -> Merge
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=SupplyPort1))
        -> MulticastSubject BehaviorCommands

    Harp.Behavior.CreateMessage
      MessageType=Write
      Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable="DOPort2 SupplyPort0 SupplyPort1 SupplyPort2 DO0 DO1 DO2 DO3")
    -> MulticastSubject BehaviorCommands

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedOutputToggle) => #5
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=DO2))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> Condition => #9
        WorkflowInput Source1
        -> WorkflowOutput
    #9, #5 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/BehaviorEvent)
    -> MulticastSubject ToBonsaiOSC

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedOutputToggle) => #16
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=SupplyPort0))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> Condition => #20
        WorkflowInput Source1
        -> WorkflowOutput
    #20, #16 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/LeftRewardDeliveryTimeHarp)
    -> MulticastSubject ToBonsaiOSC2

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedOutputToggle) => #27
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=SupplyPort1))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> Condition => #31
        WorkflowInput Source1
        -> WorkflowOutput
    #31, #27 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/RightRewardDeliveryTimeHarp)
    -> MulticastSubject ToBonsaiOSC2

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #38
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort2))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> DistinctUntilChanged
    -> Condition => #43
        WorkflowInput Source1
        -> WorkflowOutput
    #43, #38 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/PhotometryRising)
    -> MulticastSubject ToBonsaiOSC2

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #50
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort2))
    -> Equal(Operand=WorkflowProperty<System.Byte>(Value=0))
    -> DistinctUntilChanged
    -> Condition => #55
        WorkflowInput Source1
        -> WorkflowOutput
    #55, #50 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/PhotometryFalling)
    -> MulticastSubject ToBonsaiOSC2

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #62
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DI3))
    -> Equal(Operand=WorkflowProperty<System.Byte>(Value=0))
    -> DistinctUntilChanged
    -> Condition => #67
        WorkflowInput Source1
        -> WorkflowOutput
    #67, #62 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> PublishSubject ITIEndTime

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedOutputToggle) => #72
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=DO3))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> Condition => #76
        WorkflowInput Source1
        -> WorkflowOutput
    #76, #72 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/OptogeneticsTimeHarp)
    -> MulticastSubject ToBonsaiOSC2

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedOutputToggle) => #83
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=DO0))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> Condition => #87
        WorkflowInput Source1
        -> WorkflowOutput
    #87, #83 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/ITIStartTimeHarp)
    -> MulticastSubject ToBonsaiOSC

    SubscribeSubject SoundCardEvents
    -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
    -> Harp.SoundCard.Parse(Register=Harp.SoundCard.TimestampedPlaySoundOrFrequency)
    -> Bonsai.Osc.Format(Address=/GoCueTimeSoundCard)
    -> MulticastSubject ToBonsaiOSC

    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDOPort2Payload(PulseDOPort2=50))
    -> MulticastSubject BehaviorCommands

    Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=110, PayloadType=U8, Value=4))
    -> MulticastSubject BehaviorCommands

    Harp.SoundCard.CreateMessage(MessageType=Event, Payload=Harp.SoundCard.CreateConfigureDO0Payload(ConfigureDO0=Pulse100MsWhenStart))
    -> MulticastSubject SoundCardCommands

    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO2Payload(PulseDO2=10))
    -> MulticastSubject BehaviorCommands

    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO3Payload(PulseDO3=10))
    -> MulticastSubject BehaviorCommands

    SubscribeSubject Start
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DO0))
    -> MulticastSubject BehaviorCommands

    SubscribeSubject DelayStart
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DO2))
    -> MulticastSubject BehaviorCommands

    SubscribeSubject GoCue
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DO2))
    -> MulticastSubject BehaviorCommands

    SubscribeSubject DelayStart
    -> PublishSubject DelayStart2

    SubscribeSubject GoCue
    -> PublishSubject GoCue2

    SubscribeSubject Pass
    -> PublishSubject Pass2

    SubscribeSubject TrialEnd
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DO2))
    -> MulticastSubject BehaviorCommands

    SubscribeSubject ITI
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it*1000
    -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseDO0)
    -> MulticastSubject BehaviorCommands

    SubscribeSubject GoCue
    -> IntProperty(Value=1) => #131
    SubscribeSubject PassGoCue
    -> PropertyMapping(Value) => #133
    #131, #133 -> SelectMany Pass
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=0))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DO3))
    -> MulticastSubject BehaviorCommands

    Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO0Payload(PulseDO0=10))
    -> Disable MulticastSubject BehaviorCommands

    Disable SubscribeSubject BehaviorEvents
    -> Disable Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedOutputToggle) => #140
    -> Disable MemberSelector(Selector=Value)
    -> Disable BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=DOPort2))
    -> Disable GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> Disable Condition => #144
        WorkflowInput Source1
        -> WorkflowOutput
    #144, #140 -> Disable WithLatestFrom
    -> Disable MemberSelector(Selector=Item2.Seconds)
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Disable Bonsai.Osc.Format(Address=/DOPort2Output)
    -> Disable MulticastSubject ToBonsaiOSC

    Disable SubscribeSubject SoundCardEvents
    -> Disable Harp.SoundCard.FilterRegister(FilterType=Include, Register=Harp.SoundCard.ConfigureDI0) => #151
    -> Disable MemberSelector(Selector=Value)
    -> Disable BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=DO0))
    -> Disable GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> Disable Condition => #155
        WorkflowInput Source1
        -> WorkflowOutput
    #155, #151 -> Disable WithLatestFrom
    -> Disable MemberSelector(Selector=Item2.Seconds)
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Disable Bonsai.Osc.Format(Address=/DOPort2Output)
    -> Disable MulticastSubject ToBonsaiOSC

    Disable SubscribeSubject SoundCardEvents
    -> Disable Harp.SoundCard.Parse(Register=Harp.SoundCard.TimestampedPlaySoundOrFrequency) => #162
    -> Disable MemberSelector(Selector=Seconds)
    #162 -> Disable MemberSelector(Selector=Value)

    SubscribeSubject RewardOutcome
    -> IntProperty(Value=1) => #166
    SubscribeSubject PassRewardOutcome
    -> PropertyMapping(Value) => #168
    #166, #168 -> SelectMany Pass
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=0))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DO3))
    -> MulticastSubject BehaviorCommands

GroupWorkflow HardwareInputs
    BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands => #0
    SubscribeSubject ComPorts
    -> Index(Operand=StringProperty(Value=Behavior))
    -> PropertyMapping(PortName) => #3
    #0, #3 -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM4)
    -> PublishSubject BehaviorEvents

    SubscribeSubject BehaviorEvents
    -> Take(Count=1)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEventEnablePayload(EventEnable="PortDI PortDIO AnalogData Camera0 Camera1"))
    -> MulticastSubject BehaviorCommands

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
    -> MemberSelector(Selector=Seconds)
    -> BehaviorSubject Timestamps

    GroupWorkflow JaneliaLickDetector => #14
        Disable Bonsai.Windows.Input.KeyDown(Filter=L, SuppressRepetitions=false)
        -> Disable PublishSubject LeftKeyPress
        -> Disable StringProperty(Value=Left) => #2
        Disable Bonsai.Windows.Input.KeyDown(Filter=R, SuppressRepetitions=false)
        -> Disable PublishSubject RightKeyPress
        -> Disable StringProperty(Value=Right) => #5
        SubscribeSubject BehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #7
        -> MemberSelector(Selector=Value)
        -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0))
        -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
        -> PublishSubject LeftLick
        -> DistinctUntilChanged
        -> Condition => #13
            WorkflowInput Source1
            -> WorkflowOutput
        #13, #7 -> WithLatestFrom
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject LeftLickTime
        -> StringProperty(Value=Left) => #17
        SubscribeSubject BehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #19
        -> MemberSelector(Selector=Value)
        -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort1))
        -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
        -> PublishSubject RightLick
        -> DistinctUntilChanged
        -> Condition => #25
            WorkflowInput Source1
            -> WorkflowOutput
        #25, #19 -> WithLatestFrom
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject RightLickTime
        -> StringProperty(Value=Right) => #29
        #2, #5, #17, #29 -> Merge
        -> PublishSubject Licks
        -> WorkflowOutput
    SubscribeSubject ComPorts
    -> Index(Operand=StringProperty(Value=AINDLickDetector))
    -> NotEqual(Operand=StringProperty(Value=1))
    -> Condition => #18
        WorkflowInput Source1
        -> WorkflowOutput
    #14, #18 -> SubscribeWhen

    GroupWorkflow NewLickDetector => #20
        BehaviorSubject<Bonsai.Harp.HarpMessage> LickometerLeftCommands => #0
        SubscribeSubject ComPorts
        -> Index(Operand=StringProperty(Value=LeftLickDetector))
        -> PropertyMapping(PortName) => #3
        #0, #3 -> AllenNeuralDynamics.LicketySplitLickDetector.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM8)
        -> PublishSubject LickometerEventsLeft

        BehaviorSubject<Bonsai.Harp.HarpMessage> LickometerRightCommands => #6
        SubscribeSubject ComPorts
        -> Index(Operand=StringProperty(Value=RightLickDetector))
        -> PropertyMapping(PortName) => #9
        #6, #9 -> AllenNeuralDynamics.LicketySplitLickDetector.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM9)
        -> PublishSubject LickometerEventsRight

        SubscribeSubject LickometerEventsLeft
        -> AllenNeuralDynamics.LicketySplitLickDetector.Parse(Register=AllenNeuralDynamics.LicketySplitLickDetector.TimestampedLickState) => #13
        -> MemberSelector(Selector=Value)
        -> BitwiseAnd(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplitLickDetector.LickChannels>(Value=Channel0))
        -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> PublishSubject LicketySplitLeftLick
        -> DistinctUntilChanged
        -> Condition => #19
            WorkflowInput Source1
            -> WorkflowOutput
        #19, #13 -> WithLatestFrom
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject LeftLickTime2
        -> StringProperty(Value=Left) => #23
        SubscribeSubject LickometerEventsRight
        -> AllenNeuralDynamics.LicketySplitLickDetector.Parse(Register=AllenNeuralDynamics.LicketySplitLickDetector.TimestampedLickState) => #25
        -> MemberSelector(Selector=Value)
        -> BitwiseAnd(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplitLickDetector.LickChannels>(Value=Channel0))
        -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> PublishSubject LicketySplitRightLick
        -> DistinctUntilChanged
        -> Condition => #31
            WorkflowInput Source1
            -> WorkflowOutput
        #31, #25 -> WithLatestFrom
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject RightLickTime2
        -> StringProperty(Value=Right) => #35
        #23, #35 -> Merge
        -> PublishSubject Licks2
        -> WorkflowOutput
    SubscribeSubject ComPorts
    -> Index(Operand=StringProperty(Value=AINDLickDetector))
    -> NotEqual(Operand=StringProperty(Value=0))
    -> Condition => #24
        WorkflowInput Source1
        -> WorkflowOutput
    #20, #24 -> SubscribeWhen

    GroupWorkflow EnvironmentSensor => #26
        SubscribeSubject ComPorts
        -> Index(Operand=StringProperty(Value=EnvSen))
        -> PropertyMapping(PortName) => #2
        Timer(DueTime=PT0S, Period=PT1S)
        -> Bonsai.Harp.CreateMessage => #4
          MessageType=Write
          Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=Off, OperationLed=Off, Heartbeat=Enabled)
        #2, #4 -> AllenNeuralDynamics.EnvironmentSensor.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COMx)
        -> PublishSubject EnvironmentSensor
        -> WorkflowOutput
    SubscribeSubject ComPorts
    -> AllenNeuralDynamics.Core.ContainsKey(Key=EnvSen)
    -> Condition => #29
        WorkflowInput Source1
        -> WorkflowOutput
    #26, #29 -> SubscribeWhen

    GroupWorkflow SniffDetector => #31
        BehaviorSubject<Bonsai.Harp.HarpMessage> SniffDetectorCommands => #0
        SubscribeSubject ComPorts
        -> Index(Operand=StringProperty(Value=SniffDetector))
        -> PropertyMapping(PortName) => #3
        #0, #3 -> AllenNeuralDynamics.SniffDetector.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COMx)
        -> PublishSubject SniffDetectorEvents
        -> WorkflowOutput

        Timer(DueTime=PT0S, Period=PT1S)
        -> Bonsai.Harp.CreateMessage
          MessageType=Write
          Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=Off, OperationLed=Off, Heartbeat=Enabled)
        -> MulticastSubject SniffDetectorCommands
        -> Delay(DueTime=PT0.05S)
        -> AllenNeuralDynamics.SniffDetector.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.SniffDetector.CreateRawVoltageDispatchRatePayload(RawVoltageDispatchRate=200))
        -> MulticastSubject SniffDetectorCommands
    SubscribeSubject ComPorts
    -> AllenNeuralDynamics.Core.ContainsKey(Key=SniffDetector)
    -> Condition => #34
        WorkflowInput Source1
        -> WorkflowOutput
    #31, #34 -> SubscribeWhen

GroupWorkflow Parameters
    GroupWorkflow ReadFromOsc
        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/LeftValueSize, TypeTag=f)
        -> BehaviorSubject LeftValueSize

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/RightValueSize, TypeTag=f)
        -> BehaviorSubject RightValueSize

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/RewardConsumeTime, TypeTag=f)
        -> BehaviorSubject RewardConsumeTime

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Left_Bait, TypeTag=i)
        -> Equal(Operand=IntProperty(Value=1))
        -> BehaviorSubject IsLeftRewarded

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Right_Bait, TypeTag=i)
        -> Equal(Operand=IntProperty(Value=1))
        -> BehaviorSubject IsRightRewarded

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/start, TypeTag=i)
        -> PublishSubject Start

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/ITI, TypeTag=f)
        -> BehaviorSubject ITI

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/DelayTime, TypeTag=f)
        -> BehaviorSubject DelayTime

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/ResponseTime, TypeTag=f)
        -> BehaviorSubject ResponseTime

        Disable SubscribeSubject FromBonsaiOSC
        -> Disable Bonsai.Osc.Parse(Address=/TriggerITIStart_Wave1, TypeTag=i)
        -> Disable PublishSubject TriggerITIStart_Wave1

        Disable SubscribeSubject FromBonsaiOSC
        -> Disable Bonsai.Osc.Parse(Address=/TriggerITIStart_Wave2, TypeTag=i)
        -> Disable PublishSubject TriggerITIStart_Wave2

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Trigger_Location1, TypeTag=i)
        -> PublishSubject Trigger_Location1

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Trigger_Location2, TypeTag=i)
        -> PublishSubject Trigger_Location2

        Disable SubscribeSubject FromBonsaiOSC
        -> Disable Bonsai.Osc.Parse(Address=/TriggerGoCue_Wave1, TypeTag=i)
        -> Disable PublishSubject TriggerGoCue_Wave1

        Disable SubscribeSubject FromBonsaiOSC
        -> Disable Bonsai.Osc.Parse(Address=/TriggerGoCue_Wave2, TypeTag=i)
        -> Disable PublishSubject TriggerGoCue_Wave2

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Location1Size, TypeTag=i)
        -> PublishSubject Location1Size

        Disable SubscribeSubject FromBonsaiOSC
        -> Disable Bonsai.Osc.Parse(Address=/Location2Size, TypeTag=i)
        -> Disable PublishSubject Location2Size

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/TriggerSource, TypeTag=s)
        -> PublishSubject TriggerSource

        SubscribeSubject FromBonsaiOSC4
        -> Bonsai.Osc.Parse(Address=/WaveForm1_1, TypeTag=s)
        -> Parse(Pattern=%f, Separator=",")
        -> Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=F32, Channels=1)
        -> Bonsai.Dsp.Reshape(Channels=1, Rows=1)
        -> BehaviorSubject WaveForm1_1

        Disable SubscribeSubject FromBonsaiOSC4
        -> Disable Bonsai.Osc.Parse(Address=/WaveForm2_1, TypeTag=s)
        -> Disable Parse(Pattern=%f, Separator=",")
        -> Disable Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=F32, Channels=1)
        -> Disable Bonsai.Dsp.Reshape(Channels=0, Rows=1)
        -> Disable BehaviorSubject WaveForm2_1

        SubscribeSubject FromBonsaiOSC4
        -> Bonsai.Osc.Parse(Address=/WaveForm1_2, TypeTag=s)
        -> Parse(Pattern=%f, Separator=",")
        -> Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=F32, Channels=1)
        -> Bonsai.Dsp.Reshape(Channels=0, Rows=1)
        -> BehaviorSubject WaveForm1_2

        Disable SubscribeSubject FromBonsaiOSC4
        -> Disable Bonsai.Osc.Parse(Address=/WaveForm2_2, TypeTag=s)
        -> Disable Parse(Pattern=%f, Separator=",")
        -> Disable Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=F32, Channels=1)
        -> Disable Bonsai.Dsp.Reshape(Channels=0, Rows=1)
        -> Disable BehaviorSubject WaveForm2_2

        SubscribeSubject FromBonsaiOSC3
        -> Bonsai.Osc.Parse(Address=/ManualWater_Left, TypeTag=i)
        -> PublishSubject ManualWater_Left

        SubscribeSubject FromBonsaiOSC3
        -> Bonsai.Osc.Parse(Address=/AttenuationLeft, TypeTag=i)
        -> PublishSubject AttenuationLeft

        SubscribeSubject FromBonsaiOSC3
        -> Bonsai.Osc.Parse(Address=/AttenuationRight, TypeTag=i)
        -> PublishSubject AttenuationRight

        SubscribeSubject FromBonsaiOSC3
        -> Bonsai.Osc.Parse(Address=/TriggerGoCue, TypeTag=i)
        -> PublishSubject TriggerGoCue

        SubscribeSubject FromBonsaiOSC3
        -> Bonsai.Osc.Parse(Address=/ManualWater_Right, TypeTag=i)
        -> PublishSubject ManualWater_Right

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/OptogeneticsCalibration, TypeTag=i)
        -> PublishSubject OptogeneticsCalibration

        SubscribeSubject FromBonsaiOSC3
        -> Bonsai.Osc.Parse(Address=/LeftValueSize1, TypeTag=f)
        -> BehaviorSubject LeftValueSize1

        SubscribeSubject ToBonsaiOSC3
        -> Bonsai.Osc.Parse(Address=/RightValueSize1, TypeTag=f)
        -> BehaviorSubject RightValueSize1

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/cameracontrol, TypeTag=i)
        -> PublishSubject Cameracontrol

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/camerafrequency, TypeTag=i)
        -> PublishSubject Camerafrequency

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/sidecamerafile, TypeTag=s)
        -> PublishSubject Sidecamerafile

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/bottomcamerafile, TypeTag=s)
        -> PublishSubject Bottomcamerafile

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/sidecameracsv, TypeTag=s)
        -> PublishSubject Sidecameracsv

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/bottomcameracsv, TypeTag=s)
        -> PublishSubject Bottomcameracsv

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/DO0, TypeTag=i)
        -> PublishSubject DO0

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/DO1, TypeTag=i)
        -> PublishSubject DO1

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/DO2, TypeTag=i)
        -> PublishSubject DO2

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/DO3, TypeTag=i)
        -> PublishSubject DO3

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Port2, TypeTag=i)
        -> PublishSubject Port2

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/RewardDelay, TypeTag=f)
        -> BehaviorSubject RewardDelay

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/PassITI, TypeTag=i)
        -> PublishSubject PassITI

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/PassGoCue, TypeTag=i)
        -> PublishSubject PassGoCue

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/PassRewardOutcome, TypeTag=i)
        -> PublishSubject PassRewardOutcome

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/camerafrequency, TypeTag=i)
        -> PublishSubject CameraFrequency

        SubscribeSubject FromBonsaiOSC3
        -> Bonsai.Osc.Parse(Address=/AutoWater_Left, TypeTag=i)
        -> PublishSubject AutoWater_Left

        SubscribeSubject FromBonsaiOSC3
        -> Bonsai.Osc.Parse(Address=/AutoWater_Right, TypeTag=i)
        -> PublishSubject AutoWater_Right

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/camerastarttype, TypeTag=i)
        -> PublishSubject CameraStartType

        SubscribeSubject FromBonsaiOSC3
        -> Bonsai.Osc.Parse(Address=/RandomWater_Left, TypeTag=i)
        -> PublishSubject RandomWater_Left

        SubscribeSubject FromBonsaiOSC3
        -> Bonsai.Osc.Parse(Address=/RandomWater_Right, TypeTag=i)
        -> PublishSubject RandomWater_Right

    GroupWorkflow WriteToOsc
        SubscribeSubject RightLickTime
        -> Bonsai.Osc.Format(Address=/RightLickTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject LeftLickTime
        -> Bonsai.Osc.Format(Address=/LeftLickTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject RightLickTime2
        -> Bonsai.Osc.Format(Address=/RightLickTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject LeftLickTime2
        -> Bonsai.Osc.Format(Address=/LeftLickTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject Start => #12
        SubscribeSubject Timestamps => #13
        #12, #13 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/TrialStartTime)
        -> MulticastSubject ToBonsaiOSC

        SubscribeSubject DelayStart => #19
        SubscribeSubject Timestamps => #20
        #19, #20 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/DelayStartTime)
        -> MulticastSubject ToBonsaiOSC

        SubscribeSubject GoCue => #26
        SubscribeSubject Timestamps => #27
        #26, #27 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/GoCueTime)
        -> MulticastSubject ToBonsaiOSC

        SubscribeSubject RewardOutcome => #33
        SubscribeSubject Timestamps => #34
        #33, #34 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/RewardOutcomeTime)
        -> MulticastSubject ToBonsaiOSC

        SubscribeSubject AutoWater_Left => #40
        SubscribeSubject Timestamps => #41
        #40, #41 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/AutoLeftWaterStartTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject AutoWater_Right => #47
        SubscribeSubject Timestamps => #48
        #47, #48 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/AutoRightWaterStartTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject TrialEnd => #54
        SubscribeSubject Timestamps => #55
        #54, #55 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/TrialEndTime)
        -> MulticastSubject ToBonsaiOSC

        SubscribeSubject RewardDeliveryRight => #61
        SubscribeSubject Timestamps => #62
        #61, #62 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/RightRewardDeliveryTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject RewardDeliveryLeft => #68
        SubscribeSubject Timestamps => #69
        #68, #69 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/LeftRewardDeliveryTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject RewardOutcome
        -> Bonsai.Osc.Format(Address=/RewardOutcome)
        -> MulticastSubject ToBonsaiOSC

        Disable SubscribeSubject RightKeyPress => #78
        Disable SubscribeSubject Timestamps => #79
        #78, #79 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Disable Bonsai.Osc.Format(Address=/RightLickTime)
        -> Disable MulticastSubject ToBonsaiOSC2

        Disable SubscribeSubject LeftKeyPress => #85
        Disable SubscribeSubject Timestamps => #86
        #85, #86 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Disable Bonsai.Osc.Format(Address=/LeftLickTime)
        -> Disable MulticastSubject ToBonsaiOSC2

        SubscribeSubject ManualWater_Left => #92
        SubscribeSubject Timestamps => #93
        #92, #93 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/ManualLeftWaterStartTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject ManualWater_Right => #99
        SubscribeSubject Timestamps => #100
        #99, #100 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/ManualRightWaterStartTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject EarnedLeftRewardStartTime => #106
        SubscribeSubject Timestamps => #107
        #106, #107 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/EarnedLeftWaterStartTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject EarnedRightRewardStartTime => #113
        SubscribeSubject Timestamps => #114
        #113, #114 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/EarnedRightWaterStartTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject RandomWater_Left => #120
        SubscribeSubject Timestamps => #121
        #120, #121 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/RandomLeftWaterStartTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject RandomWater_Right => #127
        SubscribeSubject Timestamps => #128
        #127, #128 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/RandomRightWaterStartTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject EnvironmentSensor
        -> AllenNeuralDynamics.EnvironmentSensor.Parse(Register=AllenNeuralDynamics.EnvironmentSensor.Temperature)
        -> Bonsai.Osc.Format(Address=/EnvironmentSensorTemperature)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject EnvironmentSensor
        -> AllenNeuralDynamics.EnvironmentSensor.Parse(Register=AllenNeuralDynamics.EnvironmentSensor.Humidity)
        -> Bonsai.Osc.Format(Address=/EnvironmentSensorHumidity)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject EnvironmentSensor
        -> AllenNeuralDynamics.EnvironmentSensor.Parse(Register=AllenNeuralDynamics.EnvironmentSensor.Pressure)
        -> Bonsai.Osc.Format(Address=/EnvironmentSensorPressure)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject EnvironmentSensor
        -> AllenNeuralDynamics.EnvironmentSensor.Parse(Register=AllenNeuralDynamics.EnvironmentSensor.TimestampedTemperature)
        -> Bonsai.Osc.Format(Address=/EnvironmentSensorTimestamp)
        -> MulticastSubject ToBonsaiOSC2

GroupWorkflow Optogenetics2
    SubscribeSubject WaveForm1_1 => #0
    SubscribeSubject WaveForm1_2 => #1
    #0, #1 -> Zip
    -> Bonsai.Dsp.Concat(Axis=0) => #3
    SubscribeSubject Location1Size
    -> PropertyMapping(BufferSize) => #5
    SubscribeSubject TriggerSource
    -> PropertyMapping(TriggerSource) => #7
    #3, #5, #7 -> SelectMany
        WorkflowInput Source1 => #0
        ExternalizedMapping(BufferSize, TriggerSource) => #1
        Source2=#0, Source2=#1 -> Bonsai.DAQmx.TriggeredAnalogOutput
          SignalSource=""
          TriggerSource=/Dev1/PFI0
          SampleRate=5000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=50002
          Channels
            AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao0, VoltageUnits=Volts)
            AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao1, VoltageUnits=Volts)
        -> IntProperty(Value=1)
        -> Bonsai.Osc.Format(Address=/FinishOfWave1_1)
        -> MulticastSubject ToBonsaiOSC4
        -> WorkflowOutput

    SubscribeSubject OptogeneticsCalibration
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO0Payload(PulseDO0=100))
    -> MulticastSubject BehaviorCommands
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DO0))
    -> MulticastSubject BehaviorCommands

    SubscribeSubject DO0
    -> Take(Count=1)
    -> Equal(Operand=IntProperty(Value=1))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO0Payload(PulseDO0=10))
    -> Delay(DueTime=PT1S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DO0))
    -> MulticastSubject BehaviorCommands
    -> Repeat

    SubscribeSubject DO1
    -> Take(Count=1)
    -> Equal(Operand=IntProperty(Value=1))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO1Payload(PulseDO1=10))
    -> Delay(DueTime=PT1S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DO1))
    -> MulticastSubject BehaviorCommands
    -> Repeat

    SubscribeSubject DO2
    -> Take(Count=1)
    -> Equal(Operand=IntProperty(Value=1))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO2Payload(PulseDO2=10))
    -> Delay(DueTime=PT1S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DO2))
    -> MulticastSubject BehaviorCommands
    -> Repeat

    SubscribeSubject DO3
    -> Take(Count=1)
    -> Equal(Operand=IntProperty(Value=1))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO3Payload(PulseDO3=1))
    -> Delay(DueTime=PT1S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DO3))
    -> MulticastSubject BehaviorCommands
    -> Repeat

    SubscribeSubject Port2
    -> Take(Count=1)
    -> Equal(Operand=IntProperty(Value=1))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDOPort2Payload(PulseDOPort2=1))
    -> Delay(DueTime=PT1S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DOPort2))
    -> MulticastSubject BehaviorCommands
    -> Repeat

SubscribeSubject FromBonsaiOSC
-> Bonsai.Osc.Parse(Address=/startlogging, TypeTag=s)
-> Take(Count=1)
-> CreateObservable RestartLoggers
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject RootPath

    SubscribeSubject RootPath
    -> Format(Format={0}/../../, Selector="")
    -> AsyncSubject LoggingRootPath

    SubscribeSubject RootPath
    -> Bonsai.Osc.Format(Address=/loggerstarted)
    -> MulticastSubject ToBonsaiOSC

    SubscribeSubject FromBonsaiOSC
    -> Bonsai.Osc.Parse(Address=/stoplogging, TypeTag="")
    -> Take(Count=1)
    -> WorkflowOutput

    SubscribeSubject ToBonsaiOSC
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=ToBonsaiOSC)

    SubscribeSubject ToBonsaiOSC2
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=ToBonsaiOSC2)

    SubscribeSubject ToBonsaiOSC3
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=ToBonsaiOSC3)

    SubscribeSubject ToBonsaiOSC4
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=ToBonsaiOSC4)

    SubscribeSubject FromBonsaiOSC
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=FromBonsaiOSC)

    SubscribeSubject FromBonsaiOSC2
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=FromBonsaiOSC2)

    SubscribeSubject FromBonsaiOSC3
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=FromBonsaiOSC3)

    SubscribeSubject FromBonsaiOSC4
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=FromBonsaiOSC4)

    SubscribeSubject BehaviorEvents
    -> IncludeWorkflow(Path=Extensions\LogHarpDemux.bonsai, LogName=BehaviorEvents)

    SubscribeSubject SoundCardEvents
    -> IncludeWorkflow(Path=Extensions\LogHarpDemux.bonsai, LogName=SoundCardEvents)

    Disable GroupWorkflow Photometry(Description=Photometry)
        GroupWorkflow BehaviorCam
            Bonsai.Video.VideoCaptureDevice(Index=0, Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=24), CaptureProperties="") => #0
            -> Disable Bonsai.Vision.Flip(Mode=Both) => #1
            SubscribeSubject RootPath
            -> Format(Format={0}/VideoFolder/FaceBottomCamera_.avi, Selector="")
            -> PropertyMapping(FileName) => #4
            #1, #4 -> Bonsai.Vision.VideoWriter
              FileName=E:\DynamicForagingGUI\BehaviorData\Tower_EphysRig3\XY_05\XY_05_2023-11-07_11-36-46\HarpFolder/VideoFolder/FaceBottomCamera_.avi
              Suffix=Timestamp
              Buffered=true
              Overwrite=false
              FourCC=FMP4
              FrameRate=30
              FrameSize(Width=0, Height=0)
              ResizeInterpolation=NearestNeighbor
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #7
            SubscribeSubject RootPath
            -> Format(Format={0}/VideoFolder/FaceBottomCamera_.csv, Selector="")
            -> PropertyMapping(FileName) => #10
            #7, #10 -> Bonsai.IO.CsvWriter
              FileName=E:\DynamicForagingGUI\BehaviorData\Tower_EphysRig3\XY_05\XY_05_2023-11-07_11-36-46\HarpFolder/VideoFolder/FaceBottomCamera_.csv
              Append=false
              Overwrite=false
              Suffix=Timestamp
              IncludeHeader=false
            Bonsai.Video.VideoCaptureDevice(Index=1, Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=24), CaptureProperties="") => #12
            -> Disable Bonsai.Dsp.Transpose => #13
            SubscribeSubject RootPath
            -> Format(Format={0}/VideoFolder/FaceSideCamera_.avi, Selector="")
            -> PropertyMapping(FileName) => #16
            #13, #16 -> Bonsai.Vision.VideoWriter
              FileName=E:\DynamicForagingGUI\BehaviorData\Tower_EphysRig3\XY_05\XY_05_2023-11-07_11-36-46\HarpFolder/VideoFolder/FaceSideCamera_.avi
              Suffix=Timestamp
              Buffered=true
              Overwrite=false
              FourCC=FMP4
              FrameRate=30
              FrameSize(Width=0, Height=0)
              ResizeInterpolation=NearestNeighbor
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #19
            SubscribeSubject RootPath
            -> Format(Format={0}/VideoFolder/FaceSideCamera_.csv, Selector="")
            -> PropertyMapping(FileName) => #22
            #19, #22 -> Bonsai.IO.CsvWriter
              FileName=E:\DynamicForagingGUI\BehaviorData\Tower_EphysRig3\XY_05\XY_05_2023-11-07_11-36-46\HarpFolder/VideoFolder/FaceSideCamera_.csv
              Append=false
              Overwrite=false
              Suffix=Timestamp
              IncludeHeader=false
            #0 -> VisualizerMapping => #24
            #12 -> VisualizerMapping => #25
            #24, #25 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")

        GroupWorkflow FIP_Visualizer
            SubscribeSubject Green
            -> VisualizerMapping => #1
            SubscribeSubject Iso
            -> VisualizerMapping => #3
            SubscribeSubject Red
            -> VisualizerMapping => #5
            #1, #3, #5 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=1, RowCount=3, ColumnStyles="", RowStyles="", CellSpans="")

            SubscribeSubject Green0
            -> VisualizerMapping => #8
            SubscribeSubject Green1
            -> VisualizerMapping => #10
            SubscribeSubject Iso0
            -> VisualizerMapping => #12
            SubscribeSubject Iso1
            -> VisualizerMapping => #14
            SubscribeSubject Red0
            -> VisualizerMapping => #16
            SubscribeSubject Red1
            -> VisualizerMapping => #18
            #8, #10, #12, #14, #16, #18 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=1, RowCount=6, ColumnStyles="", RowStyles="", CellSpans="")

        GroupWorkflow GreenIsoCh
            Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23391007, ColorProcessing=Default) => #0
            -> Skip(Count=0)
            -> BufferCount(Count=1, Skip=2)
            -> Index(Operand=IntProperty(Value=0))
            -> MemberSelector(Selector=Image)
            -> PublishSubject Green => #5
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #7
            #5 -> Bonsai.Vision.RoiActivity => #8
              Regions
                ArrayOfPoint
                  Point(X=70, Y=88)
                  Point(X=70, Y=91)
                  Point(X=69, Y=94)
                  Point(X=68, Y=97)
                  Point(X=66, Y=99)
                  Point(X=64, Y=102)
                  Point(X=62, Y=104)
                  Point(X=59, Y=105)
                  Point(X=57, Y=106)
                  Point(X=54, Y=106)
                  Point(X=51, Y=106)
                  Point(X=49, Y=105)
                  Point(X=46, Y=104)
                  Point(X=44, Y=102)
                  Point(X=42, Y=99)
                  Point(X=40, Y=97)
                  Point(X=39, Y=94)
                  Point(X=38, Y=91)
                  Point(X=38, Y=88)
                  Point(X=38, Y=84)
                  Point(X=39, Y=81)
                  Point(X=40, Y=78)
                  Point(X=42, Y=76)
                  Point(X=44, Y=73)
                  Point(X=46, Y=71)
                  Point(X=49, Y=70)
                  Point(X=51, Y=69)
                  Point(X=54, Y=69)
                  Point(X=57, Y=69)
                  Point(X=59, Y=70)
                  Point(X=62, Y=71)
                  Point(X=64, Y=73)
                  Point(X=66, Y=76)
                  Point(X=68, Y=78)
                  Point(X=69, Y=81)
                  Point(X=70, Y=84)
                ArrayOfPoint
                  Point(X=127, Y=73)
                  Point(X=127, Y=76)
                  Point(X=126, Y=79)
                  Point(X=125, Y=81)
                  Point(X=123, Y=84)
                  Point(X=121, Y=86)
                  Point(X=119, Y=88)
                  Point(X=116, Y=89)
                  Point(X=113, Y=90)
                  Point(X=111, Y=90)
                  Point(X=108, Y=90)
                  Point(X=105, Y=89)
                  Point(X=102, Y=88)
                  Point(X=100, Y=86)
                  Point(X=98, Y=84)
                  Point(X=96, Y=81)
                  Point(X=95, Y=79)
                  Point(X=94, Y=76)
                  Point(X=94, Y=73)
                  Point(X=94, Y=70)
                  Point(X=95, Y=67)
                  Point(X=96, Y=65)
                  Point(X=98, Y=62)
                  Point(X=100, Y=60)
                  Point(X=102, Y=58)
                  Point(X=105, Y=57)
                  Point(X=108, Y=56)
                  Point(X=111, Y=56)
                  Point(X=113, Y=56)
                  Point(X=116, Y=57)
                  Point(X=119, Y=58)
                  Point(X=121, Y=60)
                  Point(X=123, Y=62)
                  Point(X=125, Y=65)
                  Point(X=126, Y=67)
                  Point(X=127, Y=70)
                ArrayOfPoint
                  Point(X=151, Y=125)
                  Point(X=151, Y=128)
                  Point(X=150, Y=130)
                  Point(X=149, Y=133)
                  Point(X=147, Y=135)
                  Point(X=146, Y=137)
                  Point(X=143, Y=139)
                  Point(X=141, Y=140)
                  Point(X=139, Y=141)
                  Point(X=136, Y=141)
                  Point(X=133, Y=141)
                  Point(X=131, Y=140)
                  Point(X=129, Y=139)
                  Point(X=126, Y=137)
                  Point(X=125, Y=135)
                  Point(X=123, Y=133)
                  Point(X=122, Y=130)
                  Point(X=121, Y=128)
                  Point(X=121, Y=125)
                  Point(X=121, Y=122)
                  Point(X=122, Y=120)
                  Point(X=123, Y=117)
                  Point(X=125, Y=115)
                  Point(X=126, Y=113)
                  Point(X=128, Y=111)
                  Point(X=131, Y=110)
                  Point(X=133, Y=109)
                  Point(X=136, Y=109)
                  Point(X=139, Y=109)
                  Point(X=141, Y=110)
                  Point(X=143, Y=111)
                  Point(X=146, Y=113)
                  Point(X=147, Y=115)
                  Point(X=149, Y=117)
                  Point(X=150, Y=120)
                  Point(X=151, Y=122)
                ArrayOfPoint
                  Point(X=96, Y=139)
                  Point(X=96, Y=142)
                  Point(X=95, Y=145)
                  Point(X=94, Y=148)
                  Point(X=92, Y=150)
                  Point(X=90, Y=152)
                  Point(X=88, Y=154)
                  Point(X=86, Y=155)
                  Point(X=83, Y=156)
                  Point(X=80, Y=156)
                  Point(X=78, Y=156)
                  Point(X=75, Y=155)
                  Point(X=73, Y=154)
                  Point(X=71, Y=152)
                  Point(X=69, Y=150)
                  Point(X=67, Y=148)
                  Point(X=66, Y=145)
                  Point(X=65, Y=142)
                  Point(X=65, Y=139)
                  Point(X=65, Y=136)
                  Point(X=66, Y=133)
                  Point(X=67, Y=130)
                  Point(X=69, Y=128)
                  Point(X=71, Y=126)
                  Point(X=73, Y=124)
                  Point(X=75, Y=123)
                  Point(X=78, Y=122)
                  Point(X=80, Y=122)
                  Point(X=83, Y=122)
                  Point(X=86, Y=123)
                  Point(X=88, Y=124)
                  Point(X=90, Y=126)
                  Point(X=92, Y=128)
                  Point(X=94, Y=130)
                  Point(X=95, Y=133)
                  Point(X=96, Y=136)
                ArrayOfPoint(Point(X=0, Y=0), Point(X=28, Y=0), Point(X=28, Y=68), Point(X=0, Y=68))
              Operation=Avg
            -> Index(Operand=IntProperty(Value=0))
            -> MemberSelector(Selector=Activity.Val0)
            -> PublishSubject Green0 => #11
            #8 -> Index(Operand=IntProperty(Value=1))
            -> MemberSelector(Selector=Activity.Val0)
            -> PublishSubject Green1 => #14
            #8 -> Index(Operand=IntProperty(Value=2))
            -> MemberSelector(Selector=Activity.Val0) => #16
            #8 -> Index(Operand=IntProperty(Value=3))
            -> MemberSelector(Selector=Activity.Val0) => #18
            #8 -> Index(Operand=IntProperty(Value=4))
            -> MemberSelector(Selector=Activity.Val0) => #20
            #7, #11, #14, #16, #18, #20 -> Zip => #21
            SubscribeSubject RootPath
            -> Format(Format={0}/PhotometryFolder/FIP_DataG_.csv, Selector="")
            -> PropertyMapping(FileName) => #24
            #21, #24 -> Bonsai.IO.CsvWriter
              FileName=E:\DynamicForagingGUI\BehaviorData\Tower_EphysRig3\XY_05\XY_05_2023-11-07_11-36-46\HarpFolder/PhotometryFolder/FIP_DataG_.csv
              Append=false
              Overwrite=false
              Suffix=Timestamp
              IncludeHeader=false
            SubscribeSubject RootPath
            -> Format(Format={0}/PhotometryFolder/FIP_RawG_, Selector="")
            -> PropertyMapping(Path) => #28
            #5, #28 -> Bonsai.Dsp.MatrixWriter
              Path=E:\DynamicForagingGUI\BehaviorData\Tower_EphysRig3\XY_05\XY_05_2023-11-07_11-36-46\HarpFolder/PhotometryFolder/FIP_RawG_
              Suffix=Timestamp
              Overwrite=false
              Layout=ColumnMajor
            #0 -> Skip(Count=1)
            -> BufferCount(Count=1, Skip=2)
            -> Index(Operand=IntProperty(Value=0))
            -> MemberSelector(Selector=Image)
            -> PublishSubject Iso => #34
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #36
            #34 -> Bonsai.Vision.RoiActivity => #37
              Regions
                ArrayOfPoint
                  Point(X=74, Y=87)
                  Point(X=74, Y=91)
                  Point(X=73, Y=95)
                  Point(X=72, Y=98)
                  Point(X=70, Y=101)
                  Point(X=67, Y=103)
                  Point(X=65, Y=105)
                  Point(X=62, Y=107)
                  Point(X=59, Y=108)
                  Point(X=56, Y=108)
                  Point(X=52, Y=108)
                  Point(X=49, Y=107)
                  Point(X=46, Y=105)
                  Point(X=44, Y=103)
                  Point(X=41, Y=101)
                  Point(X=39, Y=98)
                  Point(X=38, Y=95)
                  Point(X=37, Y=91)
                  Point(X=37, Y=87)
                  Point(X=37, Y=84)
                  Point(X=38, Y=80)
                  Point(X=39, Y=77)
                  Point(X=41, Y=74)
                  Point(X=44, Y=72)
                  Point(X=46, Y=70)
                  Point(X=49, Y=68)
                  Point(X=52, Y=67)
                  Point(X=56, Y=67)
                  Point(X=59, Y=67)
                  Point(X=62, Y=68)
                  Point(X=65, Y=70)
                  Point(X=67, Y=72)
                  Point(X=70, Y=74)
                  Point(X=72, Y=77)
                  Point(X=73, Y=80)
                  Point(X=74, Y=84)
                ArrayOfPoint
                  Point(X=126, Y=72)
                  Point(X=126, Y=75)
                  Point(X=125, Y=79)
                  Point(X=124, Y=82)
                  Point(X=122, Y=85)
                  Point(X=120, Y=87)
                  Point(X=118, Y=89)
                  Point(X=115, Y=91)
                  Point(X=112, Y=92)
                  Point(X=109, Y=92)
                  Point(X=107, Y=92)
                  Point(X=104, Y=91)
                  Point(X=101, Y=89)
                  Point(X=99, Y=87)
                  Point(X=97, Y=85)
                  Point(X=95, Y=82)
                  Point(X=94, Y=79)
                  Point(X=93, Y=75)
                  Point(X=93, Y=72)
                  Point(X=93, Y=69)
                  Point(X=94, Y=65)
                  Point(X=95, Y=62)
                  Point(X=97, Y=59)
                  Point(X=99, Y=57)
                  Point(X=101, Y=55)
                  Point(X=104, Y=53)
                  Point(X=107, Y=52)
                  Point(X=109, Y=52)
                  Point(X=112, Y=52)
                  Point(X=115, Y=53)
                  Point(X=118, Y=55)
                  Point(X=120, Y=57)
                  Point(X=122, Y=59)
                  Point(X=124, Y=62)
                  Point(X=125, Y=65)
                  Point(X=126, Y=69)
                ArrayOfPoint
                  Point(X=154, Y=124)
                  Point(X=154, Y=128)
                  Point(X=153, Y=131)
                  Point(X=152, Y=134)
                  Point(X=150, Y=137)
                  Point(X=148, Y=140)
                  Point(X=145, Y=142)
                  Point(X=142, Y=144)
                  Point(X=139, Y=145)
                  Point(X=136, Y=145)
                  Point(X=133, Y=145)
                  Point(X=130, Y=144)
                  Point(X=127, Y=142)
                  Point(X=124, Y=140)
                  Point(X=122, Y=137)
                  Point(X=120, Y=134)
                  Point(X=119, Y=131)
                  Point(X=118, Y=128)
                  Point(X=118, Y=124)
                  Point(X=118, Y=120)
                  Point(X=119, Y=117)
                  Point(X=120, Y=114)
                  Point(X=122, Y=111)
                  Point(X=124, Y=108)
                  Point(X=127, Y=106)
                  Point(X=130, Y=104)
                  Point(X=133, Y=103)
                  Point(X=136, Y=103)
                  Point(X=139, Y=103)
                  Point(X=142, Y=104)
                  Point(X=145, Y=106)
                  Point(X=148, Y=108)
                  Point(X=150, Y=111)
                  Point(X=152, Y=114)
                  Point(X=153, Y=117)
                  Point(X=154, Y=120)
                ArrayOfPoint
                  Point(X=98, Y=139)
                  Point(X=98, Y=143)
                  Point(X=97, Y=147)
                  Point(X=95, Y=150)
                  Point(X=94, Y=153)
                  Point(X=91, Y=156)
                  Point(X=88, Y=158)
                  Point(X=85, Y=160)
                  Point(X=82, Y=161)
                  Point(X=79, Y=161)
                  Point(X=76, Y=161)
                  Point(X=73, Y=160)
                  Point(X=70, Y=158)
                  Point(X=67, Y=156)
                  Point(X=64, Y=153)
                  Point(X=63, Y=150)
                  Point(X=61, Y=147)
                  Point(X=60, Y=143)
                  Point(X=60, Y=139)
                  Point(X=60, Y=135)
                  Point(X=61, Y=131)
                  Point(X=63, Y=128)
                  Point(X=64, Y=125)
                  Point(X=67, Y=122)
                  Point(X=70, Y=120)
                  Point(X=73, Y=118)
                  Point(X=76, Y=117)
                  Point(X=79, Y=117)
                  Point(X=82, Y=117)
                  Point(X=85, Y=118)
                  Point(X=88, Y=120)
                  Point(X=91, Y=122)
                  Point(X=94, Y=125)
                  Point(X=95, Y=128)
                  Point(X=97, Y=131)
                  Point(X=98, Y=135)
                ArrayOfPoint(Point(X=0, Y=0), Point(X=26, Y=0), Point(X=26, Y=78), Point(X=0, Y=78))
              Operation=Avg
            -> Index(Operand=IntProperty(Value=0))
            -> MemberSelector(Selector=Activity.Val0)
            -> PublishSubject Iso0 => #40
            #37 -> Index(Operand=IntProperty(Value=1))
            -> MemberSelector(Selector=Activity.Val0)
            -> PublishSubject Iso1 => #43
            #37 -> Index(Operand=IntProperty(Value=2))
            -> MemberSelector(Selector=Activity) => #45
            #37 -> Index(Operand=IntProperty(Value=3))
            -> MemberSelector(Selector=Activity.Val0) => #47
            #37 -> Index(Operand=IntProperty(Value=4))
            -> MemberSelector(Selector=Activity.Val0) => #49
            #36, #40, #43, #45, #47, #49 -> Zip => #50
            SubscribeSubject RootPath
            -> Format(Format={0}/PhotometryFolder/FIP_DataIso_.csv, Selector="")
            -> PropertyMapping(FileName) => #53
            #50, #53 -> Bonsai.IO.CsvWriter
              FileName=E:\DynamicForagingGUI\BehaviorData\Tower_EphysRig3\XY_05\XY_05_2023-11-07_11-36-46\HarpFolder/PhotometryFolder/FIP_DataIso_.csv
              Append=false
              Overwrite=false
              Suffix=Timestamp
              IncludeHeader=false
            SubscribeSubject RootPath
            -> Format(Format={0}/PhotometryFolder/FIP_RawIso_, Selector="")
            -> PropertyMapping(Path) => #57
            #34, #57 -> Bonsai.Dsp.MatrixWriter
              Path=E:\DynamicForagingGUI\BehaviorData\Tower_EphysRig3\XY_05\XY_05_2023-11-07_11-36-46\HarpFolder/PhotometryFolder/FIP_RawIso_
              Suffix=Timestamp
              Overwrite=false
              Layout=ColumnMajor

        GroupWorkflow RedCh
            Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23391006, ColorProcessing=Default)
            -> MemberSelector(Selector=Image) => #1
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #3
            #1 -> Bonsai.Vision.Flip(Mode=Horizontal)
            -> PublishSubject Red => #5
            -> Bonsai.Vision.RoiActivity => #6
              Regions
                ArrayOfPoint
                  Point(X=71, Y=98)
                  Point(X=71, Y=102)
                  Point(X=70, Y=105)
                  Point(X=69, Y=109)
                  Point(X=67, Y=111)
                  Point(X=65, Y=114)
                  Point(X=63, Y=116)
                  Point(X=60, Y=118)
                  Point(X=57, Y=119)
                  Point(X=54, Y=119)
                  Point(X=52, Y=119)
                  Point(X=49, Y=118)
                  Point(X=46, Y=116)
                  Point(X=44, Y=114)
                  Point(X=42, Y=111)
                  Point(X=40, Y=109)
                  Point(X=39, Y=105)
                  Point(X=38, Y=102)
                  Point(X=38, Y=98)
                  Point(X=38, Y=94)
                  Point(X=39, Y=91)
                  Point(X=40, Y=87)
                  Point(X=42, Y=85)
                  Point(X=44, Y=82)
                  Point(X=46, Y=80)
                  Point(X=49, Y=78)
                  Point(X=52, Y=77)
                  Point(X=54, Y=77)
                  Point(X=57, Y=77)
                  Point(X=60, Y=78)
                  Point(X=63, Y=80)
                  Point(X=65, Y=82)
                  Point(X=67, Y=85)
                  Point(X=69, Y=87)
                  Point(X=70, Y=91)
                  Point(X=71, Y=94)
                ArrayOfPoint
                  Point(X=123, Y=79)
                  Point(X=123, Y=83)
                  Point(X=122, Y=86)
                  Point(X=121, Y=89)
                  Point(X=119, Y=92)
                  Point(X=117, Y=95)
                  Point(X=114, Y=97)
                  Point(X=111, Y=99)
                  Point(X=109, Y=100)
                  Point(X=105, Y=100)
                  Point(X=102, Y=100)
                  Point(X=100, Y=99)
                  Point(X=97, Y=97)
                  Point(X=94, Y=95)
                  Point(X=92, Y=92)
                  Point(X=90, Y=89)
                  Point(X=89, Y=86)
                  Point(X=88, Y=83)
                  Point(X=88, Y=79)
                  Point(X=88, Y=75)
                  Point(X=89, Y=72)
                  Point(X=90, Y=69)
                  Point(X=92, Y=66)
                  Point(X=94, Y=63)
                  Point(X=97, Y=61)
                  Point(X=100, Y=59)
                  Point(X=102, Y=58)
                  Point(X=105, Y=58)
                  Point(X=109, Y=58)
                  Point(X=111, Y=59)
                  Point(X=114, Y=61)
                  Point(X=117, Y=63)
                  Point(X=119, Y=66)
                  Point(X=121, Y=69)
                  Point(X=122, Y=72)
                  Point(X=123, Y=75)
                ArrayOfPoint
                  Point(X=151, Y=129)
                  Point(X=151, Y=132)
                  Point(X=150, Y=136)
                  Point(X=149, Y=139)
                  Point(X=147, Y=142)
                  Point(X=145, Y=144)
                  Point(X=143, Y=146)
                  Point(X=140, Y=148)
                  Point(X=137, Y=149)
                  Point(X=134, Y=149)
                  Point(X=131, Y=149)
                  Point(X=128, Y=148)
                  Point(X=125, Y=146)
                  Point(X=123, Y=144)
                  Point(X=121, Y=142)
                  Point(X=119, Y=139)
                  Point(X=118, Y=136)
                  Point(X=117, Y=132)
                  Point(X=117, Y=129)
                  Point(X=117, Y=126)
                  Point(X=118, Y=122)
                  Point(X=119, Y=119)
                  Point(X=121, Y=116)
                  Point(X=123, Y=114)
                  Point(X=125, Y=112)
                  Point(X=128, Y=110)
                  Point(X=131, Y=109)
                  Point(X=134, Y=109)
                  Point(X=137, Y=109)
                  Point(X=140, Y=110)
                  Point(X=143, Y=112)
                  Point(X=145, Y=114)
                  Point(X=147, Y=116)
                  Point(X=149, Y=119)
                  Point(X=150, Y=122)
                  Point(X=151, Y=126)
                ArrayOfPoint
                  Point(X=100, Y=147)
                  Point(X=100, Y=150)
                  Point(X=99, Y=154)
                  Point(X=98, Y=157)
                  Point(X=96, Y=160)
                  Point(X=93, Y=162)
                  Point(X=91, Y=164)
                  Point(X=88, Y=166)
                  Point(X=85, Y=167)
                  Point(X=81, Y=167)
                  Point(X=78, Y=167)
                  Point(X=75, Y=166)
                  Point(X=72, Y=164)
                  Point(X=70, Y=162)
                  Point(X=67, Y=160)
                  Point(X=65, Y=157)
                  Point(X=64, Y=154)
                  Point(X=63, Y=150)
                  Point(X=63, Y=147)
                  Point(X=63, Y=144)
                  Point(X=64, Y=140)
                  Point(X=65, Y=137)
                  Point(X=67, Y=134)
                  Point(X=70, Y=132)
                  Point(X=72, Y=130)
                  Point(X=75, Y=128)
                  Point(X=78, Y=127)
                  Point(X=81, Y=127)
                  Point(X=85, Y=127)
                  Point(X=88, Y=128)
                  Point(X=91, Y=130)
                  Point(X=93, Y=132)
                  Point(X=96, Y=134)
                  Point(X=98, Y=137)
                  Point(X=99, Y=140)
                  Point(X=100, Y=144)
                ArrayOfPoint(Point(X=1, Y=1), Point(X=31, Y=1), Point(X=31, Y=66), Point(X=1, Y=66))
              Operation=Avg
            -> Index(Operand=IntProperty(Value=0))
            -> MemberSelector(Selector=Activity.Val0)
            -> PublishSubject Red0 => #9
            #6 -> Index(Operand=IntProperty(Value=1))
            -> MemberSelector(Selector=Activity.Val0)
            -> PublishSubject Red1 => #12
            #6 -> Index(Operand=IntProperty(Value=2))
            -> MemberSelector(Selector=Activity.Val0) => #14
            #6 -> Index(Operand=IntProperty(Value=3))
            -> MemberSelector(Selector=Activity.Val0) => #16
            #6 -> Index(Operand=IntProperty(Value=4))
            -> MemberSelector(Selector=Activity.Val0) => #18
            #3, #9, #12, #14, #16, #18 -> Zip => #19
            SubscribeSubject RootPath
            -> Format(Format={0}/PhotometryFolder/FIP_DataR_.csv, Selector="")
            -> PropertyMapping(FileName) => #22
            #19, #22 -> Bonsai.IO.CsvWriter
              FileName=E:\DynamicForagingGUI\BehaviorData\Tower_EphysRig3\XY_05\XY_05_2023-11-07_11-36-46\HarpFolder/PhotometryFolder/FIP_DataR_.csv
              Append=false
              Overwrite=false
              Suffix=Timestamp
              IncludeHeader=false
            SubscribeSubject RootPath
            -> Format(Format={0}/PhotometryFolder/FIP_RawR_, Selector="")
            -> PropertyMapping(Path) => #26
            #5, #26 -> Bonsai.Dsp.MatrixWriter
              Path=E:\DynamicForagingGUI\BehaviorData\Tower_EphysRig3\XY_05\XY_05_2023-11-07_11-36-46\HarpFolder/PhotometryFolder/FIP_RawR_
              Suffix=Timestamp
              Overwrite=false
              Layout=ColumnMajor

    SubscribeSubject LickometerEventsLeft
    -> IncludeWorkflow(Path=Extensions\LogHarpDemux.bonsai, LogName=LickometerEventsLeft)

    SubscribeSubject LickometerEventsRight
    -> IncludeWorkflow(Path=Extensions\LogHarpDemux.bonsai, LogName=LickometerEventsRight)

    SubscribeSubject EnvironmentSensor
    -> IncludeWorkflow(Path=Extensions\LogHarpDemux.bonsai, LogName=EnvironmentSensorEvents)

    GroupWorkflow CameraRecording => #48
        GroupWorkflow CameraRecording => #0
            SubscribeSubject BottomCameraFrames
            -> MemberSelector(Selector=Item1.ChunkData.FrameID)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Subtract(Operand=DoubleProperty(Value=1))
            -> Accumulate

            SubscribeSubject Camerafrequency
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.Camera1Frequency)
            -> MulticastSubject BehaviorCommands

            SubscribeSubject Cameracontrol => #8
            -> Equal(Operand=IntProperty(Value=1))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Delay(DueTime=PT5S)
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput1))
            -> MulticastSubject BehaviorCommands
            #8 -> Equal(Operand=IntProperty(Value=2))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras=CameraOutput1))
            -> MulticastSubject BehaviorCommands

            SubscribeSubject ComPorts
            -> Index(Operand=StringProperty(Value=ffmpeg_input_args))
            -> AsyncSubject FfmpegInputArgs

            SubscribeSubject ComPorts
            -> Index(Operand=StringProperty(Value=ffmpeg_output_args))
            -> AsyncSubject FfmpegOutputArgs

            Defer SideCameraLeft => #24
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=SideCameraLeft))
                -> PropertyMapping(SerialNumber) => #2
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=SideCameraLeft_ExposureTime))
                -> Bonsai.Scripting.Expressions.ExpressionTransform "Convert To Float"
                  Expression: Convert.ToSingle(it)
                -> PropertyMapping(ExposureTime) => #6
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=SideCameraLeft_Gain))
                -> Bonsai.Scripting.Expressions.ExpressionTransform "Convert To Float"
                  Expression: Convert.ToSingle(it)
                -> PropertyMapping(Gain) => #10
                #2, #6, #10 -> AllenNeuralDynamics.Core.AindSpinnakerCapture => #11
                  Index=nil
                  SerialNumber=23022717
                  ColorProcessing=Default
                  ExposureTime=1000
                  Gain=8
                  Binning=1
                  Gamma=nil
                  PixelFormat=Mono8
                  RegionOfInterest(X=0, Y=0, Width=0, Height=0)
                  AdcBitDepth=Bit8
                SubscribeSubject BehaviorEvents
                -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera1Frame)
                -> MemberSelector(Selector=Seconds) => #14
                #11, #14 -> Zip
                -> PublishSubject SideCameraLeftFrames
                -> WorkflowOutput

                SubscribeSubject SideCameraLeftFrames
                -> Bonsai.Harp.CreateTimestamped => #19
                SubscribeSubject FfmpegOutputArgs
                -> PropertyMapping(OutputArguments) => #21
                SubscribeSubject FfmpegInputArgs
                -> PropertyMapping(InputArguments) => #23
                SubscribeSubject CameraFrequency
                -> PropertyMapping(FrameRate) => #25
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=video_file_format)) => #27
                SubscribeSubject ComPorts
                -> AllenNeuralDynamics.Core.ContainsKey(Key=video_file_format)
                -> Condition => #30
                    WorkflowInput Source1
                    -> WorkflowOutput
                #27, #30 -> SubscribeWhen
                -> PropertyMapping(VideoExtension) => #32
                #19, #21, #23, #25, #32 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:LogSpinnakerFfmpeg.bonsai
                  Modality=BehaviorVideos
                  LogName=SideCameraLeft
                  VideoExtension=mkv
                  OutputArguments: -vf "scale=out_color_matrix=bt709:out_range=full,format=bgr24,scale=out_range=full" -c:v h264_nvenc -pix_fmt yuv420p -color_range full -colorspace bt709 -color_trc linear -tune hq -preset p4 -rc vbr -cq 12 -b:v 0M -metadata author="Allen Institute for Neural Dynamics" -maxrate 700M -bufsize 350M
                  InputArguments="-colorspace bt709 -color_primaries bt709 -color_range full -color_trc linear"
                  Verbosity=Verbose
                  FrameRate=500
            SubscribeSubject ComPorts
            -> Index(Operand=StringProperty(Value=HasSideCameraLeft))
            -> NotEqual(Operand=StringProperty(Value=0))
            -> Condition => #28
                WorkflowInput Source1
                -> WorkflowOutput
            #24, #28 -> SubscribeWhen

            Defer BottomCamera => #30
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=BottomCamera))
                -> PropertyMapping(SerialNumber) => #2
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=BottomCamera_ExposureTime))
                -> Bonsai.Scripting.Expressions.ExpressionTransform "Convert To Float"
                  Expression: Convert.ToSingle(it)
                -> PropertyMapping(ExposureTime) => #6
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=BottomCamera_Gain))
                -> Bonsai.Scripting.Expressions.ExpressionTransform "Convert To Float"
                  Expression: Convert.ToSingle(it)
                -> PropertyMapping(Gain) => #10
                #2, #6, #10 -> AllenNeuralDynamics.Core.AindSpinnakerCapture => #11
                  Index=nil
                  SerialNumber=23045805
                  ColorProcessing=Default
                  ExposureTime=1000
                  Gain=8
                  Binning=1
                  Gamma=nil
                  PixelFormat=Mono8
                  RegionOfInterest(X=0, Y=0, Width=0, Height=0)
                  AdcBitDepth=Bit8
                SubscribeSubject BehaviorEvents
                -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera1Frame)
                -> MemberSelector(Selector=Seconds) => #14
                #11, #14 -> Zip
                -> PublishSubject BottomCameraFrames
                -> WorkflowOutput

                SubscribeSubject BottomCameraFrames
                -> Bonsai.Harp.CreateTimestamped => #19
                SubscribeSubject FfmpegOutputArgs
                -> PropertyMapping(OutputArguments) => #21
                SubscribeSubject FfmpegInputArgs
                -> PropertyMapping(InputArguments) => #23
                SubscribeSubject CameraFrequency
                -> PropertyMapping(FrameRate) => #25
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=video_file_format)) => #27
                SubscribeSubject ComPorts
                -> AllenNeuralDynamics.Core.ContainsKey(Key=video_file_format)
                -> Condition => #30
                    WorkflowInput Source1
                    -> WorkflowOutput
                #27, #30 -> SubscribeWhen
                -> PropertyMapping(VideoExtension) => #32
                #19, #21, #23, #25, #32 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:LogSpinnakerFfmpeg.bonsai
                  Modality=BehaviorVideos
                  LogName=BottomCamera
                  VideoExtension=mkv
                  OutputArguments: -vf "scale=out_color_matrix=bt709:out_range=full,format=bgr24,scale=out_range=full" -c:v h264_nvenc -pix_fmt yuv420p -color_range full -colorspace bt709 -color_trc linear -tune hq -preset p4 -rc vbr -cq 12 -b:v 0M -metadata author="Allen Institute for Neural Dynamics" -maxrate 700M -bufsize 350M
                  InputArguments="-colorspace bt709 -color_primaries bt709 -color_range full -color_trc linear"
                  Verbosity=Verbose
                  FrameRate=500
            SubscribeSubject ComPorts
            -> Index(Operand=StringProperty(Value=HasBottomCamera))
            -> NotEqual(Operand=StringProperty(Value=0))
            -> Condition => #34
                WorkflowInput Source1
                -> WorkflowOutput
            #30, #34 -> SubscribeWhen
            -> PublishSubject BottomCameraFrames

            Defer SideCameraRight => #37
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=SideCameraRight))
                -> PropertyMapping(SerialNumber) => #2
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=SideCameraRight_ExposureTime))
                -> Bonsai.Scripting.Expressions.ExpressionTransform "Convert To Float"
                  Expression: Convert.ToSingle(it)
                -> PropertyMapping(ExposureTime) => #6
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=SideCameraRight_Gain))
                -> Bonsai.Scripting.Expressions.ExpressionTransform "Convert To Float"
                  Expression: Convert.ToSingle(it)
                -> PropertyMapping(Gain) => #10
                #2, #6, #10 -> AllenNeuralDynamics.Core.AindSpinnakerCapture => #11
                  Index=nil
                  SerialNumber=23022710
                  ColorProcessing=Default
                  ExposureTime=1000
                  Gain=8
                  Binning=1
                  Gamma=nil
                  PixelFormat=Mono8
                  RegionOfInterest(X=0, Y=0, Width=0, Height=0)
                  AdcBitDepth=Bit8
                SubscribeSubject BehaviorEvents
                -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera1Frame)
                -> MemberSelector(Selector=Seconds) => #14
                #11, #14 -> Zip
                -> PublishSubject SideCameraRightFrames
                -> WorkflowOutput

                SubscribeSubject SideCameraRightFrames
                -> Bonsai.Harp.CreateTimestamped => #19
                SubscribeSubject FfmpegOutputArgs
                -> PropertyMapping(OutputArguments) => #21
                SubscribeSubject FfmpegInputArgs
                -> PropertyMapping(InputArguments) => #23
                SubscribeSubject CameraFrequency
                -> PropertyMapping(FrameRate) => #25
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=video_file_format)) => #27
                SubscribeSubject ComPorts
                -> AllenNeuralDynamics.Core.ContainsKey(Key=video_file_format)
                -> Condition => #30
                    WorkflowInput Source1
                    -> WorkflowOutput
                #27, #30 -> SubscribeWhen
                -> PropertyMapping(VideoExtension) => #32
                #19, #21, #23, #25, #32 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:LogSpinnakerFfmpeg.bonsai
                  Modality=BehaviorVideos
                  LogName=SideCameraRight
                  VideoExtension=mkv
                  OutputArguments: -vf "scale=out_color_matrix=bt709:out_range=full,format=bgr24,scale=out_range=full" -c:v h264_nvenc -pix_fmt yuv420p -color_range full -colorspace bt709 -color_trc linear -tune hq -preset p4 -rc vbr -cq 12 -b:v 0M -metadata author="Allen Institute for Neural Dynamics" -maxrate 700M -bufsize 350M
                  InputArguments="-colorspace bt709 -color_primaries bt709 -color_range full -color_trc linear"
                  Verbosity=Verbose
                  FrameRate=500
            SubscribeSubject ComPorts
            -> Index(Operand=StringProperty(Value=HasSideCameraRight))
            -> NotEqual(Operand=StringProperty(Value=0))
            -> Condition => #41
                WorkflowInput Source1
                -> WorkflowOutput
            #37, #41 -> SubscribeWhen
            -> PublishSubject SideCameraRightFrames

            Defer BodyCamera => #44
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=BodyCamera))
                -> PropertyMapping(SerialNumber) => #2
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=BodyCamera_ExposureTime))
                -> Bonsai.Scripting.Expressions.ExpressionTransform "Convert To Float"
                  Expression: Convert.ToSingle(it)
                -> PropertyMapping(ExposureTime) => #6
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=BodyCamera_Gain))
                -> Bonsai.Scripting.Expressions.ExpressionTransform "Convert To Float"
                  Expression: Convert.ToSingle(it)
                -> PropertyMapping(Gain) => #10
                #2, #6, #10 -> AllenNeuralDynamics.Core.AindSpinnakerCapture => #11
                  Index=nil
                  SerialNumber=22511912
                  ColorProcessing=Default
                  ExposureTime=1000
                  Gain=8
                  Binning=1
                  Gamma=nil
                  PixelFormat=Mono8
                  RegionOfInterest(X=0, Y=0, Width=0, Height=0)
                  AdcBitDepth=Bit8
                SubscribeSubject BehaviorEvents
                -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera1Frame)
                -> MemberSelector(Selector=Seconds) => #14
                #11, #14 -> Zip
                -> PublishSubject BodyCameraFrames
                -> WorkflowOutput

                SubscribeSubject BodyCameraFrames
                -> Bonsai.Harp.CreateTimestamped => #19
                SubscribeSubject FfmpegOutputArgs
                -> PropertyMapping(OutputArguments) => #21
                SubscribeSubject FfmpegInputArgs
                -> PropertyMapping(InputArguments) => #23
                SubscribeSubject CameraFrequency
                -> PropertyMapping(FrameRate) => #25
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=video_file_format)) => #27
                SubscribeSubject ComPorts
                -> AllenNeuralDynamics.Core.ContainsKey(Key=video_file_format)
                -> Condition => #30
                    WorkflowInput Source1
                    -> WorkflowOutput
                #27, #30 -> SubscribeWhen
                -> PropertyMapping(VideoExtension) => #32
                #19, #21, #23, #25, #32 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:LogSpinnakerFfmpeg.bonsai
                  Modality=BehaviorVideos
                  LogName=BodyCamera
                  VideoExtension=mkv
                  OutputArguments: -vf "scale=out_color_matrix=bt709:out_range=full,format=bgr24,scale=out_range=full" -c:v h264_nvenc -pix_fmt yuv420p -color_range full -colorspace bt709 -color_trc linear -tune hq -preset p4 -rc vbr -cq 12 -b:v 0M -metadata author="Allen Institute for Neural Dynamics" -maxrate 700M -bufsize 350M
                  InputArguments="-colorspace bt709 -color_primaries bt709 -color_range full -color_trc linear"
                  Verbosity=Verbose
                  FrameRate=500
            SubscribeSubject ComPorts
            -> Index(Operand=StringProperty(Value=HasBodyCamera))
            -> NotEqual(Operand=StringProperty(Value=0))
            -> Condition => #48
                WorkflowInput Source1
                -> WorkflowOutput
            #44, #48 -> SubscribeWhen
        SubscribeSubject CameraStartType
        -> Equal(Operand=IntProperty(Value=1))
        -> Condition => #3
            WorkflowInput Source1
            -> WorkflowOutput
        #0, #3 -> SubscribeWhen
    SubscribeSubject ComPorts
    -> Index(Operand=StringProperty(Value=HighSpeedCamera))
    -> NotEqual(Operand=StringProperty(Value=0))
    -> Condition => #52
        WorkflowInput Source1
        -> WorkflowOutput
    #48, #52 -> SubscribeWhen

    GroupWorkflow RunningWheelRecording => #54
        SubscribeSubject Cameracontrol
        -> Equal(Operand=IntProperty(Value=2))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras=CameraOutput1))
        -> MulticastSubject BehaviorCommands
        -> WorkflowOutput

        SubscribeSubject BehaviorEvents
        -> GroupWorkflow FilterRunning(Description="Allows running wheel events to pass through, only when ShouldWrite is True") => #7
            WorkflowInput Source1
            -> Harp.Behavior.FilterRegister(FilterType=Include, Register=Harp.Behavior.AnalogData)
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData) => #2
            -> MemberSelector(Selector=Seconds) => #3
            #2 -> MemberSelector(Selector=Value.Encoder) => #4
            #3, #4 -> Zip
            -> Slice(Start=0, Step=10, Stop=nil)
            -> WorkflowOutput
        SubscribeSubject RootPath
        -> Format(Format={0}/../../running-wheel/running-wheel.csv, Selector="")
        -> PropertyMapping(FileName) => #10
        #7, #10 -> Bonsai.IO.CsvWriter => #11
          FileName=D:\BehaviorData\323_EPHYS3\0\behavior_behavior_0_2024-12-05_18-46-46\behavior\raw.harp/../../running-wheel/running-wheel.csv
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=false
        SubscribeSubject Cameracontrol
        -> Equal(Operand=IntProperty(Value=1))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Delay(DueTime=PT5S) => #15
        #11, #15 -> SubscribeWhen

        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableEncodersPayload(EnableEncoders=EncoderPort2))
        -> MulticastSubject BehaviorCommands
    SubscribeSubject ComPorts
    -> Index(Operand=StringProperty(Value=RunningWheel))
    -> NotEqual(Operand=StringProperty(Value=0))
    -> Condition => #58
        WorkflowInput Source1
        -> WorkflowOutput
    #54, #58 -> SubscribeWhen

    SubscribeSubject BottomCameraFrames
    -> MemberSelector(Selector=Item1.Image)
    -> VisualizerMapping(VisualizerType=TypeMapping<IplImageRotateVisualizer>) => #62
    SubscribeSubject SideCameraRightFrames
    -> MemberSelector(Selector=Item1.Image)
    -> VisualizerMapping(VisualizerType=TypeMapping<IplImageRotateVisualizer>) => #65
    #62, #65 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder CameraRecording(ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")

    SubscribeSubject SniffDetectorEvents => #67
    AllenNeuralDynamics.SniffDetector.GetMetadata
    -> PropertyMapping(DeviceMetadata) => #69
    #67, #69 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata=nil, Modality=Behavior, DeviceName=SniffDetector)

    Disable Defer HarpDeviceDump
        Bonsai.Harp.CreateMessage
          MessageType=Write
          Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=On, OperationLed=On, Heartbeat=Enabled)
        -> MulticastSubject BehaviorCommands
        -> MulticastSubject SoundCardCommands
        -> MulticastSubject LickometerLeftCommands
        -> MulticastSubject LickometerRightCommands

    Disable DelaySubscription(DueTime=PT2S)
-> Concat
-> Repeat

ExternalizedMapping(Path(DisplayName=SettingsPath))
-> Bonsai.IO.ReadAllText(Path="")
-> ParseSettingCsv
-> Take(Count=1)
-> AsyncSubject ComPorts

GroupWorkflow LickVisualization
    SubscribeSubject ComPorts
    -> Index(Operand=StringProperty(Value=current_box))
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 15.75pt, style=Bold", Text=667-1-A)
    -> VisualizerMapping => #4
    SubscribeSubject LeftLick => #5
    SubscribeSubject LicketySplitLeftLick => #6
    #5, #6 -> Merge
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(SymbolType=None, LineWidth=1, Capacity=50, Min=0, Max=1.1)
    -> VisualizerMapping => #9
    SubscribeSubject RightLick => #10
    SubscribeSubject LicketySplitRightLick => #11
    #10, #11 -> Merge
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(SymbolType=None, LineWidth=1, Capacity=50, Min=0, Max=1.1)
    -> VisualizerMapping => #14
    #4, #9, #14 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder "LickVis:Top:L / Bottom:R"
      ColumnCount=1
      RowCount=11
      ColumnStyles=""
      RowStyles=""
      CellSpans(CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=5), CellSpan(ColumnSpan=1, RowSpan=5))

GroupWorkflow CameraPreview
    GroupWorkflow CameraPreview => #0
        GroupWorkflow CameraPreview => #0
            SubscribeSubject Camerafrequency
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.Camera1Frequency)
            -> MulticastSubject BehaviorCommands

            SubscribeSubject Cameracontrol => #3
            -> Equal(Operand=IntProperty(Value=1))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput1))
            -> MulticastSubject BehaviorCommands
            #3 -> Equal(Operand=IntProperty(Value=2))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras=CameraOutput1))
            -> MulticastSubject BehaviorCommands

            GroupWorkflow SideCameraLeft => #12
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=SideCameraLeft))
                -> PropertyMapping(SerialNumber) => #2
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=SideCameraLeft_ExposureTime))
                -> Bonsai.Scripting.Expressions.ExpressionTransform "Convert To Float"
                  Expression: Convert.ToSingle(it)
                -> PropertyMapping(ExposureTime) => #6
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=SideCameraLeft_Gain))
                -> Bonsai.Scripting.Expressions.ExpressionTransform "Convert To Float"
                  Expression: Convert.ToSingle(it)
                -> PropertyMapping(Gain) => #10
                #2, #6, #10 -> AllenNeuralDynamics.Core.AindSpinnakerCapture
                  Index=nil
                  SerialNumber=23022717
                  ColorProcessing=Default
                  ExposureTime=1000
                  Gain=8
                  Binning=1
                  Gamma=nil
                  PixelFormat=Mono8
                  RegionOfInterest(X=0, Y=0, Width=0, Height=0)
                  AdcBitDepth=Bit8
                -> MemberSelector(Selector=Image)
            SubscribeSubject ComPorts
            -> Index(Operand=StringProperty(Value=HasSideCameraLeft))
            -> NotEqual(Operand=StringProperty(Value=0))
            -> Condition => #16
                WorkflowInput Source1
                -> WorkflowOutput
            #12, #16 -> SubscribeWhen

            GroupWorkflow BottomCamera => #18
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=BottomCamera))
                -> PropertyMapping(SerialNumber) => #2
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=BottomCamera_ExposureTime))
                -> Bonsai.Scripting.Expressions.ExpressionTransform "Convert To Float"
                  Expression: Convert.ToSingle(it)
                -> PropertyMapping(ExposureTime) => #6
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=BottomCamera_Gain))
                -> Bonsai.Scripting.Expressions.ExpressionTransform "Convert To Float"
                  Expression: Convert.ToSingle(it)
                -> PropertyMapping(Gain) => #10
                #2, #6, #10 -> AllenNeuralDynamics.Core.AindSpinnakerCapture
                  Index=nil
                  SerialNumber=23045805
                  ColorProcessing=Default
                  ExposureTime=1000
                  Gain=8
                  Binning=1
                  Gamma=nil
                  PixelFormat=Mono8
                  RegionOfInterest(X=0, Y=0, Width=0, Height=0)
                  AdcBitDepth=Bit8
                -> MemberSelector(Selector=Image)
                -> PublishSubject CameraImage_Bottom_Preview
            SubscribeSubject ComPorts
            -> Index(Operand=StringProperty(Value=HasBottomCamera))
            -> NotEqual(Operand=StringProperty(Value=0))
            -> Condition => #22
                WorkflowInput Source1
                -> WorkflowOutput
            #18, #22 -> SubscribeWhen

            GroupWorkflow SideCameraRight => #24
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=SideCameraRight))
                -> PropertyMapping(SerialNumber) => #2
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=SideCameraRight_ExposureTime))
                -> Bonsai.Scripting.Expressions.ExpressionTransform "Convert To Float"
                  Expression: Convert.ToSingle(it)
                -> PropertyMapping(ExposureTime) => #6
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=SideCameraRight_Gain))
                -> Bonsai.Scripting.Expressions.ExpressionTransform "Convert To Float"
                  Expression: Convert.ToSingle(it)
                -> PropertyMapping(Gain) => #10
                #2, #6, #10 -> AllenNeuralDynamics.Core.AindSpinnakerCapture
                  Index=nil
                  SerialNumber=23022710
                  ColorProcessing=Default
                  ExposureTime=1000
                  Gain=8
                  Binning=1
                  Gamma=nil
                  PixelFormat=Mono8
                  RegionOfInterest(X=0, Y=0, Width=0, Height=0)
                  AdcBitDepth=Bit8
                -> MemberSelector(Selector=Image)
                -> PublishSubject CameraImage_Right_Preview
            SubscribeSubject ComPorts
            -> Index(Operand=StringProperty(Value=HasSideCameraRight))
            -> NotEqual(Operand=StringProperty(Value=0))
            -> Condition => #28
                WorkflowInput Source1
                -> WorkflowOutput
            #24, #28 -> SubscribeWhen

            GroupWorkflow BodyCamera => #30
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=BodyCamera))
                -> PropertyMapping(SerialNumber) => #2
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=BodyCamera_ExposureTime))
                -> Bonsai.Scripting.Expressions.ExpressionTransform "Convert To Float"
                  Expression: Convert.ToSingle(it)
                -> PropertyMapping(ExposureTime) => #6
                SubscribeSubject ComPorts
                -> Index(Operand=StringProperty(Value=BodyCamera_Gain))
                -> Bonsai.Scripting.Expressions.ExpressionTransform "Convert To Float"
                  Expression: Convert.ToSingle(it)
                -> PropertyMapping(Gain) => #10
                #2, #6, #10 -> AllenNeuralDynamics.Core.AindSpinnakerCapture
                  Index=nil
                  SerialNumber=22511912
                  ColorProcessing=Default
                  ExposureTime=1000
                  Gain=8
                  Binning=1
                  Gamma=nil
                  PixelFormat=Mono8
                  RegionOfInterest(X=0, Y=0, Width=0, Height=0)
                  AdcBitDepth=Bit8
                -> MemberSelector(Selector=Image)
            SubscribeSubject ComPorts
            -> Index(Operand=StringProperty(Value=HasBodyCamera))
            -> NotEqual(Operand=StringProperty(Value=0))
            -> Condition => #34
                WorkflowInput Source1
                -> WorkflowOutput
            #30, #34 -> SubscribeWhen
        SubscribeSubject CameraStartType
        -> Equal(Operand=IntProperty(Value=2))
        -> Condition => #3
            WorkflowInput Source1
            -> WorkflowOutput
        #0, #3 -> SubscribeWhen
    SubscribeSubject ComPorts
    -> Index(Operand=StringProperty(Value=HighSpeedCamera))
    -> NotEqual(Operand=StringProperty(Value=0))
    -> Condition => #4
        WorkflowInput Source1
        -> WorkflowOutput
    #0, #4 -> SubscribeWhen

    SubscribeSubject CameraImage_Bottom_Preview
    -> VisualizerMapping(VisualizerType=TypeMapping<IplImageRotateVisualizer>) => #7
    SubscribeSubject CameraImage_Right_Preview
    -> VisualizerMapping(VisualizerType=TypeMapping<IplImageRotateVisualizer>) => #9
    #7, #9 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder CameraPreview(ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")

    SubscribeSubject FromBonsaiOSC
    -> Bonsai.Osc.Parse(Address=/stopcamerapreview, TypeTag=i)
    -> Take(Count=1)
    -> WorkflowOutput
-> Repeat

SubscribeSubject SniffDetectorEvents
-> AllenNeuralDynamics.SniffDetector.Parse(Register=AllenNeuralDynamics.SniffDetector.TimestampedRawVoltage) => #22
Annotation(Text=UseThisToVisualizeSniffDetector) => #23
#22, #23 -> MemberSelector(Selector=Value)
