WorkflowBuilder(Version=2.7.3)
Disable Bonsai.IO.StartProcess
  FileName=../../allen_env/scripts/python.exe
  Arguments='"C:\Users\neurogears\Documents\git\AllenND\raw_workflow\dynamic-foraging-task\src\foraging_gui\Foraging.py"'

GroupWorkflow Init
    BehaviorSubject<System.String> RewardOutcome
    BehaviorSubject<System.Object> RewardDeliveryLeft
    BehaviorSubject<System.Object> RewardDeliveryRight
    BehaviorSubject<System.Object> TrialEnd
    BehaviorSubject<System.Boolean> DelayStart
    BehaviorSubject<System.Boolean> GoCue

    Bonsai.Shaders.CreateWindow
      Width=640
      Height=480
      VSync=On
      SwapSync=false
      ClearColor=Black
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Hidden
      WindowState=Minimized
      DisplayDevice=Primary
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false

GroupWorkflow CreateOscClient
    Bonsai.Osc.CreateTcpServer(Name=BonsaiOSC, Port=4032, NoDelay=false, AllowNatTraversal=true)
    Bonsai.Osc.CreateTcpServer(Name=BonsaiOSC2, Port=4033, NoDelay=false, AllowNatTraversal=true)
    Bonsai.Osc.CreateTcpServer(Name=BonsaiOSC3, Port=4034, NoDelay=false, AllowNatTraversal=true)
    Bonsai.Osc.CreateTcpServer(Name=BonsaiOSC4, Port=4035, NoDelay=false, AllowNatTraversal=true)

    Bonsai.Osc.ReceiveMessage(Address="", TypeTag="", Connection=BonsaiOSC)
    -> PublishSubject FromBonsaiOSC

    Bonsai.Osc.ReceiveMessage(Address="", TypeTag="", Connection=BonsaiOSC2)
    -> PublishSubject FromBonsaiOSC2

    Bonsai.Osc.ReceiveMessage(Address="", TypeTag="", Connection=BonsaiOSC4)
    -> PublishSubject FromBonsaiOSC4

    Bonsai.Osc.ReceiveMessage(Address="", TypeTag="", Connection=BonsaiOSC3)
    -> PublishSubject FromBonsaiOSC3

    BehaviorSubject<Bonsai.Osc.Message> ToBonsaiOSC
    -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC, Address="")

    BehaviorSubject<Bonsai.Osc.Message> ToBonsaiOSC2
    -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC2, Address="")

    BehaviorSubject<Bonsai.Osc.Message> ToBonsaiOSC3
    -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC3, Address="")

    BehaviorSubject<Bonsai.Osc.Message> ToBonsaiOSC4
    -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC4, Address="")

GroupWorkflow TrialLogic
    SubscribeSubject Start
    -> Take(Count=1) => #1
    SubscribeSubject ResponseTime
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #4
    SubscribeSubject RewardConsumeTime
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.fromSeconds(it)
    -> PropertyMapping(DueTime) => #7
    SubscribeSubject ITI
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #10
    #1, #10 -> SelectMany ITI
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=1))
        -> Condition => #2
            WorkflowInput Source1
            -> WorkflowOutput
        ExternalizedMapping(DueTime) => #3
        #2, #3 -> Bonsai.Shaders.Delay(DueTime=PT1S)
        -> WorkflowOutput
    -> MulticastSubject DelayStart => #12
    SubscribeSubject DelayTime
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #15
    #12, #15 -> SelectMany DelayPeriod
        SubscribeSubject Licks
        -> BooleanProperty(Value=false) => #1
        WorkflowInput Source1 => #2
        ExternalizedMapping(DueTime) => #3
        #2, #3 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
        -> BooleanProperty(Value=true) => #5
        #5, #1 -> Merge
        -> Take(Count=1)
        -> Condition "No Licks"
            WorkflowInput Source1
            -> WorkflowOutput
        -> Repeat
        -> Take(Count=1)
        -> WorkflowOutput
    -> MulticastSubject GoCue => #17
    #17, #4 -> SelectMany ResponseInterval
        SubscribeSubject Licks => #0
        ExternalizedMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT1S, Period=PT0S)
        -> StringProperty(Value=NoResponse) => #3
        #3, #0 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Reward(Description=Reward)
        WorkflowInput Source1 => #0
        -> Condition LickLeft
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Left))
            -> WorkflowOutput
        -> SelectMany DetermineOutcome => #2
            SubscribeSubject IsLeftRewarded => #0
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> MulticastSubject RewardDeliveryLeft
            -> StringProperty(Value=RewardLeft) => #3
            #0 -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=ErrorLeft) => #6
            #3, #6 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition LickRight
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Right))
            -> WorkflowOutput
        -> SelectMany DetermineOutcome => #4
            SubscribeSubject IsRightRewarded => #0
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> MulticastSubject RewardDeliveryRight
            -> StringProperty(Value=RewardRight) => #3
            #0 -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=ErrorRight) => #6
            #3, #6 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition Miss
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=NoResponse))
            -> WorkflowOutput
        -> StringProperty(Value=NoResponse) => #6
        Source2=#2, Source3=#4, Source5=#6 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> MulticastSubject RewardOutcome => #20
    #20, #7 -> SelectMany RewardConsumeTime
        WorkflowInput Source1 => #0
        ExternalizedMapping(DueTime) => #1
        #0, #1 -> Bonsai.Shaders.Delay(DueTime=PT1S)
        -> WorkflowOutput
    -> MulticastSubject TrialEnd
    -> Take(Count=1)
    -> Repeat
    -> WorkflowOutput

    SubscribeSubject ResponseTime
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #28
    SubscribeSubject RewardConsumeTime
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.fromSeconds(it)
    -> PropertyMapping(DueTime) => #31
    SubscribeSubject Start
    -> Take(Count=1)
    -> Equal(Operand=IntProperty(Value=3))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany
        SubscribeSubject ITIEndTime
        -> BooleanProperty(Value=true)
        -> WorkflowOutput
    -> MulticastSubject GoCue => #37
    #37, #28 -> SelectMany ResponseInterval
        SubscribeSubject Licks => #0
        ExternalizedMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT1S, Period=PT0S)
        -> StringProperty(Value=NoResponse) => #3
        #3, #0 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Reward(Description=Reward)
        WorkflowInput Source1 => #0
        -> Condition LickLeft
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Left))
            -> WorkflowOutput
        -> SelectMany DetermineOutcome => #2
            SubscribeSubject IsLeftRewarded => #0
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> MulticastSubject RewardDeliveryLeft
            -> StringProperty(Value=RewardLeft) => #3
            #0 -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=ErrorLeft) => #6
            #3, #6 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition LickRight
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Right))
            -> WorkflowOutput
        -> SelectMany DetermineOutcome => #4
            SubscribeSubject IsRightRewarded => #0
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> MulticastSubject RewardDeliveryRight
            -> StringProperty(Value=RewardRight) => #3
            #0 -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=ErrorRight) => #6
            #3, #6 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition Miss
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=NoResponse))
            -> WorkflowOutput
        -> StringProperty(Value=NoResponse) => #6
        Source2=#2, Source3=#4, Source5=#6 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> MulticastSubject RewardOutcome => #40
    #40, #31 -> SelectMany RewardConsumeTime
        WorkflowInput Source1 => #0
        ExternalizedMapping(DueTime) => #1
        #0, #1 -> Bonsai.Shaders.Delay(DueTime=PT1S)
        -> WorkflowOutput
    -> MulticastSubject TrialEnd
    -> Take(Count=1)
    -> Repeat

Disable GroupWorkflow Optogenetics
    SubscribeSubject Start => #0
    SubscribeSubject Location1Size
    -> IntProperty(Value=100)
    -> PropertyMapping(BufferSize) => #3
    SubscribeSubject Location2Size
    -> IntProperty(Value=100)
    -> PropertyMapping(BufferSize) => #6
    SubscribeSubject Trigger_Location1
    -> PropertyMapping(Value) => #8
    SubscribeSubject TriggerITIStart_Wave1
    -> PropertyMapping(Value) => #10
    #0, #10 -> SelectMany TriggerITI_Wave1 => #11
        ExternalizedMapping(Value)
        -> IntProperty(Value=1)
        -> Take(Count=1)
        -> Bonsai.Scripting.IronPython.PythonSelectMany StartTrigger
          Script:
            import random

            @returns(bool)
            def process(value):

              if value ==1 or value ==2:
                 v = True
              else:
                 v = False

              yield v
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    #11, #8 -> SelectMany Trigger_Location1 => #12
        ExternalizedMapping(Value)
        -> IntProperty(Value=1)
        -> Take(Count=1)
        -> Bonsai.Scripting.IronPython.PythonSelectMany StartTrigger
          Script:
            import random

            @returns(bool)
            def process(value):

              if value ==1:
                 v = True
              else:
                 v = False

              yield v
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    #12, #3 -> SelectMany Wave1_Location1
        SubscribeSubject WaveForm1_1
        -> Take(Count=1) => #1
        ExternalizedMapping(BufferSize) => #2
        #1, #2 -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=5000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=100
          Channels(AnalogOutputChannelConfiguration(ChannelName=Out, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao0, VoltageUnits=Volts))
        -> IntProperty(Value=1)
        -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC4, Address=/FinishOfWave1_1)
        -> WorkflowOutput
    SubscribeSubject Trigger_Location2
    -> PropertyMapping(Value) => #15
    #11, #15 -> SelectMany Trigger_Location2 => #16
        ExternalizedMapping(Value)
        -> IntProperty(Value=1)
        -> Take(Count=1)
        -> Bonsai.Scripting.IronPython.PythonSelectMany StartTrigger
          Script:
            import random

            @returns(bool)
            def process(value):

              if value ==1:
                 v = True
              else:
                 v = False

              yield v
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    #16, #6 -> SelectMany Wave1_Location2
        SubscribeSubject WaveForm1_2
        -> Take(Count=1) => #1
        ExternalizedMapping(BufferSize) => #2
        #1, #2 -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=5000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=100
          Channels(AnalogOutputChannelConfiguration(ChannelName=Out, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao1, VoltageUnits=Volts))
        -> IntProperty(Value=1)
        -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC4, Address=/FinishOfWave1_2)
        -> WorkflowOutput

    SubscribeSubject Start => #18
    SubscribeSubject Location1Size
    -> IntProperty(Value=100)
    -> PropertyMapping(BufferSize) => #21
    SubscribeSubject Location2Size
    -> IntProperty(Value=100)
    -> PropertyMapping(BufferSize) => #24
    SubscribeSubject TriggerITIStart_Wave2
    -> PropertyMapping(Value) => #26
    #18, #26 -> SelectMany TriggerITI_Wave2 => #27
        ExternalizedMapping(Value)
        -> IntProperty(Value=0)
        -> Take(Count=1)
        -> Bonsai.Scripting.IronPython.PythonSelectMany StartTrigger
          Script:
            import random

            @returns(bool)
            def process(value):

              if value ==1 or value ==2:
                 v = True
              else:
                 v = False

              yield v
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    SubscribeSubject Trigger_Location2
    -> PropertyMapping(Value) => #29
    SubscribeSubject Trigger_Location1
    -> PropertyMapping(Value) => #31
    #27, #31 -> SelectMany Trigger_Location1 => #32
        ExternalizedMapping(Value)
        -> IntProperty(Value=1)
        -> Take(Count=1)
        -> Bonsai.Scripting.IronPython.PythonSelectMany StartTrigger
          Script:
            import random

            @returns(bool)
            def process(value):

              if value ==1:
                 v = True
              else:
                 v = False

              yield v
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    #32, #21 -> SelectMany Wave2_Location1
        SubscribeSubject WaveForm2_1
        -> Take(Count=1) => #1
        ExternalizedMapping(BufferSize) => #2
        #1, #2 -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=5000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=100
          Channels(AnalogOutputChannelConfiguration(ChannelName=Out, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao0, VoltageUnits=Volts))
        -> IntProperty(Value=1)
        -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC4, Address=/FinishOfWave2_1)
        -> WorkflowOutput
    #27, #29 -> SelectMany Trigger_Location2 => #34
        ExternalizedMapping(Value)
        -> IntProperty(Value=1)
        -> Take(Count=1)
        -> Bonsai.Scripting.IronPython.PythonSelectMany StartTrigger
          Script:
            import random

            @returns(bool)
            def process(value):

              if value ==1:
                 v = True
              else:
                 v = False

              yield v
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    #34, #24 -> SelectMany Wave2_Location2
        SubscribeSubject WaveForm2_2
        -> Take(Count=1) => #1
        ExternalizedMapping(BufferSize) => #2
        #1, #2 -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=5000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=100
          Channels(AnalogOutputChannelConfiguration(ChannelName=Out, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao1, VoltageUnits=Volts))
        -> IntProperty(Value=1)
        -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC4, Address=/FinishOfWave2_2)
        -> WorkflowOutput

    SubscribeSubject GoCue => #36
    SubscribeSubject Location1Size
    -> PropertyMapping(BufferSize) => #38
    SubscribeSubject Location2Size
    -> PropertyMapping(BufferSize) => #40
    SubscribeSubject TriggerGoCue_Wave1
    -> PropertyMapping(Value) => #42
    #36, #42 -> SelectMany TriggerGoCue_Wave1 => #43
        ExternalizedMapping(Value)
        -> IntProperty(Value=0)
        -> Take(Count=1)
        -> Bonsai.Scripting.IronPython.PythonSelectMany StartTrigger
          Script:
            import random

            @returns(bool)
            def process(value):

              if value ==1 or value ==2:
                 v = True
              else:
                 v = False

              yield v
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    SubscribeSubject Trigger_Location1
    -> PropertyMapping(Value) => #45
    #43, #45 -> SelectMany Trigger_Location1 => #46
        ExternalizedMapping(Value)
        -> IntProperty(Value=1)
        -> Take(Count=1)
        -> Bonsai.Scripting.IronPython.PythonSelectMany StartTrigger
          Script:
            import random

            @returns(bool)
            def process(value):

              if value ==1:
                 v = True
              else:
                 v = False

              yield v
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    #46, #38 -> SelectMany Wave1_Location1
        SubscribeSubject WaveForm1_1
        -> Take(Count=1) => #1
        ExternalizedMapping(BufferSize) => #2
        #1, #2 -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=5000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=25002
          Channels(AnalogOutputChannelConfiguration(ChannelName=Out, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao0, VoltageUnits=Volts))
        -> IntProperty(Value=1)
        -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC4, Address=/FinishOfWave1_1)
        -> WorkflowOutput
    SubscribeSubject Trigger_Location2
    -> PropertyMapping(Value) => #49
    #43, #49 -> SelectMany Trigger_Location2 => #50
        ExternalizedMapping(Value)
        -> IntProperty(Value=1)
        -> Take(Count=1)
        -> Bonsai.Scripting.IronPython.PythonSelectMany StartTrigger
          Script:
            import random

            @returns(bool)
            def process(value):

              if value ==1:
                 v = True
              else:
                 v = False

              yield v
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    #50, #40 -> SelectMany Wave1_Location2
        SubscribeSubject WaveForm1_2
        -> Take(Count=1) => #1
        ExternalizedMapping(BufferSize) => #2
        #1, #2 -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=5000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=25002
          Channels(AnalogOutputChannelConfiguration(ChannelName=Out, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao1, VoltageUnits=Volts))
        -> IntProperty(Value=1)
        -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC4, Address=/FinishOfWave1_2)
        -> WorkflowOutput

    SubscribeSubject GoCue => #52
    SubscribeSubject Location1Size
    -> PropertyMapping(BufferSize) => #54
    SubscribeSubject Location2Size
    -> PropertyMapping(BufferSize) => #56
    SubscribeSubject TriggerGoCue_Wave2
    -> PropertyMapping(Value) => #58
    #52, #58 -> SelectMany TriggerGoCue_Wave2 => #59
        ExternalizedMapping(Value)
        -> IntProperty(Value=0)
        -> Take(Count=1)
        -> Bonsai.Scripting.IronPython.PythonSelectMany StartTrigger
          Script:
            import random

            @returns(bool)
            def process(value):

              if value ==1 or value ==2:
                 v = True
              else:
                 v = False

              yield v
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    SubscribeSubject Trigger_Location1
    -> PropertyMapping(Value) => #61
    #59, #61 -> SelectMany Trigger_Location1 => #62
        ExternalizedMapping(Value)
        -> IntProperty(Value=1)
        -> Take(Count=1)
        -> Bonsai.Scripting.IronPython.PythonSelectMany StartTrigger
          Script:
            import random

            @returns(bool)
            def process(value):

              if value ==1:
                 v = True
              else:
                 v = False

              yield v
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    #62, #54 -> SelectMany Wave2_Location1
        SubscribeSubject WaveForm2_1
        -> Take(Count=1) => #1
        ExternalizedMapping(BufferSize) => #2
        #1, #2 -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=5000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=25002
          Channels(AnalogOutputChannelConfiguration(ChannelName=Out, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao0, VoltageUnits=Volts))
        -> IntProperty(Value=1)
        -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC4, Address=/FinishOfWave2_1)
        -> WorkflowOutput
    SubscribeSubject Trigger_Location2
    -> PropertyMapping(Value) => #65
    #59, #65 -> SelectMany Trigger_Location2 => #66
        ExternalizedMapping(Value)
        -> IntProperty(Value=1)
        -> Take(Count=1)
        -> Bonsai.Scripting.IronPython.PythonSelectMany StartTrigger
          Script:
            import random

            @returns(bool)
            def process(value):

              if value ==1:
                 v = True
              else:
                 v = False

              yield v
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    #66, #56 -> SelectMany Wave2_Location2
        SubscribeSubject WaveForm2_2
        -> Take(Count=1) => #1
        ExternalizedMapping(BufferSize) => #2
        #1, #2 -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=5000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=25002
          Channels(AnalogOutputChannelConfiguration(ChannelName=Out, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao1, VoltageUnits=Volts))
        -> IntProperty(Value=1)
        -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC4, Address=/FinishOfWave2_2)
        -> WorkflowOutput

GroupWorkflow "Hardware Outputs"
    GroupWorkflow Audio
        Bonsai.Audio.AudioReader(FileName=bell.wav, BufferLength=0, SampleRate=0)
        -> BehaviorSubject AudioWaveform

        SubscribeSubject GoCue
        -> SelectMany "Play sound"
            SubscribeSubject AudioWaveform
            -> Bonsai.Audio.AudioPlayback(SampleRate=44100, State=Playing)
            -> Last
            -> Take(Count=1)
            -> WorkflowOutput

            BooleanProperty(Value=true)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Port0)
            -> MulticastSubject BehaviorCommands

        Disable BehaviorSubject<Bonsai.Harp.HarpMessage> SoundCardCommands
        -> Disable Harp.SoundCard.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM8)
        -> Disable BehaviorSubject SoundCardEvents

        Disable SubscribeSubject GoCue
        -> Disable Harp.SoundCard.CreateMessage(Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(MessageType=Write, Value=2))
        -> Disable MulticastSubject SoundCardCommands

        Disable Bonsai.IO.StartProcess
          FileName=C:\Users\xinxin.yin\Documents\HarpSoundCard\Interface\toSoundCard.exe
          Arguments="C:\Users\xinxin.yin\Documents\HarpSoundCard\Interface\toSoundCard\i02_Samples.bin 4 0 96000"
        -> Disable Harp.SoundCard.CreateMessage(Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(MessageType=Write, Value=2))
        -> Disable MulticastSubject SoundCardCommands

    GroupWorkflow RewardControl
        SubscribeSubject LeftValueSize
        -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke0Valve)
        -> MulticastSubject BehaviorCommands

        SubscribeSubject RightValueSize
        -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke1Valve)
        -> MulticastSubject BehaviorCommands

        SubscribeSubject LeftValueSize1
        -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke0Valve)
        -> MulticastSubject BehaviorCommands

        SubscribeSubject RightValueSize1
        -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke1Valve)
        -> MulticastSubject BehaviorCommands

        SubscribeSubject RewardDeliveryLeft
        -> IntProperty(Value=0) => #13
        SubscribeSubject ManualWater_Left => #14
        #14, #13 -> Merge
        -> Bonsai.Harp.CF.BehaviorCommand(Type=ToggleOutput, Mask=Poke0Valve)
        -> MulticastSubject BehaviorCommands

        SubscribeSubject RewardDeliveryRight
        -> IntProperty(Value=0) => #19
        SubscribeSubject ManualWater_Right => #20
        #20, #19 -> Merge
        -> Bonsai.Harp.CF.BehaviorCommand(Type=ToggleOutput, Mask=Poke1Valve)
        -> MulticastSubject BehaviorCommands

    Harp.Behavior.CreateMessage(Payload=Harp.Behavior.CreateOutputPulseEnablePayload(MessageType=Write, Value="DOPort2 SupplyPort0 SupplyPort1 SupplyPort2 DO0 DO1 DO2 DO3"))
    -> MulticastSubject BehaviorCommands

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(MessageType=Write, Register=Harp.Behavior.TimestampedOutputToggle) => #5
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=DO0))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> Condition => #9
        WorkflowInput Source1
        -> WorkflowOutput
    #9, #5 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/TrialStartTimeHarp)
    -> MulticastSubject ToBonsaiOSC

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(MessageType=Write, Register=Harp.Behavior.TimestampedOutputToggle) => #16
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=DO1))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> Condition => #20
        WorkflowInput Source1
        -> WorkflowOutput
    #20, #16 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/DelayStartTimeHarp)
    -> MulticastSubject ToBonsaiOSC

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(MessageType=Write, Register=Harp.Behavior.TimestampedOutputToggle) => #27
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=DO3))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> Condition => #31
        WorkflowInput Source1
        -> WorkflowOutput
    #31, #27 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/TrialEndTimeHarp)
    -> MulticastSubject ToBonsaiOSC

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(MessageType=Write, Register=Harp.Behavior.TimestampedOutputToggle) => #38
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=SupplyPort0))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> Condition => #42
        WorkflowInput Source1
        -> WorkflowOutput
    #42, #38 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/LeftRewardDeliveryTimeHarp)
    -> MulticastSubject ToBonsaiOSC2

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(MessageType=Write, Register=Harp.Behavior.TimestampedOutputToggle) => #49
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=SupplyPort1))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> Condition => #53
        WorkflowInput Source1
        -> WorkflowOutput
    #53, #49 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/RightRewardDeliveryTimeHarp)
    -> MulticastSubject ToBonsaiOSC2

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(MessageType=Write, Register=Harp.Behavior.TimestampedOutputToggle) => #60
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=DOPort2))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> Condition => #64
        WorkflowInput Source1
        -> WorkflowOutput
    #64, #60 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/GoCueTimeHarp)
    -> MulticastSubject ToBonsaiOSC

    SubscribeSubject GoCue
    -> Harp.Behavior.CreateMessage(Payload=Harp.Behavior.CreateOutputTogglePayload(MessageType=Write, Value=DOPort2))
    -> MulticastSubject BehaviorCommands

    Harp.Behavior.CreateMessage(Payload=Harp.Behavior.CreatePulseDOPort2Payload(MessageType=Write, Value=5))
    -> MulticastSubject BehaviorCommands

    SubscribeSubject Start
    -> Harp.Behavior.CreateMessage(Payload=Harp.Behavior.CreateOutputTogglePayload(MessageType=Write, Value=DO0))
    -> MulticastSubject BehaviorCommands

    SubscribeSubject ITI => #78
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it*1000
    -> PropertyMapping(Value) => #80
    #78, #80 -> SelectMany
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        Source2=#0, Source2=#1 -> Harp.Behavior.CreateMessage(Payload=Harp.Behavior.CreatePulseDO0Payload(MessageType=Write, Value=1000))
        -> MulticastSubject BehaviorCommands
        -> WorkflowOutput

    SubscribeSubject DelayStart
    -> Harp.Behavior.CreateMessage(Payload=Harp.Behavior.CreateOutputTogglePayload(MessageType=Write, Value=DO1))
    -> MulticastSubject BehaviorCommands

    SubscribeSubject DelayTime => #85
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it*1000
    -> PropertyMapping(Value) => #87
    #85, #87 -> SelectMany
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        Source2=#0, Source2=#1 -> Harp.Behavior.CreateMessage(Payload=Harp.Behavior.CreatePulseDO1Payload(MessageType=Write, Value=50))
        -> MulticastSubject BehaviorCommands
        -> WorkflowOutput

    SubscribeSubject TrialEnd
    -> Harp.Behavior.CreateMessage(Payload=Harp.Behavior.CreateOutputTogglePayload(MessageType=Write, Value=DO3))
    -> MulticastSubject BehaviorCommands

    Harp.Behavior.CreateMessage(Payload=Harp.Behavior.CreatePulseDO3Payload(MessageType=Write, Value=100))
    -> MulticastSubject BehaviorCommands

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(MessageType=Event, Register=Harp.Behavior.TimestampedPortDigitalInput) => #95
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DI3))
    -> Equal(Operand=WorkflowProperty<System.Byte>(Value=0))
    -> DistinctUntilChanged
    -> Condition => #100
        WorkflowInput Source1
        -> WorkflowOutput
    #100, #95 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> PublishSubject ITIEndTime

    Bonsai.Harp.CreateMessage(Payload=Bonsai.Harp.CreateMessagePayload(MessageType=Write, Address=110, PayloadType=U8, Value=4))

GroupWorkflow HardwareInputs
    BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands
    -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM4)
    -> PublishSubject BehaviorEvents

    SubscribeSubject BehaviorEvents
    -> Bonsai.Harp.FilterMessage(MessageType=Event, Register=Bonsai.Harp.FilterMessageAddress(Address=44))
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
    -> BehaviorSubject Timestamps

    Disable Bonsai.Windows.Input.KeyDown(Filter=L, SuppressRepetitions=false)
    -> Disable PublishSubject LeftKeyPress
    -> Disable StringProperty(Value=Left) => #9
    Disable Bonsai.Windows.Input.KeyDown(Filter=R, SuppressRepetitions=false)
    -> Disable PublishSubject RightKeyPress
    -> Disable StringProperty(Value=Right) => #12
    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(MessageType=Event, Register=Harp.Behavior.TimestampedPortDigitalInput) => #14
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DI0))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> DistinctUntilChanged
    -> Condition => #19
        WorkflowInput Source1
        -> WorkflowOutput
    #19, #14 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> PublishSubject LeftLickTime
    -> StringProperty(Value=Left) => #23
    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(MessageType=Event, Register=Harp.Behavior.TimestampedPortDigitalInput) => #25
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DI1))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> DistinctUntilChanged
    -> Condition => #30
        WorkflowInput Source1
        -> WorkflowOutput
    #30, #25 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> PublishSubject RightLickTime
    -> StringProperty(Value=Right) => #34
    #9, #12, #23, #34 -> Merge
    -> PublishSubject Licks

GroupWorkflow Parameters
    GroupWorkflow ReadFromOsc
        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/LeftValueSize, TypeTag=f)
        -> BehaviorSubject LeftValueSize

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/RightValueSize, TypeTag=f)
        -> BehaviorSubject RightValueSize

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/RewardConsumeTime, TypeTag=f)
        -> BehaviorSubject RewardConsumeTime

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Left_Bait, TypeTag=i)
        -> Equal(Operand=IntProperty(Value=1))
        -> BehaviorSubject IsLeftRewarded

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Right_Bait, TypeTag=i)
        -> Equal(Operand=IntProperty(Value=1))
        -> BehaviorSubject IsRightRewarded

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/start, TypeTag=i)
        -> PublishSubject Start

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/ITI, TypeTag=f)
        -> BehaviorSubject ITI

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/DelayTime, TypeTag=f)
        -> BehaviorSubject DelayTime

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/ResponseTime, TypeTag=f)
        -> BehaviorSubject ResponseTime

        Disable SubscribeSubject FromBonsaiOSC
        -> Disable Bonsai.Osc.Parse(Address=/TriggerITIStart_Wave1, TypeTag=i)
        -> Disable PublishSubject TriggerITIStart_Wave1

        Disable SubscribeSubject FromBonsaiOSC
        -> Disable Bonsai.Osc.Parse(Address=/TriggerITIStart_Wave2, TypeTag=i)
        -> Disable PublishSubject TriggerITIStart_Wave2

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Trigger_Location1, TypeTag=i)
        -> PublishSubject Trigger_Location1

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Trigger_Location2, TypeTag=i)
        -> PublishSubject Trigger_Location2

        Disable SubscribeSubject FromBonsaiOSC
        -> Disable Bonsai.Osc.Parse(Address=/TriggerGoCue_Wave1, TypeTag=i)
        -> Disable PublishSubject TriggerGoCue_Wave1

        Disable SubscribeSubject FromBonsaiOSC
        -> Disable Bonsai.Osc.Parse(Address=/TriggerGoCue_Wave2, TypeTag=i)
        -> Disable PublishSubject TriggerGoCue_Wave2

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Location1Size, TypeTag=i)
        -> PublishSubject Location1Size

        Disable SubscribeSubject FromBonsaiOSC
        -> Disable Bonsai.Osc.Parse(Address=/Location2Size, TypeTag=i)
        -> Disable PublishSubject Location2Size

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/TriggerSource, TypeTag=s)
        -> PublishSubject TriggerSource

        SubscribeSubject FromBonsaiOSC4
        -> Bonsai.Osc.Parse(Address=/WaveForm1_1, TypeTag=s)
        -> Parse(Pattern=%f, Separator=",")
        -> Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=F32, Channels=1)
        -> Bonsai.Dsp.Reshape(Channels=1, Rows=1)
        -> BehaviorSubject WaveForm1_1

        Disable SubscribeSubject FromBonsaiOSC4
        -> Disable Bonsai.Osc.Parse(Address=/WaveForm2_1, TypeTag=s)
        -> Disable Parse(Pattern=%f, Separator=",")
        -> Disable Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=F32, Channels=1)
        -> Disable Bonsai.Dsp.Reshape(Channels=0, Rows=1)
        -> Disable BehaviorSubject WaveForm2_1

        SubscribeSubject FromBonsaiOSC4
        -> Bonsai.Osc.Parse(Address=/WaveForm1_2, TypeTag=s)
        -> Parse(Pattern=%f, Separator=",")
        -> Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=F32, Channels=1)
        -> Bonsai.Dsp.Reshape(Channels=0, Rows=1)
        -> BehaviorSubject WaveForm1_2

        Disable SubscribeSubject FromBonsaiOSC4
        -> Disable Bonsai.Osc.Parse(Address=/WaveForm2_2, TypeTag=s)
        -> Disable Parse(Pattern=%f, Separator=",")
        -> Disable Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=F32, Channels=1)
        -> Disable Bonsai.Dsp.Reshape(Channels=0, Rows=1)
        -> Disable BehaviorSubject WaveForm2_2

        SubscribeSubject FromBonsaiOSC3
        -> Bonsai.Osc.Parse(Address=/ManualWater_Left, TypeTag=i)
        -> PublishSubject ManualWater_Left

        SubscribeSubject FromBonsaiOSC3
        -> Bonsai.Osc.Parse(Address=/ManualWater_Right, TypeTag=i)
        -> PublishSubject ManualWater_Right

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/OptogeneticsCalibration, TypeTag=i)
        -> PublishSubject OptogeneticsCalibration

        SubscribeSubject FromBonsaiOSC3
        -> Bonsai.Osc.Parse(Address=/LeftValueSize1, TypeTag=f)
        -> BehaviorSubject LeftValueSize1

        SubscribeSubject ToBonsaiOSC3
        -> Bonsai.Osc.Parse(Address=/RightValueSize1, TypeTag=f)
        -> BehaviorSubject RightValueSize1

    GroupWorkflow WriteToOsc
        SubscribeSubject RightLickTime
        -> Bonsai.Osc.Format(Address=/RightLickTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject LeftLickTime
        -> Bonsai.Osc.Format(Address=/LeftLickTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject Timestamps => #6
        SubscribeSubject Start => #7
        #7, #6 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/TrialStartTime)
        -> MulticastSubject ToBonsaiOSC

        SubscribeSubject Timestamps => #13
        SubscribeSubject DelayStart => #14
        #14, #13 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/DelayStartTime)
        -> MulticastSubject ToBonsaiOSC

        SubscribeSubject Timestamps => #20
        SubscribeSubject GoCue => #21
        #21, #20 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/GoCueTime)
        -> MulticastSubject ToBonsaiOSC

        SubscribeSubject Timestamps => #27
        SubscribeSubject RewardOutcome => #28
        #28, #27 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/RewardOutcomeTime)
        -> MulticastSubject ToBonsaiOSC

        SubscribeSubject Timestamps => #34
        SubscribeSubject TrialEnd => #35
        #35, #34 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/TrialEndTime)
        -> MulticastSubject ToBonsaiOSC

        Disable SubscribeSubject Timestamps => #41
        Disable SubscribeSubject LeftKeyPress => #42
        #42, #41 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Disable Bonsai.Osc.Format(Address=/LeftLickTime)
        -> Disable MulticastSubject ToBonsaiOSC2

        Disable SubscribeSubject Timestamps => #48
        Disable SubscribeSubject RightKeyPress => #49
        #49, #48 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Disable Bonsai.Osc.Format(Address=/RightLickTime)
        -> Disable MulticastSubject ToBonsaiOSC2

        SubscribeSubject Timestamps => #55
        SubscribeSubject RewardDeliveryRight => #56
        #56, #55 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/RightRewardDeliveryTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject Timestamps => #62
        SubscribeSubject RewardDeliveryLeft => #63
        #63, #62 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/LeftRewardDeliveryTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject RewardOutcome
        -> Bonsai.Osc.Format(Address=/RewardOutcome)
        -> MulticastSubject ToBonsaiOSC

Disable Defer UnitTest
    Bonsai.IO.StartProcess(FileName=../../allen_env/scripts/python.exe, Arguments=../foraging_gui/Test.py)

    SubscribeSubject FromBonsaiOSC
    -> Bonsai.Osc.Parse(Address=/StartTest, TypeTag=s)
    -> SelectMany Echo => #3
        IntProperty(Value=0)
        -> Bonsai.Osc.Format(Address=/Test)
        -> MulticastSubject ToBonsaiOSC
        -> StringProperty(Value=Hi)
        -> Bonsai.Osc.Format(Address=/Test2)
        -> MulticastSubject ToBonsaiOSC
        -> IntProperty(Value=0)
        -> Bonsai.Osc.Format(Address=/Test)
        -> MulticastSubject ToBonsaiOSC2
        -> StringProperty(Value=HiBack)
        -> Bonsai.Osc.Format(Address=/Test2)
        -> MulticastSubject ToBonsaiOSC2
        -> Take(Count=1)
        -> WorkflowOutput
    SubscribeSubject FromBonsaiOSC
    -> Bonsai.Osc.Parse(Address=/EndTest, TypeTag=s) => #5
    #3, #5 -> TakeUntil
    -> Delay(DueTime=PT5S)
    -> StringProperty(Value="Passed Test!")
    -> WorkflowOutput

GroupWorkflow Logging
    ExternalizedMapping(Value)
    -> StringProperty(Value=C:\Data)
    -> Take(Count=1) => #2
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
      Expression: DateTime.Now.ToString("dd_MM_yyyy_HH_mm_ss")
    #2, #3 -> Zip
    -> Format(Format={0}\{1}, Selector="Item1,Item2")
    -> AsyncSubject RootPath

    SubscribeSubject ToBonsaiOSC
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=ToBonsaiOSC)

    SubscribeSubject ToBonsaiOSC2
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=ToBonsaiOSC2)

    SubscribeSubject ToBonsaiOSC3
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=ToBonsaiOSC3)

    SubscribeSubject ToBonsaiOSC4
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=ToBonsaiOSC4)

    SubscribeSubject FromBonsaiOSC
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=FromBonsaiOSC)

    SubscribeSubject FromBonsaiOSC2
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=FromBonsaiOSC2)

    SubscribeSubject FromBonsaiOSC3
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=FromBonsaiOSC3)

    SubscribeSubject FromBonsaiOSC4
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=FromBonsaiOSC4)

    SubscribeSubject BehaviorEvents
    -> IncludeWorkflow(Path=Extensions\LogHarpDemux.bonsai, LogName=BehaviorEvents)

Disable GroupWorkflow Optogenetics2
    SubscribeSubject WaveForm1_1 => #0
    SubscribeSubject Location1Size
    -> PropertyMapping(BufferSize) => #2
    SubscribeSubject WaveForm1_2 => #3
    #0, #3 -> Zip
    -> Bonsai.Dsp.Concat(Axis=0) => #5
    SubscribeSubject TriggerSource
    -> PropertyMapping(TriggerSource) => #7
    #5, #2, #7 -> SelectMany
        WorkflowInput Source1 => #0
        ExternalizedMapping(BufferSize, TriggerSource) => #1
        Source2=#0, Source2=#1 -> Bonsai.DAQmx.TriggeredAnalogOutput
          SignalSource=""
          TriggerSource=/Dev1/PFI0
          SampleRate=5000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=50002
          Channels
            AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao0, VoltageUnits=Volts)
            AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao1, VoltageUnits=Volts)
        -> IntProperty(Value=1)
        -> Bonsai.Osc.Format(Address=/FinishOfWave1_1)
        -> MulticastSubject ToBonsaiOSC4
        -> WorkflowOutput

    SubscribeSubject OptogeneticsCalibration
    -> Harp.Behavior.CreateMessage(Payload=Harp.Behavior.CreatePulseDO0Payload(MessageType=Write, Value=10))
    -> MulticastSubject BehaviorCommands
    -> Harp.Behavior.CreateMessage(Payload=Harp.Behavior.CreateOutputTogglePayload(MessageType=Write, Value=DO0))
    -> MulticastSubject BehaviorCommands
